#====================
#VISUALIZATION
#====================
#/vis/open OGLIQt
#/vis/viewer/reset
#/vis/viewer/set/viewpointThetaPhi 45 45
#/vis/viewer/zoom 3
#/vis/viewer/set/style surface
#/vis/drawVolume
#/vis/scene/add/axes
#/vis/scene/endOfEventAction accumulate -4

#====================
#====================
#SET MATERIALS
#====================
/gate/geometry/setMaterialDatabase GateMaterials.db

#====================
# WORLD
#====================
/gate/world/geometry/setXLength 1000. mm
/gate/world/geometry/setYLength 1000. mm
/gate/world/geometry/setZLength 1000. mm

#====================
# PORTAMUESTRA (cuerpo del cilindro)
#====================
/gate/world/daughters/name portamuestra
/gate/world/daughters/insert cylinder
/gate/portamuestra/setMaterial Aluminium
#/gate/portamuestra/vis/setColor white
/gate/portamuestra/geometry/setRmax 74. mm
/gate/portamuestra/geometry/setRmin 73.75 mm
/gate/portamuestra/geometry/setHeight 199.5 mm
/gate/portamuestra/placement/setRotationAxis 1 0 0
/gate/portamuestra/placement/setRotationAngle 90 deg
#/gate/portamuestra/vis/forceWireframe
/gate/geometry/rebuild

#====================
# TAPA PORTAMUESTRA (Parte inferior)
#====================
/gate/world/daughters/name tapaportamuestra
/gate/world/daughters/insert cylinder
/gate/tapaportamuestra/setMaterial Aluminium
#/gate/tapaportamuestra/vis/setColor white
/gate/tapaportamuestra/geometry/setRmax 74. mm
/gate/tapaportamuestra/geometry/setRmin 0. mm
/gate/tapaportamuestra/geometry/setHeight 0.5 mm
/gate/tapaportamuestra/placement/setRotationAxis 1 0 0
/gate/tapaportamuestra/placement/setRotationAngle 90 deg
/gate/tapaportamuestra/placement/setTranslation 0. -99.75 0. mm
#/gate/tapaportamuestra/vis/forceWireframe
/gate/geometry/rebuild

#====================
# CONTENEDOR DE MUESTRA 
#====================
/gate/world/daughters/name contenedormuestra
/gate/world/daughters/insert cylinder
/gate/contenedormuestra/setMaterial PVC
#/gate/contenedormuestra/vis/setColor cyan
/gate/contenedormuestra/geometry/setRmax 50.97 mm
/gate/contenedormuestra/geometry/setRmin 50.47 mm
/gate/contenedormuestra/geometry/setHeight 129.5 mm
/gate/contenedormuestra/placement/setRotationAxis 1 0 0
/gate/contenedormuestra/placement/setRotationAngle 90 deg
#/gate/contenedormuestra/vis/forceWireframe
/gate/geometry/rebuild

#====================
# TAPA CONTENEDORMUESTRA (Parte superior) 
#====================
/gate/world/daughters/name tapacontenedorsup
/gate/world/daughters/insert cylinder
/gate/tapacontenedorsup/setMaterial PVC
#/gate/tapacontenedorsup/vis/setColor cyan
/gate/tapacontenedorsup/geometry/setRmax 62.63 mm
/gate/tapacontenedorsup/geometry/setRmin 61.63 mm
/gate/tapacontenedorsup/geometry/setHeight 20.8 mm
/gate/tapacontenedorsup/placement/setRotationAxis 1 0 0
/gate/tapacontenedorsup/placement/setRotationAngle 90 deg
/gate/tapacontenedorsup/placement/setTranslation 0. 75.15 0. mm
#/gate/tapacontenedorsup/vis/forceWireframe
/gate/geometry/rebuild

#====================
# TAPA PARA LA TAPA CONTENEDORMUESTRA (Parte superior) 
#====================
/gate/world/daughters/name tapasup
/gate/world/daughters/insert cylinder
/gate/tapasup/setMaterial PVC
#/gate/tapasup/vis/setColor cyan
/gate/tapasup/geometry/setRmax 62.63 mm
/gate/tapasup/geometry/setRmin 0. mm
/gate/tapasup/geometry/setHeight 0.2 mm
/gate/tapasup/placement/setRotationAxis 1 0 0
/gate/tapasup/placement/setRotationAngle 90 deg
/gate/tapasup/placement/setTranslation 0. 64.76 0. mm
#/gate/tapasup/vis/forceWireframe
/gate/geometry/rebuild

#====================
# TAPA CONTENEDORMUESTRA (Parte inferior)
#====================
/gate/world/daughters/name tapacontenedormuestra
/gate/world/daughters/insert cylinder
/gate/tapacontenedormuestra/setMaterial PVC
#/gate/tapacontenedormuestra/vis/setColor cyan
/gate/tapacontenedormuestra/geometry/setRmax 50.97 mm
/gate/tapacontenedormuestra/geometry/setRmin 0. mm
/gate/tapacontenedormuestra/geometry/setHeight 0.5 mm
/gate/tapacontenedormuestra/placement/setRotationAxis 1 0 0
/gate/tapacontenedormuestra/placement/setRotationAngle 90 deg
/gate/tapacontenedormuestra/placement/setTranslation 0. -64.75 0. mm
#/gate/tapacontenedormuestra/vis/forceWireframe
/gate/geometry/rebuild

#====================
# SOPORTE DE TUBOS (con agujeros) 
#====================
/gate/world/daughters/name soportetubos
/gate/world/daughters/insert cylinder
/gate/soportetubos/setMaterial Polypropilene
#/gate/soportetubos/vis/setColor red
/gate/soportetubos/geometry/setRmax 50.965 mm
/gate/soportetubos/geometry/setRmin 0. mm
/gate/soportetubos/geometry/setHeight 25. mm
/gate/soportetubos/placement/setRotationAxis 1 0 0
/gate/soportetubos/placement/setRotationAngle 90 deg
/gate/soportetubos/placement/setTranslation 0. -12.5 0. mm
#/gate/soportetubos/vis/forceWireframe
/gate/geometry/rebuild

#====================
#GEOMETRY-CIRCULO MEDIO DEL SOPORTE DE TUBOS (donde va el tubo de referencia R)
#====================
/gate/world/daughters/name circulomedio
/gate/world/daughters/insert cylinder
/gate/circulomedio/setMaterial Polypropilene  
#/gate/circulomedio/vis/setColor red           
/gate/circulomedio/geometry/setRmax 8.6 mm
/gate/circulomedio/geometry/setRmin 8.55 mm
/gate/circulomedio/geometry/setHeight 25. mm
/gate/circulomedio/placement/setRotationAxis 1 0 0
/gate/circulomedio/placement/setRotationAngle 90 deg
/gate/circulomedio/placement/setTranslation 0. -12.5 0. mm
#/gate/circulomedio/vis/forceWireframe              
#/gate/circulomedio/vis/setVisible true
/gate/geometry/rebuild 

#====================
#GEOMETRY-CIRCULO EXTERNO DEL SOPORTE DE TUBOS (donde van los tubos del 1 al 12)
#====================
/gate/world/daughters/name circuloexterno
/gate/world/daughters/insert cylinder
/gate/circuloexterno/setMaterial Polypropilene  
#/gate/circuloexterno/vis/setColor red           
/gate/circuloexterno/geometry/setRmax 8.6 mm
/gate/circuloexterno/geometry/setRmin 8.55 mm
/gate/circuloexterno/geometry/setHeight 25. mm
/gate/circuloexterno/placement/setRotationAxis 1 0 0
/gate/circuloexterno/placement/setRotationAngle 90 deg
/gate/circuloexterno/placement/setTranslation 39. -12.5 0. mm
#/gate/circuloexterno/vis/forceWireframe              
#/gate/circuloexterno/vis/setVisible true
/gate/geometry/rebuild

#====================
# REPEAT-CIRCULO EXTERNO DEL SOPORTE DE TUBOS
#====================
/gate/circuloexterno/repeaters/insert ring
/gate/circuloexterno/ring/setRepeatNumber 12
/gate/circuloexterno/ring/setPoint1 0. 1. 0. mm
/gate/circuloexterno/ring/setPoint2 0. 0. 0. mm
/gate/circuloexterno/ring/disableAutoRotation
#/gate/circuloexterno/vis/forceWireframe
/gate/geometry/rebuild

#====================
#GEOMETRY-CIRCULO INTERNO DEL SOPORTE DE TUBOS (donde van los tubos del 13 al 18)
#====================
/gate/world/daughters/name circulointerno
/gate/world/daughters/insert cylinder
/gate/circulointerno/setMaterial Polypropilene  
#/gate/circulointerno/vis/setColor red           
/gate/circulointerno/geometry/setRmax 8.6 mm
/gate/circulointerno/geometry/setRmin 8.55 mm
/gate/circulointerno/geometry/setHeight 25. mm
/gate/circulointerno/placement/setRotationAxis 1 0 0
/gate/circulointerno/placement/setRotationAngle 90 deg
/gate/circulointerno/placement/setTranslation 17. -12.5 9.5 mm
#/gate/circulointerno/vis/forceWireframe              
/gate/geometry/rebuild

#====================
# REPEAT-CIRCULO INTERNO DEL SOPORTE DE TUBOS
#====================
/gate/circulointerno/repeaters/insert ring
/gate/circulointerno/ring/setRepeatNumber 6
/gate/circulointerno/ring/setPoint1 0. 1. 0. mm
/gate/circulointerno/ring/setPoint2 0. 0. 0. mm
/gate/circulointerno/ring/disableAutoRotation
#/gate/circulointerno/vis/forceWireframe
/gate/geometry/rebuild

#====================
# SOPORTE DE MADERA PARA CONTENEDOR DE MUESTRA 1
#====================
/gate/world/daughters/name soportemadera1
/gate/world/daughters/insert cylinder
/gate/soportemadera1/setMaterial Wood
#/gate/soportemadera1/vis/setColor yellow
/gate/soportemadera1/geometry/setRmax 55.5 mm
/gate/soportemadera1/geometry/setRmin 0. mm
/gate/soportemadera1/geometry/setHeight 9. mm
/gate/soportemadera1/placement/setRotationAxis 1 0 0
/gate/soportemadera1/placement/setRotationAngle 90 deg
/gate/soportemadera1/placement/setTranslation 0. -69.25 0. mm
#/gate/soportemadera1/vis/forceWireframe
/gate/geometry/rebuild

#====================
# SOPORTE DE MADERA PARA CONTENEDOR DE MUESTRA 2
#====================
/gate/world/daughters/name soportemadera2
/gate/world/daughters/insert box
/gate/soportemadera2/setMaterial Wood
#/gate/soportemadera2/vis/setColor yellow
/gate/soportemadera2/geometry/setXLength 30. mm
/gate/soportemadera2/geometry/setYLength 30. mm
/gate/soportemadera2/geometry/setZLength 15. mm
/gate/soportemadera2/placement/setRotationAxis 1 0 0
/gate/soportemadera2/placement/setRotationAngle 90 deg
/gate/soportemadera2/placement/setTranslation 0. -81.5 0. mm
#/gate/soportemadera2/vis/forceWireframe
/gate/geometry/rebuild

#====================
# SOPORTE DE MADERA PARA CONTENEDOR DE MUESTRA 3
#====================
/gate/world/daughters/name soportemadera3
/gate/world/daughters/insert cylinder
/gate/soportemadera3/setMaterial Wood
#/gate/soportemadera3/vis/setColor yellow
/gate/soportemadera3/geometry/setRmax 55.5 mm
/gate/soportemadera3/geometry/setRmin 0. mm
/gate/soportemadera3/geometry/setHeight 9. mm
/gate/soportemadera3/placement/setRotationAxis 1 0 0
/gate/soportemadera3/placement/setRotationAngle 90 deg
/gate/soportemadera3/placement/setTranslation 0. -93.45 0. mm
#/gate/soportemadera3/vis/forceWireframe
/gate/geometry/rebuild

#====================
#TAPA 1- tapa del tubo 1
#====================
/gate/world/daughters/name tapa1
/gate/world/daughters/insert cylinder
/gate/tapa1/setMaterial Polypropilene
#/gate/tapa1/vis/setColor white
/gate/tapa1/placement/setTranslation 39. 51. 0. mm
/gate/tapa1/geometry/setRmax 8.5 mm
/gate/tapa1/geometry/setRmin 0. mm
/gate/tapa1/geometry/setHeight 15. mm
/gate/tapa1/placement/setRotationAxis 1 0 0
/gate/tapa1/placement/setRotationAngle 90 deg
#/gate/tapa1/vis/forceWireframe
/gate/geometry/rebuild

#====================
#TAPA 2- tapa del tubo 2
#====================
/gate/world/daughters/name tapa2
/gate/world/daughters/insert cylinder
/gate/tapa2/setMaterial Polypropilene
#/gate/tapa2/vis/setColor white
/gate/tapa2/placement/setTranslation 33.8 51. 19.5 mm
/gate/tapa2/geometry/setRmax 8.5 mm
/gate/tapa2/geometry/setRmin 0. mm
/gate/tapa2/geometry/setHeight 15. mm
/gate/tapa2/placement/setRotationAxis 1 0 0
/gate/tapa2/placement/setRotationAngle 90 deg
#/gate/tapa2/vis/forceWireframe
/gate/geometry/rebuild

#====================
#TAPA 3- tapa del tubo 3
#====================
/gate/world/daughters/name tapa3
/gate/world/daughters/insert cylinder
/gate/tapa3/setMaterial Polypropilene
#/gate/tapa3/vis/setColor white
/gate/tapa3/placement/setTranslation 19.5 51. 33.8 mm
/gate/tapa3/geometry/setRmax 8.5 mm
/gate/tapa3/geometry/setRmin 0. mm
/gate/tapa3/geometry/setHeight 15. mm
/gate/tapa3/placement/setRotationAxis 1 0 0
/gate/tapa3/placement/setRotationAngle 90 deg
#/gate/tapa3/vis/forceWireframe
/gate/geometry/rebuild

#====================
#TAPA 4- tapa del tubo 4
#====================
/gate/world/daughters/name tapa4
/gate/world/daughters/insert cylinder
/gate/tapa4/setMaterial Polypropilene
#/gate/tapa4/vis/setColor white
/gate/tapa4/placement/setTranslation 0. 51. 39. mm
/gate/tapa4/geometry/setRmax 8.5 mm
/gate/tapa4/geometry/setRmin 0. mm
/gate/tapa4/geometry/setHeight 15. mm
/gate/tapa4/placement/setRotationAxis 1 0 0
/gate/tapa4/placement/setRotationAngle 90 deg
#/gate/tapa4/vis/forceWireframe
/gate/geometry/rebuild

#====================
#TAPA 5- tapa del tubo 5
#====================
/gate/world/daughters/name tapa5
/gate/world/daughters/insert cylinder
/gate/tapa5/setMaterial Polypropilene
#/gate/tapa5/vis/setColor white
/gate/tapa5/placement/setTranslation -19.5 51. 33.8 mm
/gate/tapa5/geometry/setRmax 8.5 mm
/gate/tapa5/geometry/setRmin 0. mm
/gate/tapa5/geometry/setHeight 15. mm
/gate/tapa5/placement/setRotationAxis 1 0 0
/gate/tapa5/placement/setRotationAngle 90 deg
#/gate/tapa5/vis/forceWireframe
/gate/geometry/rebuild

#====================
#TAPA 6- tapa del tubo 6
#====================
/gate/world/daughters/name tapa6
/gate/world/daughters/insert cylinder
/gate/tapa6/setMaterial Polypropilene
#/gate/tapa6/vis/setColor white
/gate/tapa6/placement/setTranslation -33.8 51. 19.5 mm
/gate/tapa6/geometry/setRmax 8.5 mm
/gate/tapa6/geometry/setRmin 0. mm
/gate/tapa6/geometry/setHeight 15. mm
/gate/tapa6/placement/setRotationAxis 1 0 0
/gate/tapa6/placement/setRotationAngle 90 deg
#/gate/tapa6/vis/forceWireframe
/gate/geometry/rebuild

#====================
#TAPA 7- tapa del tubo 7
#====================
/gate/world/daughters/name tapa7
/gate/world/daughters/insert cylinder
/gate/tapa7/setMaterial Polypropilene
#/gate/tapa7/vis/setColor white
/gate/tapa7/placement/setTranslation -39. 51. 0. mm
/gate/tapa7/geometry/setRmax 8.5 mm
/gate/tapa7/geometry/setRmin 0. mm
/gate/tapa7/geometry/setHeight 15. mm
/gate/tapa7/placement/setRotationAxis 1 0 0
/gate/tapa7/placement/setRotationAngle 90 deg
#/gate/tapa7/vis/forceWireframe
/gate/geometry/rebuild

#====================
#TAPA 8- tapa del tubo 8
#====================
/gate/world/daughters/name tapa8
/gate/world/daughters/insert cylinder
/gate/tapa8/setMaterial Polypropilene
#/gate/tapa8/vis/setColor white
/gate/tapa8/placement/setTranslation -33.8 51. -19.5 mm
/gate/tapa8/geometry/setRmax 8.5 mm
/gate/tapa8/geometry/setRmin 0. mm
/gate/tapa8/geometry/setHeight 15. mm
/gate/tapa8/placement/setRotationAxis 1 0 0
/gate/tapa8/placement/setRotationAngle 90 deg
#/gate/tapa8/vis/forceWireframe
/gate/geometry/rebuild

#====================
#TAPA 9- tapa del tubo 9
#====================
/gate/world/daughters/name tapa9
/gate/world/daughters/insert cylinder
/gate/tapa9/setMaterial Polypropilene
#/gate/tapa9/vis/setColor white
/gate/tapa9/placement/setTranslation -19.5 51. -33.8 mm
/gate/tapa9/geometry/setRmax 8.5 mm
/gate/tapa9/geometry/setRmin 0. mm
/gate/tapa9/geometry/setHeight 15. mm
/gate/tapa9/placement/setRotationAxis 1 0 0
/gate/tapa9/placement/setRotationAngle 90 deg
#/gate/tapa9/vis/forceWireframe
/gate/geometry/rebuild

#====================
#TAPA 10- tapa del tubo 10
#====================
/gate/world/daughters/name tapa10
/gate/world/daughters/insert cylinder
/gate/tapa10/setMaterial Polypropilene
#/gate/tapa10/vis/setColor white
/gate/tapa10/placement/setTranslation 0. 51. -39. mm
/gate/tapa10/geometry/setRmax 8.5 mm
/gate/tapa10/geometry/setRmin 0. mm
/gate/tapa10/geometry/setHeight 15. mm
/gate/tapa10/placement/setRotationAxis 1 0 0
/gate/tapa10/placement/setRotationAngle 90 deg
#/gate/tapa10/vis/forceWireframe
/gate/geometry/rebuild

#====================
#TAPA 11- tapa del tubo 11
#====================
/gate/world/daughters/name tapa11
/gate/world/daughters/insert cylinder
/gate/tapa11/setMaterial Polypropilene
#/gate/tapa11/vis/setColor white
/gate/tapa11/placement/setTranslation 19.5 51. -33.8 mm
/gate/tapa11/geometry/setRmax 8.5 mm
/gate/tapa11/geometry/setRmin 0. mm
/gate/tapa11/geometry/setHeight 15. mm
/gate/tapa11/placement/setRotationAxis 1 0 0
/gate/tapa11/placement/setRotationAngle 90 deg
#/gate/tapa11/vis/forceWireframe
/gate/geometry/rebuild

#====================
#TAPA 12- tapa del tubo 12
#====================
/gate/world/daughters/name tapa12
/gate/world/daughters/insert cylinder
/gate/tapa12/setMaterial Polypropilene
#/gate/tapa12/vis/setColor white
/gate/tapa12/placement/setTranslation 33.8 51. -19.5 mm
/gate/tapa12/geometry/setRmax 8.5 mm
/gate/tapa12/geometry/setRmin 0. mm
/gate/tapa12/geometry/setHeight 15. mm
/gate/tapa12/placement/setRotationAxis 1 0 0
/gate/tapa12/placement/setRotationAngle 90 deg
#/gate/tapa12/vis/forceWireframe
/gate/geometry/rebuild

#====================
#TAPA 13- tapa del tubo 13
#====================
/gate/world/daughters/name tapa13
/gate/world/daughters/insert cylinder
/gate/tapa13/setMaterial Polypropilene
#/gate/tapa13/vis/setColor white
/gate/tapa13/placement/setTranslation 17. 51. 9.5 mm
/gate/tapa13/geometry/setRmax 8.5 mm
/gate/tapa13/geometry/setRmin 0. mm
/gate/tapa13/geometry/setHeight 15. mm
/gate/tapa13/placement/setRotationAxis 1 0 0
/gate/tapa13/placement/setRotationAngle 90 deg
#/gate/tapa13/vis/forceWireframe
/gate/geometry/rebuild

#====================
#TAPA 14- tapa del tubo 14
#====================
/gate/world/daughters/name tapa14
/gate/world/daughters/insert cylinder
/gate/tapa14/setMaterial Polypropilene
#/gate/tapa14/vis/setColor white
/gate/tapa14/placement/setTranslation 0. 51. 19.7 mm
/gate/tapa14/geometry/setRmax 8.5 mm
/gate/tapa14/geometry/setRmin 0. mm
/gate/tapa14/geometry/setHeight 15. mm
/gate/tapa14/placement/setRotationAxis 1 0 0
/gate/tapa14/placement/setRotationAngle 90 deg
#/gate/tapa14/vis/forceWireframe
/gate/geometry/rebuild

#====================
#TAPA 15- tapa del tubo 15
#====================
/gate/world/daughters/name tapa15
/gate/world/daughters/insert cylinder
/gate/tapa15/setMaterial Polypropilene
#/gate/tapa15/vis/setColor white
/gate/tapa15/placement/setTranslation -16.5 51. 10. mm
/gate/tapa15/geometry/setRmax 8.5 mm
/gate/tapa15/geometry/setRmin 0. mm
/gate/tapa15/geometry/setHeight 15. mm
/gate/tapa15/placement/setRotationAxis 1 0 0
/gate/tapa15/placement/setRotationAngle 90 deg
#/gate/tapa15/vis/forceWireframe
/gate/geometry/rebuild

#====================
#TAPA 16- tapa del tubo 16
#====================
/gate/world/daughters/name tapa16
/gate/world/daughters/insert cylinder
/gate/tapa16/setMaterial Polypropilene
#/gate/tapa16/vis/setColor white
/gate/tapa16/placement/setTranslation -17. 51. -9.5 mm
/gate/tapa16/geometry/setRmax 8.5 mm
/gate/tapa16/geometry/setRmin 0. mm
/gate/tapa16/geometry/setHeight 15. mm
/gate/tapa16/placement/setRotationAxis 1 0 0
/gate/tapa16/placement/setRotationAngle 90 deg
#/gate/tapa16/vis/forceWireframe
/gate/geometry/rebuild

#====================
#TAPA 17- tapa del tubo 17
#====================
/gate/world/daughters/name tapa17
/gate/world/daughters/insert cylinder
/gate/tapa17/setMaterial Polypropilene
#/gate/tapa17/vis/setColor white
/gate/tapa17/placement/setTranslation 0. 51. -19.7 mm
/gate/tapa17/geometry/setRmax 8.5 mm
/gate/tapa17/geometry/setRmin 0. mm
/gate/tapa17/geometry/setHeight 15. mm
/gate/tapa17/placement/setRotationAxis 1 0 0
/gate/tapa17/placement/setRotationAngle 90 deg
#/gate/tapa17/vis/forceWireframe
/gate/geometry/rebuild

#====================
#TAPA 18- tapa del tubo 18
#====================
/gate/world/daughters/name tapa18
/gate/world/daughters/insert cylinder
/gate/tapa18/setMaterial Polypropilene
#/gate/tapa18/vis/setColor white
/gate/tapa18/placement/setTranslation 16.5 51. -10. mm
/gate/tapa18/geometry/setRmax 8.5 mm
/gate/tapa18/geometry/setRmin 0. mm
/gate/tapa18/geometry/setHeight 15. mm
/gate/tapa18/placement/setRotationAxis 1 0 0
/gate/tapa18/placement/setRotationAngle 90 deg
#/gate/tapa18/vis/forceWireframe
/gate/geometry/rebuild

#====================
#TAPA ref- tapa del tubo de referencia
#====================
/gate/world/daughters/name tapareferencia
/gate/world/daughters/insert cylinder
/gate/tapareferencia/setMaterial Polypropilene
#/gate/tapareferencia/vis/setColor white
/gate/tapareferencia/placement/setTranslation 0. 51. 0. mm
/gate/tapareferencia/geometry/setRmax 8.5 mm
/gate/tapareferencia/geometry/setRmin 0. mm
/gate/tapareferencia/geometry/setHeight 15. mm
/gate/tapareferencia/placement/setRotationAxis 1 0 0
/gate/tapareferencia/placement/setRotationAngle 90 deg
#/gate/tapareferencia/vis/forceWireframe
/gate/geometry/rebuild

#====================
# SYSTEM tubo 1- scanner
#====================
/gate/world/daughters/name scanner_tubo1
/gate/world/daughters/systemType scanner
/gate/world/daughters/insert cylinder
/gate/scanner_tubo1/setMaterial Air
/gate/scanner_tubo1/geometry/setRmax 9. mm
/gate/scanner_tubo1/geometry/setRmin 0. mm
/gate/scanner_tubo1/geometry/setHeight 87. mm
/gate/scanner_tubo1/placement/setRotationAxis 1 0 0
/gate/scanner_tubo1/placement/setRotationAngle 90 deg
/gate/scanner_tubo1/placement/setTranslation 39. -12.5 0. mm
#/gate/scanner_tubo1/vis/forceWireframe
#/gate/scanner_tubo1/vis/setVisible 1
/gate/geometry/rebuild

#====================
#scanner_tubo1-tubo1 
#====================
/gate/scanner_tubo1/daughters/name tubo1
/gate/scanner_tubo1/daughters/insert cylinder
/gate/tubo1/setMaterial Glass
#/gate/tubo1/vis/setColor gray
/gate/tubo1/geometry/setRmax 8.5 mm
/gate/tubo1/geometry/setRmin 0. mm
/gate/tubo1/geometry/setHeight 86. mm
#/gate/tubo1/vis/forceWireframe
/gate/geometry/rebuild

#====================
#scanner_tubo1-aguafricketubo1
#====================
/gate/tubo1/daughters/name aguafricketubo1
/gate/tubo1/daughters/insert cylinder
/gate/aguafricketubo1/setMaterial Water
#/gate/aguafricketubo1/vis/setColor blue
/gate/aguafricketubo1/geometry/setRmax 8.49 mm
/gate/aguafricketubo1/geometry/setRmin 0. mm
/gate/aguafricketubo1/geometry/setHeight 85.9 mm
#/gate/aguafricketubo1/vis/forceWireframe
/gate/geometry/rebuild

#====================
# SYSTEM tubo 2- scanner
#====================
/gate/world/daughters/name scanner_tubo2
/gate/world/daughters/systemType scanner
/gate/world/daughters/insert cylinder
/gate/scanner_tubo2/setMaterial Air
/gate/scanner_tubo2/geometry/setRmax 9. mm
/gate/scanner_tubo2/geometry/setRmin 0. mm
/gate/scanner_tubo2/geometry/setHeight 87. mm
/gate/scanner_tubo2/placement/setRotationAxis 1 0 0
/gate/scanner_tubo2/placement/setRotationAngle 90 deg
/gate/scanner_tubo2/placement/setTranslation 33.8 -12.5 19.5 mm
#/gate/scanner_tubo2/vis/forceWireframe
#/gate/scanner_tubo2/vis/setVisible 1
/gate/geometry/rebuild

#====================
#scanner_tubo2-tubo2 
#====================
/gate/scanner_tubo2/daughters/name tubo2
/gate/scanner_tubo2/daughters/insert cylinder
/gate/tubo2/setMaterial Glass
#/gate/tubo2/vis/setColor gray
/gate/tubo2/geometry/setRmax 8.5 mm
/gate/tubo2/geometry/setRmin 0. mm
/gate/tubo2/geometry/setHeight 86. mm
#/gate/tubo2/vis/forceWireframe
/gate/geometry/rebuild

#====================
#scanner_tubo2-aguafricketubo2
#====================
/gate/tubo2/daughters/name aguafricketubo2
/gate/tubo2/daughters/insert cylinder
/gate/aguafricketubo2/setMaterial Water
#/gate/aguafricketubo2/vis/setColor blue
/gate/aguafricketubo2/geometry/setRmax 8.49 mm
/gate/aguafricketubo2/geometry/setRmin 0. mm
/gate/aguafricketubo2/geometry/setHeight 85.9 mm
#/gate/aguafricketubo2/vis/forceWireframe
/gate/geometry/rebuild

#====================
# SYSTEM tubo 3- scanner
#====================
/gate/world/daughters/name scanner_tubo3
/gate/world/daughters/systemType scanner
/gate/world/daughters/insert cylinder
/gate/scanner_tubo3/setMaterial Air
/gate/scanner_tubo3/geometry/setRmax 9. mm
/gate/scanner_tubo3/geometry/setRmin 0. mm
/gate/scanner_tubo3/geometry/setHeight 87. mm
/gate/scanner_tubo3/placement/setRotationAxis 1 0 0
/gate/scanner_tubo3/placement/setRotationAngle 90 deg
/gate/scanner_tubo3/placement/setTranslation 19.5 -12.5 33.8 mm
#/gate/scanner_tubo3/vis/forceWireframe
#/gate/scanner_tubo3/vis/setVisible 1
/gate/geometry/rebuild

#====================
#scanner_tubo3-tubo3 
#====================
/gate/scanner_tubo3/daughters/name tubo3
/gate/scanner_tubo3/daughters/insert cylinder
/gate/tubo3/setMaterial Glass
#/gate/tubo3/vis/setColor gray
/gate/tubo3/geometry/setRmax 8.5 mm
/gate/tubo3/geometry/setRmin 0. mm
/gate/tubo3/geometry/setHeight 86. mm
#/gate/tubo3/vis/forceWireframe
/gate/geometry/rebuild

#====================
#scanner_tubo3-aguafricketubo3
#====================
/gate/tubo3/daughters/name aguafricketubo3
/gate/tubo3/daughters/insert cylinder
/gate/aguafricketubo3/setMaterial Water
#/gate/aguafricketubo3/vis/setColor blue
/gate/aguafricketubo3/geometry/setRmax 8.49 mm
/gate/aguafricketubo3/geometry/setRmin 0. mm
/gate/aguafricketubo3/geometry/setHeight 85.9 mm
#/gate/aguafricketubo3/vis/forceWireframe
/gate/geometry/rebuild

#====================
# SYSTEM tubo 4- scanner
#====================
/gate/world/daughters/name scanner_tubo4
/gate/world/daughters/systemType scanner
/gate/world/daughters/insert cylinder
/gate/scanner_tubo4/setMaterial Air
/gate/scanner_tubo4/geometry/setRmax 9. mm
/gate/scanner_tubo4/geometry/setRmin 0. mm
/gate/scanner_tubo4/geometry/setHeight 87. mm
/gate/scanner_tubo4/placement/setRotationAxis 1 0 0
/gate/scanner_tubo4/placement/setRotationAngle 90 deg
/gate/scanner_tubo4/placement/setTranslation 0. -12.5 39. mm
#/gate/scanner_tubo4/vis/forceWireframe
#/gate/scanner_tubo4/vis/setVisible 1
/gate/geometry/rebuild

#====================
#scanner_tubo4-tubo4 
#====================
/gate/scanner_tubo4/daughters/name tubo4
/gate/scanner_tubo4/daughters/insert cylinder
/gate/tubo4/setMaterial Glass
#/gate/tubo4/vis/setColor gray
/gate/tubo4/geometry/setRmax 8.5 mm
/gate/tubo4/geometry/setRmin 0. mm
/gate/tubo4/geometry/setHeight 86. mm
#/gate/tubo4/vis/forceWireframe
/gate/geometry/rebuild

#====================
#scanner_tubo4-aguafricketubo4
#====================
/gate/tubo4/daughters/name aguafricketubo4
/gate/tubo4/daughters/insert cylinder
/gate/aguafricketubo4/setMaterial Water
#/gate/aguafricketubo4/vis/setColor blue
/gate/aguafricketubo4/geometry/setRmax 8.49 mm
/gate/aguafricketubo4/geometry/setRmin 0. mm
/gate/aguafricketubo4/geometry/setHeight 85.9 mm
#/gate/aguafricketubo4/vis/forceWireframe
/gate/geometry/rebuild

#====================
# SYSTEM tubo 5- scanner
#====================
/gate/world/daughters/name scanner_tubo5
/gate/world/daughters/systemType scanner
/gate/world/daughters/insert cylinder
/gate/scanner_tubo5/setMaterial Air
/gate/scanner_tubo5/geometry/setRmax 9. mm
/gate/scanner_tubo5/geometry/setRmin 0. mm
/gate/scanner_tubo5/geometry/setHeight 87. mm
/gate/scanner_tubo5/placement/setRotationAxis 1 0 0
/gate/scanner_tubo5/placement/setRotationAngle 90 deg
/gate/scanner_tubo5/placement/setTranslation -19.5 -12.5 33.8 mm
#/gate/scanner_tubo5/vis/forceWireframe
#/gate/scanner_tubo5/vis/setVisible 1
/gate/geometry/rebuild

#====================
#scanner_tubo5-tubo5 
#====================
/gate/scanner_tubo5/daughters/name tubo5
/gate/scanner_tubo5/daughters/insert cylinder
/gate/tubo5/setMaterial Glass
#/gate/tubo5/vis/setColor gray
/gate/tubo5/geometry/setRmax 8.5 mm
/gate/tubo5/geometry/setRmin 0. mm
/gate/tubo5/geometry/setHeight 86. mm
#/gate/tubo5/vis/forceWireframe
/gate/geometry/rebuild

#====================
#scanner_tubo5-aguafricketubo5
#====================
/gate/tubo5/daughters/name aguafricketubo5
/gate/tubo5/daughters/insert cylinder
/gate/aguafricketubo5/setMaterial Water
#/gate/aguafricketubo5/vis/setColor blue
/gate/aguafricketubo5/geometry/setRmax 8.49 mm
/gate/aguafricketubo5/geometry/setRmin 0. mm
/gate/aguafricketubo5/geometry/setHeight 85.9 mm
#/gate/aguafricketubo5/vis/forceWireframe
/gate/geometry/rebuild

#====================
# SYSTEM tubo 6- scanner
#====================
/gate/world/daughters/name scanner_tubo6
/gate/world/daughters/systemType scanner
/gate/world/daughters/insert cylinder
/gate/scanner_tubo6/setMaterial Air
/gate/scanner_tubo6/geometry/setRmax 9. mm
/gate/scanner_tubo6/geometry/setRmin 0. mm
/gate/scanner_tubo6/geometry/setHeight 87. mm
/gate/scanner_tubo6/placement/setRotationAxis 1 0 0
/gate/scanner_tubo6/placement/setRotationAngle 90 deg
/gate/scanner_tubo6/placement/setTranslation -33.8 -12.5 19.5 mm
#/gate/scanner_tubo6/vis/forceWireframe
#/gate/scanner_tubo6/vis/setVisible 1
/gate/geometry/rebuild

#====================
#scanner_tubo6-tubo6 
#====================
/gate/scanner_tubo6/daughters/name tubo6
/gate/scanner_tubo6/daughters/insert cylinder
/gate/tubo6/setMaterial Glass
#/gate/tubo6/vis/setColor gray
/gate/tubo6/geometry/setRmax 8.5 mm
/gate/tubo6/geometry/setRmin 0. mm
/gate/tubo6/geometry/setHeight 86. mm
#/gate/tubo6/vis/forceWireframe
/gate/geometry/rebuild

#====================
#scanner_tubo6-aguafricketubo6
#====================
/gate/tubo6/daughters/name aguafricketubo6
/gate/tubo6/daughters/insert cylinder
/gate/aguafricketubo6/setMaterial Water
#/gate/aguafricketubo6/vis/setColor blue
/gate/aguafricketubo6/geometry/setRmax 8.49 mm
/gate/aguafricketubo6/geometry/setRmin 0. mm
/gate/aguafricketubo6/geometry/setHeight 85.9 mm
#/gate/aguafricketubo6/vis/forceWireframe
/gate/geometry/rebuild

#====================
# SYSTEM tubo 7- scanner
#====================
/gate/world/daughters/name scanner_tubo7
/gate/world/daughters/systemType scanner
/gate/world/daughters/insert cylinder
/gate/scanner_tubo7/setMaterial Air
/gate/scanner_tubo7/geometry/setRmax 9. mm
/gate/scanner_tubo7/geometry/setRmin 0. mm
/gate/scanner_tubo7/geometry/setHeight 87. mm
/gate/scanner_tubo7/placement/setRotationAxis 1 0 0
/gate/scanner_tubo7/placement/setRotationAngle 90 deg
/gate/scanner_tubo7/placement/setTranslation -39. -12.5 0. mm
#/gate/scanner_tubo7/vis/forceWireframe
#/gate/scanner_tubo7/vis/setVisible 1
/gate/geometry/rebuild

#====================
#scanner_tubo7-tubo7 
#====================
/gate/scanner_tubo7/daughters/name tubo7
/gate/scanner_tubo7/daughters/insert cylinder
/gate/tubo7/setMaterial Glass
#/gate/tubo7/vis/setColor gray
/gate/tubo7/geometry/setRmax 8.5 mm
/gate/tubo7/geometry/setRmin 0. mm
/gate/tubo7/geometry/setHeight 86. mm
#/gate/tubo7/vis/forceWireframe
/gate/geometry/rebuild

#====================
#scanner_tubo7-aguafricketubo7
#====================
/gate/tubo7/daughters/name aguafricketubo7
/gate/tubo7/daughters/insert cylinder
/gate/aguafricketubo7/setMaterial Water
#/gate/aguafricketubo7/vis/setColor blue
/gate/aguafricketubo7/geometry/setRmax 8.49 mm
/gate/aguafricketubo7/geometry/setRmin 0. mm
/gate/aguafricketubo7/geometry/setHeight 85.9 mm
#/gate/aguafricketubo7/vis/forceWireframe
/gate/geometry/rebuild

#====================
# SYSTEM tubo 8- scanner
#====================
/gate/world/daughters/name scanner_tubo8
/gate/world/daughters/systemType scanner
/gate/world/daughters/insert cylinder
/gate/scanner_tubo8/setMaterial Air
/gate/scanner_tubo8/geometry/setRmax 9. mm
/gate/scanner_tubo8/geometry/setRmin 0. mm
/gate/scanner_tubo8/geometry/setHeight 87. mm
/gate/scanner_tubo8/placement/setRotationAxis 1 0 0
/gate/scanner_tubo8/placement/setRotationAngle 90 deg
/gate/scanner_tubo8/placement/setTranslation -33.8 -12.5 -19.5 mm
#/gate/scanner_tubo8/vis/forceWireframe
#/gate/scanner_tubo8/vis/setVisible 1
/gate/geometry/rebuild

#====================
#scanner_tubo8-tubo8 
#====================
/gate/scanner_tubo8/daughters/name tubo8
/gate/scanner_tubo8/daughters/insert cylinder
/gate/tubo8/setMaterial Glass
#/gate/tubo8/vis/setColor gray
/gate/tubo8/geometry/setRmax 8.5 mm
/gate/tubo8/geometry/setRmin 0. mm
/gate/tubo8/geometry/setHeight 86. mm
#/gate/tubo8/vis/forceWireframe
/gate/geometry/rebuild

#====================
#scanner_tubo8-aguafricketubo8
#====================
/gate/tubo8/daughters/name aguafricketubo8
/gate/tubo8/daughters/insert cylinder
/gate/aguafricketubo8/setMaterial Water
#/gate/aguafricketubo8/vis/setColor blue
/gate/aguafricketubo8/geometry/setRmax 8.49 mm
/gate/aguafricketubo8/geometry/setRmin 0. mm
/gate/aguafricketubo8/geometry/setHeight 85.9 mm
#/gate/aguafricketubo8/vis/forceWireframe
/gate/geometry/rebuild

#====================
# SYSTEM tubo 9- scanner
#====================
/gate/world/daughters/name scanner_tubo9
/gate/world/daughters/systemType scanner
/gate/world/daughters/insert cylinder
/gate/scanner_tubo9/setMaterial Air
/gate/scanner_tubo9/geometry/setRmax 9. mm
/gate/scanner_tubo9/geometry/setRmin 0. mm
/gate/scanner_tubo9/geometry/setHeight 87. mm
/gate/scanner_tubo9/placement/setRotationAxis 1 0 0
/gate/scanner_tubo9/placement/setRotationAngle 90 deg
/gate/scanner_tubo9/placement/setTranslation -19.5 -12.5 -33.8 mm
#/gate/scanner_tubo9/vis/forceWireframe
#/gate/scanner_tubo9/vis/setVisible 1
/gate/geometry/rebuild

#====================
#scanner_tubo9-tubo9 
#====================
/gate/scanner_tubo9/daughters/name tubo9
/gate/scanner_tubo9/daughters/insert cylinder
/gate/tubo9/setMaterial Glass
#/gate/tubo9/vis/setColor gray
/gate/tubo9/geometry/setRmax 8.5 mm
/gate/tubo9/geometry/setRmin 0. mm
/gate/tubo9/geometry/setHeight 86. mm
#/gate/tubo9/vis/forceWireframe
/gate/geometry/rebuild

#====================
#scanner_tubo9-aguafricketubo9
#====================
/gate/tubo9/daughters/name aguafricketubo9
/gate/tubo9/daughters/insert cylinder
/gate/aguafricketubo9/setMaterial Water
#/gate/aguafricketubo9/vis/setColor blue
/gate/aguafricketubo9/geometry/setRmax 8.49 mm
/gate/aguafricketubo9/geometry/setRmin 0. mm
/gate/aguafricketubo9/geometry/setHeight 85.9 mm
#/gate/aguafricketubo9/vis/forceWireframe
/gate/geometry/rebuild

#====================
# SYSTEM tubo 10- scanner
#====================
/gate/world/daughters/name scanner_tubo10
/gate/world/daughters/systemType scanner
/gate/world/daughters/insert cylinder
/gate/scanner_tubo10/setMaterial Air
/gate/scanner_tubo10/geometry/setRmax 9. mm
/gate/scanner_tubo10/geometry/setRmin 0. mm
/gate/scanner_tubo10/geometry/setHeight 87. mm
/gate/scanner_tubo10/placement/setRotationAxis 1 0 0
/gate/scanner_tubo10/placement/setRotationAngle 90 deg
/gate/scanner_tubo10/placement/setTranslation 0. -12.5 -39. mm
#/gate/scanner_tubo10/vis/forceWireframe
#/gate/scanner_tubo10/vis/setVisible 1
/gate/geometry/rebuild

#====================
#scanner_tubo10-tubo10 
#====================
/gate/scanner_tubo10/daughters/name tubo10
/gate/scanner_tubo10/daughters/insert cylinder
/gate/tubo10/setMaterial Glass
#/gate/tubo10/vis/setColor gray
/gate/tubo10/geometry/setRmax 8.5 mm
/gate/tubo10/geometry/setRmin 0. mm
/gate/tubo10/geometry/setHeight 86. mm
#/gate/tubo10/vis/forceWireframe
/gate/geometry/rebuild

#====================
#scanner_tubo10-aguafricketubo10
#====================
/gate/tubo10/daughters/name aguafricketubo10
/gate/tubo10/daughters/insert cylinder
/gate/aguafricketubo10/setMaterial Water
#/gate/aguafricketubo10/vis/setColor blue
/gate/aguafricketubo10/geometry/setRmax 8.49 mm
/gate/aguafricketubo10/geometry/setRmin 0. mm
/gate/aguafricketubo10/geometry/setHeight 85.9 mm
#/gate/aguafricketubo10/vis/forceWireframe
/gate/geometry/rebuild

#====================
# SYSTEM tubo 11- scanner
#====================
/gate/world/daughters/name scanner_tubo11
/gate/world/daughters/systemType scanner
/gate/world/daughters/insert cylinder
/gate/scanner_tubo11/setMaterial Air
/gate/scanner_tubo11/geometry/setRmax 9. mm
/gate/scanner_tubo11/geometry/setRmin 0. mm
/gate/scanner_tubo11/geometry/setHeight 87. mm
/gate/scanner_tubo11/placement/setRotationAxis 1 0 0
/gate/scanner_tubo11/placement/setRotationAngle 90 deg
/gate/scanner_tubo11/placement/setTranslation 19.5 -12.5 -33.8 mm
#/gate/scanner_tubo11/vis/forceWireframe
#/gate/scanner_tubo11/vis/setVisible 1
/gate/geometry/rebuild

#====================
#scanner_tubo11-tubo11 
#====================
/gate/scanner_tubo11/daughters/name tubo11
/gate/scanner_tubo11/daughters/insert cylinder
/gate/tubo11/setMaterial Glass
#/gate/tubo11/vis/setColor gray
/gate/tubo11/geometry/setRmax 8.5 mm
/gate/tubo11/geometry/setRmin 0. mm
/gate/tubo11/geometry/setHeight 86. mm
#/gate/tubo11/vis/forceWireframe
/gate/geometry/rebuild

#====================
#scanner_tubo11-aguafricketubo11
#====================
/gate/tubo11/daughters/name aguafricketubo11
/gate/tubo11/daughters/insert cylinder
/gate/aguafricketubo11/setMaterial Water
#/gate/aguafricketubo11/vis/setColor blue
/gate/aguafricketubo11/geometry/setRmax 8.49 mm
/gate/aguafricketubo11/geometry/setRmin 0. mm
/gate/aguafricketubo11/geometry/setHeight 85.9 mm
#/gate/aguafricketubo11/vis/forceWireframe
/gate/geometry/rebuild

#====================
# SYSTEM tubo 12- scanner
#====================
/gate/world/daughters/name scanner_tubo12
/gate/world/daughters/systemType scanner
/gate/world/daughters/insert cylinder
/gate/scanner_tubo12/setMaterial Air
/gate/scanner_tubo12/geometry/setRmax 9. mm
/gate/scanner_tubo12/geometry/setRmin 0. mm
/gate/scanner_tubo12/geometry/setHeight 87. mm
/gate/scanner_tubo12/placement/setRotationAxis 1 0 0
/gate/scanner_tubo12/placement/setRotationAngle 90 deg
/gate/scanner_tubo12/placement/setTranslation 33.8 -12.5 -19.5 mm
#/gate/scanner_tubo12/vis/forceWireframe
#/gate/scanner_tubo12/vis/setVisible 1
/gate/geometry/rebuild

#====================
#scanner_tubo12-tubo12 
#====================
/gate/scanner_tubo12/daughters/name tubo12
/gate/scanner_tubo12/daughters/insert cylinder
/gate/tubo12/setMaterial Glass
#/gate/tubo12/vis/setColor gray
/gate/tubo12/geometry/setRmax 8.5 mm
/gate/tubo12/geometry/setRmin 0. mm
/gate/tubo12/geometry/setHeight 86. mm
#/gate/tubo12/vis/forceWireframe
/gate/geometry/rebuild

#====================
#scanner_tubo12-aguafricketubo12
#====================
/gate/tubo12/daughters/name aguafricketubo12
/gate/tubo12/daughters/insert cylinder
/gate/aguafricketubo12/setMaterial Water
#/gate/aguafricketubo12/vis/setColor blue
/gate/aguafricketubo12/geometry/setRmax 8.49 mm
/gate/aguafricketubo12/geometry/setRmin 0. mm
/gate/aguafricketubo12/geometry/setHeight 85.9 mm
#/gate/aguafricketubo12/vis/forceWireframe
/gate/geometry/rebuild

#====================
# SYSTEM tubo 13- scanner
#====================
/gate/world/daughters/name scanner_tubo13
/gate/world/daughters/systemType scanner
/gate/world/daughters/insert cylinder
/gate/scanner_tubo13/setMaterial Air
/gate/scanner_tubo13/geometry/setRmax 9. mm
/gate/scanner_tubo13/geometry/setRmin 0. mm
/gate/scanner_tubo13/geometry/setHeight 87. mm
/gate/scanner_tubo13/placement/setRotationAxis 1 0 0
/gate/scanner_tubo13/placement/setRotationAngle 90 deg
/gate/scanner_tubo13/placement/setTranslation 17. -12.5 9.5 mm
#/gate/scanner_tubo13/vis/forceWireframe
#/gate/scanner_tubo13/vis/setVisible 1
/gate/geometry/rebuild

#====================
#scanner_tubo13-tubo13 
#====================
/gate/scanner_tubo13/daughters/name tubo13
/gate/scanner_tubo13/daughters/insert cylinder
/gate/tubo13/setMaterial Glass
#/gate/tubo13/vis/setColor gray
/gate/tubo13/geometry/setRmax 8.5 mm
/gate/tubo13/geometry/setRmin 0. mm
/gate/tubo13/geometry/setHeight 86. mm
#/gate/tubo13/vis/forceWireframe
/gate/geometry/rebuild

#====================
#scanner_tubo13-aguafricketubo13
#====================
/gate/tubo13/daughters/name aguafricketubo13
/gate/tubo13/daughters/insert cylinder
/gate/aguafricketubo13/setMaterial Water
#/gate/aguafricketubo13/vis/setColor blue
/gate/aguafricketubo13/geometry/setRmax 8.49 mm
/gate/aguafricketubo13/geometry/setRmin 0. mm
/gate/aguafricketubo13/geometry/setHeight 85.9 mm
#/gate/aguafricketubo13/vis/forceWireframe
/gate/geometry/rebuild

#====================
# SYSTEM tubo 14- scanner
#====================
/gate/world/daughters/name scanner_tubo14
/gate/world/daughters/systemType scanner
/gate/world/daughters/insert cylinder
/gate/scanner_tubo14/setMaterial Air
/gate/scanner_tubo14/geometry/setRmax 9. mm
/gate/scanner_tubo14/geometry/setRmin 0. mm
/gate/scanner_tubo14/geometry/setHeight 87. mm
/gate/scanner_tubo14/placement/setRotationAxis 1 0 0
/gate/scanner_tubo14/placement/setRotationAngle 90 deg
/gate/scanner_tubo14/placement/setTranslation 0. -12.5 19.7 mm
#/gate/scanner_tubo14/vis/forceWireframe
#/gate/scanner_tubo14/vis/setVisible 1
/gate/geometry/rebuild

#====================
#scanner_tubo14-tubo14 
#====================
/gate/scanner_tubo14/daughters/name tubo14
/gate/scanner_tubo14/daughters/insert cylinder
/gate/tubo14/setMaterial Glass
#/gate/tubo14/vis/setColor gray
/gate/tubo14/geometry/setRmax 8.5 mm
/gate/tubo14/geometry/setRmin 0. mm
/gate/tubo14/geometry/setHeight 86. mm
#/gate/tubo14/vis/forceWireframe
/gate/geometry/rebuild

#====================
#scanner_tubo14-aguafricketubo14
#====================
/gate/tubo14/daughters/name aguafricketubo14
/gate/tubo14/daughters/insert cylinder
/gate/aguafricketubo14/setMaterial Water
#/gate/aguafricketubo14/vis/setColor blue
/gate/aguafricketubo14/geometry/setRmax 8.49 mm
/gate/aguafricketubo14/geometry/setRmin 0. mm
/gate/aguafricketubo14/geometry/setHeight 85.9 mm
#/gate/aguafricketubo14/vis/forceWireframe
/gate/geometry/rebuild

#====================
# SYSTEM tubo 15- scanner
#====================
/gate/world/daughters/name scanner_tubo15
/gate/world/daughters/systemType scanner
/gate/world/daughters/insert cylinder
/gate/scanner_tubo15/setMaterial Air
/gate/scanner_tubo15/geometry/setRmax 9. mm
/gate/scanner_tubo15/geometry/setRmin 0. mm
/gate/scanner_tubo15/geometry/setHeight 87. mm
/gate/scanner_tubo15/placement/setRotationAxis 1 0 0
/gate/scanner_tubo15/placement/setRotationAngle 90 deg
/gate/scanner_tubo15/placement/setTranslation -16.5 -12.5 10. mm
#/gate/scanner_tubo15/vis/forceWireframe
#/gate/scanner_tubo15/vis/setVisible 1
/gate/geometry/rebuild

#====================
#scanner_tubo15-tubo15 
#====================
/gate/scanner_tubo15/daughters/name tubo15
/gate/scanner_tubo15/daughters/insert cylinder
/gate/tubo15/setMaterial Glass
#/gate/tubo15/vis/setColor gray
/gate/tubo15/geometry/setRmax 8.5 mm
/gate/tubo15/geometry/setRmin 0. mm
/gate/tubo15/geometry/setHeight 86. mm
#/gate/tubo15/vis/forceWireframe
/gate/geometry/rebuild

#====================
#scanner_tubo15-aguafricketubo15
#====================
/gate/tubo15/daughters/name aguafricketubo15
/gate/tubo15/daughters/insert cylinder
/gate/aguafricketubo15/setMaterial Water
#/gate/aguafricketubo15/vis/setColor blue
/gate/aguafricketubo15/geometry/setRmax 8.49 mm
/gate/aguafricketubo15/geometry/setRmin 0. mm
/gate/aguafricketubo15/geometry/setHeight 85.9 mm
#/gate/aguafricketubo15/vis/forceWireframe
/gate/geometry/rebuild

#====================
# SYSTEM tubo 16- scanner
#====================
/gate/world/daughters/name scanner_tubo16
/gate/world/daughters/systemType scanner
/gate/world/daughters/insert cylinder
/gate/scanner_tubo16/setMaterial Air
/gate/scanner_tubo16/geometry/setRmax 9. mm
/gate/scanner_tubo16/geometry/setRmin 0. mm
/gate/scanner_tubo16/geometry/setHeight 87. mm
/gate/scanner_tubo16/placement/setRotationAxis 1 0 0
/gate/scanner_tubo16/placement/setRotationAngle 90 deg
/gate/scanner_tubo16/placement/setTranslation -17. -12.5 -9.5 mm
#/gate/scanner_tubo16/vis/forceWireframe
#/gate/scanner_tubo16/vis/setVisible 1
/gate/geometry/rebuild

#====================
#scanner_tubo16-tubo16 
#====================
/gate/scanner_tubo16/daughters/name tubo16
/gate/scanner_tubo16/daughters/insert cylinder
/gate/tubo16/setMaterial Glass
#/gate/tubo16/vis/setColor gray
/gate/tubo16/geometry/setRmax 8.5 mm
/gate/tubo16/geometry/setRmin 0. mm
/gate/tubo16/geometry/setHeight 86. mm
#/gate/tubo16/vis/forceWireframe
/gate/geometry/rebuild

#====================
#scanner_tubo16-aguafricketubo16
#====================
/gate/tubo16/daughters/name aguafricketubo16
/gate/tubo16/daughters/insert cylinder
/gate/aguafricketubo16/setMaterial Water
#/gate/aguafricketubo16/vis/setColor blue
/gate/aguafricketubo16/geometry/setRmax 8.49 mm
/gate/aguafricketubo16/geometry/setRmin 0. mm
/gate/aguafricketubo16/geometry/setHeight 85.9 mm
#/gate/aguafricketubo16/vis/forceWireframe
/gate/geometry/rebuild

#====================
# SYSTEM tubo 17- scanner
#====================
/gate/world/daughters/name scanner_tubo17
/gate/world/daughters/systemType scanner
/gate/world/daughters/insert cylinder
/gate/scanner_tubo17/setMaterial Air
/gate/scanner_tubo17/geometry/setRmax 9. mm
/gate/scanner_tubo17/geometry/setRmin 0. mm
/gate/scanner_tubo17/geometry/setHeight 87. mm
/gate/scanner_tubo17/placement/setRotationAxis 1 0 0
/gate/scanner_tubo17/placement/setRotationAngle 90 deg
/gate/scanner_tubo17/placement/setTranslation 0. -12.5 -19.7 mm
#/gate/scanner_tubo17/vis/forceWireframe
#/gate/scanner_tubo17/vis/setVisible 1
/gate/geometry/rebuild

#====================
#scanner_tubo17-tubo17 
#====================
/gate/scanner_tubo17/daughters/name tubo17
/gate/scanner_tubo17/daughters/insert cylinder
/gate/tubo17/setMaterial Glass
#/gate/tubo17/vis/setColor gray
/gate/tubo17/geometry/setRmax 8.5 mm
/gate/tubo17/geometry/setRmin 0. mm
/gate/tubo17/geometry/setHeight 86. mm
#/gate/tubo17/vis/forceWireframe
/gate/geometry/rebuild

#====================
#scanner_tubo17-aguafricketubo17
#====================
/gate/tubo17/daughters/name aguafricketubo17
/gate/tubo17/daughters/insert cylinder
/gate/aguafricketubo17/setMaterial Water
#/gate/aguafricketubo17/vis/setColor blue
/gate/aguafricketubo17/geometry/setRmax 8.49 mm
/gate/aguafricketubo17/geometry/setRmin 0. mm
/gate/aguafricketubo17/geometry/setHeight 85.9 mm
#/gate/aguafricketubo17/vis/forceWireframe
/gate/geometry/rebuild

#====================
# SYSTEM tubo 18- scanner
#====================
/gate/world/daughters/name scanner_tubo18
/gate/world/daughters/systemType scanner
/gate/world/daughters/insert cylinder
/gate/scanner_tubo18/setMaterial Air
/gate/scanner_tubo18/geometry/setRmax 9. mm
/gate/scanner_tubo18/geometry/setRmin 0. mm
/gate/scanner_tubo18/geometry/setHeight 87. mm
/gate/scanner_tubo18/placement/setRotationAxis 1 0 0
/gate/scanner_tubo18/placement/setRotationAngle 90 deg
/gate/scanner_tubo18/placement/setTranslation 16.5 -12.5 -10. mm
#/gate/scanner_tubo18/vis/forceWireframe
#/gate/scanner_tubo18/vis/setVisible 1
/gate/geometry/rebuild

#====================
#scanner_tubo18-tubo18 
#====================
/gate/scanner_tubo18/daughters/name tubo18
/gate/scanner_tubo18/daughters/insert cylinder
/gate/tubo18/setMaterial Glass
#/gate/tubo18/vis/setColor gray
/gate/tubo18/geometry/setRmax 8.5 mm
/gate/tubo18/geometry/setRmin 0. mm
/gate/tubo18/geometry/setHeight 86. mm
#/gate/tubo18/vis/forceWireframe
/gate/geometry/rebuild

#====================
#scanner_tubo18-aguafricketubo18
#====================
/gate/tubo18/daughters/name aguafricketubo18
/gate/tubo18/daughters/insert cylinder
/gate/aguafricketubo18/setMaterial Water
#/gate/aguafricketubo18/vis/setColor blue
/gate/aguafricketubo18/geometry/setRmax 8.49 mm
/gate/aguafricketubo18/geometry/setRmin 0. mm
/gate/aguafricketubo18/geometry/setHeight 85.9 mm
#/gate/aguafricketubo18/vis/forceWireframe
/gate/geometry/rebuild

#====================
# SYSTEM tubo de refencia- scanner_tuboreferencia
#====================
/gate/world/daughters/name scanner_tuboreferencia
/gate/world/daughters/systemType scanner
/gate/world/daughters/insert cylinder
/gate/scanner_tuboreferencia/setMaterial Air
/gate/scanner_tuboreferencia/geometry/setRmax 9. mm
/gate/scanner_tuboreferencia/geometry/setRmin 0. mm
/gate/scanner_tuboreferencia/geometry/setHeight 87. mm
/gate/scanner_tuboreferencia/placement/setRotationAxis 1 0 0
/gate/scanner_tuboreferencia/placement/setRotationAngle 90 deg
/gate/scanner_tuboreferencia/placement/setTranslation 0 0 0 mm
#/gate/scanner_tuboreferencia/vis/forceWireframe
#/gate/scanner_tuboreferencia/vis/setVisible 1
/gate/geometry/rebuild

#====================
#scanner_tuboreferencia-tuboreferencia 
#====================
/gate/scanner_tuboreferencia/daughters/name tuboreferencia
/gate/scanner_tuboreferencia/daughters/insert cylinder
/gate/tuboreferencia/setMaterial Glass
#/gate/tuboreferencia/vis/setColor gray
/gate/tuboreferencia/geometry/setRmax 8.5 mm
/gate/tuboreferencia/geometry/setRmin 0. mm
/gate/tuboreferencia/geometry/setHeight 86. mm
#/gate/tuboreferencia/vis/forceWireframe
/gate/geometry/rebuild

#====================
#scanner_tuboreferencia-aguafricketuboreferencia
#====================
/gate/tuboreferencia/daughters/name aguafricketuboreferencia
/gate/tuboreferencia/daughters/insert cylinder
/gate/aguafricketuboreferencia/setMaterial Water
#/gate/aguafricketuboreferencia/vis/setColor blue
/gate/aguafricketuboreferencia/geometry/setRmax 8.49 mm
/gate/aguafricketuboreferencia/geometry/setRmin 0. mm
/gate/aguafricketuboreferencia/geometry/setHeight 85.9 mm
#/gate/aguafricketuboreferencia/vis/forceWireframe
/gate/geometry/rebuild

#====================
#ATTACH VOLUMES TO A SYSTEM
#====================
/gate/systems/scanner_tubo1/level1/attach tubo1
/gate/systems/scanner_tubo1/level2/attach aguafricketubo1

/gate/systems/scanner_tubo2/level1/attach tubo2
/gate/systems/scanner_tubo2/level2/attach aguafricketubo2

/gate/systems/scanner_tubo3/level1/attach tubo3
/gate/systems/scanner_tubo3/level2/attach aguafricketubo3

/gate/systems/scanner_tubo4/level1/attach tubo4
/gate/systems/scanner_tubo4/level2/attach aguafricketubo4

/gate/systems/scanner_tubo5/level1/attach tubo5
/gate/systems/scanner_tubo5/level2/attach aguafricketubo5

/gate/systems/scanner_tubo6/level1/attach tubo6
/gate/systems/scanner_tubo6/level2/attach aguafricketubo6

/gate/systems/scanner_tubo7/level1/attach tubo7
/gate/systems/scanner_tubo7/level2/attach aguafricketubo7

/gate/systems/scanner_tubo8/level1/attach tubo8
/gate/systems/scanner_tubo8/level2/attach aguafricketubo8

/gate/systems/scanner_tubo9/level1/attach tubo9
/gate/systems/scanner_tubo9/level2/attach aguafricketubo9

/gate/systems/scanner_tubo10/level1/attach tubo10
/gate/systems/scanner_tubo10/level2/attach aguafricketubo10

/gate/systems/scanner_tubo11/level1/attach tubo11
/gate/systems/scanner_tubo11/level2/attach aguafricketubo11

/gate/systems/scanner_tubo12/level1/attach tubo12
/gate/systems/scanner_tubo12/level2/attach aguafricketubo12

/gate/systems/scanner_tubo13/level1/attach tubo13
/gate/systems/scanner_tubo13/level2/attach aguafricketubo13

/gate/systems/scanner_tubo14/level1/attach tubo14
/gate/systems/scanner_tubo14/level2/attach aguafricketubo14

/gate/systems/scanner_tubo15/level1/attach tubo15
/gate/systems/scanner_tubo15/level2/attach aguafricketubo15

/gate/systems/scanner_tubo16/level1/attach tubo16
/gate/systems/scanner_tubo16/level2/attach aguafricketubo16

/gate/systems/scanner_tubo17/level1/attach tubo17
/gate/systems/scanner_tubo17/level2/attach aguafricketubo17

/gate/systems/scanner_tubo18/level1/attach tubo18
/gate/systems/scanner_tubo18/level2/attach aguafricketubo18

/gate/systems/scanner_tuboreferencia/level1/attach tuboreferencia
/gate/systems/scanner_tuboreferencia/level2/attach aguafricketuboreferencia

#====================
#DEFINE A SENSITIVE DETECTOR
#====================
/gate/aguafricketubo1/attachCrystalSD

/gate/aguafricketubo2/attachCrystalSD

/gate/aguafricketubo3/attachCrystalSD

/gate/aguafricketubo4/attachCrystalSD

/gate/aguafricketubo5/attachCrystalSD

/gate/aguafricketubo6/attachCrystalSD

/gate/aguafricketubo7/attachCrystalSD

/gate/aguafricketubo8/attachCrystalSD

/gate/aguafricketubo9/attachCrystalSD

/gate/aguafricketubo10/attachCrystalSD

/gate/aguafricketubo11/attachCrystalSD

/gate/aguafricketubo12/attachCrystalSD

/gate/aguafricketubo13/attachCrystalSD

/gate/aguafricketubo14/attachCrystalSD

/gate/aguafricketubo15/attachCrystalSD

/gate/aguafricketubo16/attachCrystalSD

/gate/aguafricketubo17/attachCrystalSD

/gate/aguafricketubo18/attachCrystalSD

/gate/aguafricketuboreferencia/attachCrystalSD

#====================
#GEOMETRY-Parte superior RACK (sin agujeros)
#====================
/gate/world/daughters/name racksup
/gate/world/daughters/insert cylinder
/gate/racksup/setMaterial StainlessSteel  
#/gate/racksup/vis/setColor gray           
/gate/racksup/geometry/setRmax 85.5 mm
/gate/racksup/geometry/setRmin 75.5 mm
/gate/racksup/geometry/setHeight 1. mm
/gate/racksup/placement/setRotationAxis 1 0 0
/gate/racksup/placement/setRotationAngle 90 deg
/gate/racksup/placement/setTranslation 0. 101. 0. mm
#/gate/racksup/vis/forceWireframe              
#/gate/racksup/vis/setVisible true
/gate/geometry/rebuild 

#====================
#GEOMETRY-Parte inferior RACK (sin agujeros)
#====================
/gate/world/daughters/name rackinf
/gate/world/daughters/insert cylinder
/gate/rackinf/setMaterial StainlessSteel  
#/gate/rackinf/vis/setColor gray           
/gate/rackinf/geometry/setRmax 85.5 mm
/gate/rackinf/geometry/setRmin 75.5 mm
/gate/rackinf/geometry/setHeight 1. mm
/gate/rackinf/placement/setRotationAxis 1 0 0
/gate/rackinf/placement/setRotationAngle 90 deg
/gate/rackinf/placement/setTranslation 0. -101. 0. mm
#/gate/rackinf/vis/forceWireframe              
#/gate/rackinf/vis/setVisible true
/gate/geometry/rebuild
   
#====================
# FIRST LEVEL OF RACK - lapiz
#====================
/gate/world/daughters/name lapiz
/gate/world/daughters/insert cylinder
/gate/lapiz/setMaterial StainlessSteel
/gate/lapiz/placement/setTranslation 80.5 0. 0. mm
#/gate/lapiz/vis/setColor gray
/gate/lapiz/geometry/setRmax 5. mm
/gate/lapiz/geometry/setRmin 4.99 mm
/gate/lapiz/geometry/setHeight 202. mm
/gate/lapiz/placement/setRotationAxis 1 0 0
/gate/lapiz/placement/setRotationAngle 90 deg
#/gate/lapiz/vis/forceSolid
/gate/geometry/rebuild

#====================
# REPEAT-lapiz se tiene 16 lapices
#====================
/gate/lapiz/repeaters/insert ring
/gate/lapiz/ring/setRepeatNumber 16
/gate/lapiz/ring/setPoint1 0. 1. 0. mm
/gate/lapiz/ring/setPoint2 0. 0. 0. mm
/gate/lapiz/ring/disableAutoRotation
#/gate/lapiz/vis/forceSolid
/gate/geometry/rebuild

#====================
#PHYSICS PROCESSES
#====================
/gate/physics/addPhysicsList emstandard_opt3
/gate/physics/processList Enabled 
/gate/physics/processList Initialized

#====================
#INITIALIZE
#====================
/gate/run/initialize

#====================
#ADDER
#====================
#Para VGATE 9.1
#/gate/digitizer/Singles/insert adder

#Para VGATE9.3
/gate/digitizerMgr/aguafricketubo1/SinglesDigitizer/Singles/setInputCollection Singles/insert adder
/gate/digitizerMgr/aguafricketubo2/SinglesDigitizer/Singles/setInputCollection Singles/insert adder
/gate/digitizerMgr/aguafricketubo3/SinglesDigitizer/Singles/setInputCollection Singles/insert adder
/gate/digitizerMgr/aguafricketubo4/SinglesDigitizer/Singles/setInputCollection Singles/insert adder
/gate/digitizerMgr/aguafricketubo5/SinglesDigitizer/Singles/setInputCollection Singles/insert adder
/gate/digitizerMgr/aguafricketubo6/SinglesDigitizer/Singles/setInputCollection Singles/insert adder
/gate/digitizerMgr/aguafricketubo7/SinglesDigitizer/Singles/setInputCollection Singles/insert adder
/gate/digitizerMgr/aguafricketubo8/SinglesDigitizer/Singles/setInputCollection Singles/insert adder
/gate/digitizerMgr/aguafricketubo9/SinglesDigitizer/Singles/setInputCollection Singles/insert adder
/gate/digitizerMgr/aguafricketubo10/SinglesDigitizer/Singles/setInputCollection Singles/insert adder
/gate/digitizerMgr/aguafricketubo11/SinglesDigitizer/Singles/setInputCollection Singles/insert adder
/gate/digitizerMgr/aguafricketubo12/SinglesDigitizer/Singles/setInputCollection Singles/insert adder
/gate/digitizerMgr/aguafricketubo13/SinglesDigitizer/Singles/setInputCollection Singles/insert adder
/gate/digitizerMgr/aguafricketubo14/SinglesDigitizer/Singles/setInputCollection Singles/insert adder
/gate/digitizerMgr/aguafricketubo15/SinglesDigitizer/Singles/setInputCollection Singles/insert adder
/gate/digitizerMgr/aguafricketubo16/SinglesDigitizer/Singles/setInputCollection Singles/insert adder
/gate/digitizerMgr/aguafricketubo17/SinglesDigitizer/Singles/setInputCollection Singles/insert adder
/gate/digitizerMgr/aguafricketubo18/SinglesDigitizer/Singles/setInputCollection Singles/insert adder
/gate/digitizerMgr/aguafricketuboreferencia/SinglesDigitizer/Singles/setInputCollection Singles/insert adder

#====================
#READOUT
#====================
#Para VGATE 9.1
#/gate/digitizer/Singles/insert readout
#/gate/digitizer/Singles/readout/setDepth 1

#Para VGATE9.3
/gate/digitizerMgr/aguafricketubo1/SinglesDigitizer/Singles/setInputCollection Singles/insert readout
/gate/digitizerMgr/aguafricketubo1/SinglesDigitizer/Singles/setInputCollection Singles/readout/setDepth 1

/gate/digitizerMgr/aguafricketubo2/SinglesDigitizer/Singles/setInputCollection Singles/insert readout
/gate/digitizerMgr/aguafricketubo2/SinglesDigitizer/Singles/setInputCollection Singles/readout/setDepth 1

/gate/digitizerMgr/aguafricketubo3/SinglesDigitizer/Singles/setInputCollection Singles/insert readout
/gate/digitizerMgr/aguafricketubo3/SinglesDigitizer/Singles/setInputCollection Singles/readout/setDepth 1

/gate/digitizerMgr/aguafricketubo4/SinglesDigitizer/Singles/setInputCollection Singles/insert readout
/gate/digitizerMgr/aguafricketubo4/SinglesDigitizer/Singles/setInputCollection Singles/readout/setDepth 1

/gate/digitizerMgr/aguafricketubo5/SinglesDigitizer/Singles/setInputCollection Singles/insert readout
/gate/digitizerMgr/aguafricketubo5/SinglesDigitizer/Singles/setInputCollection Singles/readout/setDepth 1

/gate/digitizerMgr/aguafricketubo6/SinglesDigitizer/Singles/setInputCollection Singles/insert readout
/gate/digitizerMgr/aguafricketubo6/SinglesDigitizer/Singles/setInputCollection Singles/readout/setDepth 1

/gate/digitizerMgr/aguafricketubo7/SinglesDigitizer/Singles/setInputCollection Singles/insert readout
/gate/digitizerMgr/aguafricketubo7/SinglesDigitizer/Singles/setInputCollection Singles/readout/setDepth 1

/gate/digitizerMgr/aguafricketubo8/SinglesDigitizer/Singles/setInputCollection Singles/insert readout
/gate/digitizerMgr/aguafricketubo8/SinglesDigitizer/Singles/setInputCollection Singles/readout/setDepth 1

/gate/digitizerMgr/aguafricketubo9/SinglesDigitizer/Singles/setInputCollection Singles/insert readout
/gate/digitizerMgr/aguafricketubo9/SinglesDigitizer/Singles/setInputCollection Singles/readout/setDepth 1

/gate/digitizerMgr/aguafricketubo10/SinglesDigitizer/Singles/setInputCollection Singles/insert readout
/gate/digitizerMgr/aguafricketubo10/SinglesDigitizer/Singles/setInputCollection Singles/readout/setDepth 1

/gate/digitizerMgr/aguafricketubo11/SinglesDigitizer/Singles/setInputCollection Singles/insert readout
/gate/digitizerMgr/aguafricketubo11/SinglesDigitizer/Singles/setInputCollection Singles/readout/setDepth 1

/gate/digitizerMgr/aguafricketubo12/SinglesDigitizer/Singles/setInputCollection Singles/insert readout
/gate/digitizerMgr/aguafricketubo12/SinglesDigitizer/Singles/setInputCollection Singles/readout/setDepth 1

/gate/digitizerMgr/aguafricketubo13/SinglesDigitizer/Singles/setInputCollection Singles/insert readout
/gate/digitizerMgr/aguafricketubo13/SinglesDigitizer/Singles/setInputCollection Singles/readout/setDepth 1

/gate/digitizerMgr/aguafricketubo14/SinglesDigitizer/Singles/setInputCollection Singles/insert readout
/gate/digitizerMgr/aguafricketubo14/SinglesDigitizer/Singles/setInputCollection Singles/readout/setDepth 1

/gate/digitizerMgr/aguafricketubo15/SinglesDigitizer/Singles/setInputCollection Singles/insert readout
/gate/digitizerMgr/aguafricketubo15/SinglesDigitizer/Singles/setInputCollection Singles/readout/setDepth 1

/gate/digitizerMgr/aguafricketubo16/SinglesDigitizer/Singles/setInputCollection Singles/insert readout
/gate/digitizerMgr/aguafricketubo16/SinglesDigitizer/Singles/setInputCollection Singles/readout/setDepth 1

/gate/digitizerMgr/aguafricketubo17/SinglesDigitizer/Singles/setInputCollection Singles/insert readout
/gate/digitizerMgr/aguafricketubo17/SinglesDigitizer/Singles/setInputCollection Singles/readout/setDepth 1

/gate/digitizerMgr/aguafricketubo18/SinglesDigitizer/Singles/setInputCollection Singles/insert readout
/gate/digitizerMgr/aguafricketubo18/SinglesDigitizer/Singles/setInputCollection Singles/readout/setDepth 1

/gate/digitizerMgr/aguafricketuboreferencia/SinglesDigitizer/Singles/setInputCollection Singles/insert readout
/gate/digitizerMgr/aguafricketuboreferencia/SinglesDigitizer/Singles/setInputCollection Singles/readout/setDepth 1

#====================
#ENERGY BLURRING #VGate 9.1
#====================
#/gate/digitizer/Singles/insert blurring
#/gate/digitizer/Singles/blurring/setResolution 0.001
#/gate/digitizer/Singles/blurring/setEnergyOfReference 1173.228 keV
#/gate/digitizer/Singles/blurring/setEnergyOfReference 1332.492 keV

#====================
#ENERGY RESOLUTION #VGate 9.3 (Antes ENERGY BLURRING)
#====================
/gate/digitizerMgr/aguafricketubo1/SinglesDigitizer/Singles/setInputCollection Singles/insert energyResolution
/gate/digitizerMgr/aguafricketubo1/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/fwhm 0.001
/gate/digitizerMgr/aguafricketubo1/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1173.228 keV
/gate/digitizerMgr/aguafricketubo1/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1332.492 keV

/gate/digitizerMgr/aguafricketubo2/SinglesDigitizer/Singles/setInputCollection Singles/insert energyResolution
/gate/digitizerMgr/aguafricketubo2/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/fwhm 0.001
/gate/digitizerMgr/aguafricketubo2/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1173.228 keV
/gate/digitizerMgr/aguafricketubo2/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1332.492 keV

/gate/digitizerMgr/aguafricketubo3/SinglesDigitizer/Singles/setInputCollection Singles/insert energyResolution
/gate/digitizerMgr/aguafricketubo3/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/fwhm 0.001
/gate/digitizerMgr/aguafricketubo3/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1173.228 keV
/gate/digitizerMgr/aguafricketubo3/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1332.492 keV

/gate/digitizerMgr/aguafricketubo4/SinglesDigitizer/Singles/setInputCollection Singles/insert energyResolution
/gate/digitizerMgr/aguafricketubo4/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/fwhm 0.001
/gate/digitizerMgr/aguafricketubo4/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1173.228 keV
/gate/digitizerMgr/aguafricketubo4/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1332.492 keV

/gate/digitizerMgr/aguafricketubo5/SinglesDigitizer/Singles/setInputCollection Singles/insert energyResolution
/gate/digitizerMgr/aguafricketubo5/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/fwhm 0.001
/gate/digitizerMgr/aguafricketubo5/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1173.228 keV
/gate/digitizerMgr/aguafricketubo5/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1332.492 keV

/gate/digitizerMgr/aguafricketubo6/SinglesDigitizer/Singles/setInputCollection Singles/insert energyResolution
/gate/digitizerMgr/aguafricketubo6/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/fwhm 0.001
/gate/digitizerMgr/aguafricketubo6/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1173.228 keV
/gate/digitizerMgr/aguafricketubo6/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1332.492 keV

/gate/digitizerMgr/aguafricketubo7/SinglesDigitizer/Singles/setInputCollection Singles/insert energyResolution
/gate/digitizerMgr/aguafricketubo7/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/fwhm 0.001
/gate/digitizerMgr/aguafricketubo7/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1173.228 keV
/gate/digitizerMgr/aguafricketubo7/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1332.492 keV

/gate/digitizerMgr/aguafricketubo8/SinglesDigitizer/Singles/setInputCollection Singles/insert energyResolution
/gate/digitizerMgr/aguafricketubo8/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/fwhm 0.001
/gate/digitizerMgr/aguafricketubo8/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1173.228 keV
/gate/digitizerMgr/aguafricketubo8/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1332.492 keV

/gate/digitizerMgr/aguafricketubo9/SinglesDigitizer/Singles/setInputCollection Singles/insert energyResolution
/gate/digitizerMgr/aguafricketubo9/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/fwhm 0.001
/gate/digitizerMgr/aguafricketubo9/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1173.228 keV
/gate/digitizerMgr/aguafricketubo9/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1332.492 keV

/gate/digitizerMgr/aguafricketubo10/SinglesDigitizer/Singles/setInputCollection Singles/insert energyResolution
/gate/digitizerMgr/aguafricketubo10/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/fwhm 0.001
/gate/digitizerMgr/aguafricketubo10/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1173.228 keV
/gate/digitizerMgr/aguafricketubo10/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1332.492 keV

/gate/digitizerMgr/aguafricketubo11/SinglesDigitizer/Singles/setInputCollection Singles/insert energyResolution
/gate/digitizerMgr/aguafricketubo11/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/fwhm 0.001
/gate/digitizerMgr/aguafricketubo11/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1173.228 keV
/gate/digitizerMgr/aguafricketubo11/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1332.492 keV

/gate/digitizerMgr/aguafricketubo12/SinglesDigitizer/Singles/setInputCollection Singles/insert energyResolution
/gate/digitizerMgr/aguafricketubo12/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/fwhm 0.001
/gate/digitizerMgr/aguafricketubo12/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1173.228 keV
/gate/digitizerMgr/aguafricketubo12/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1332.492 keV

/gate/digitizerMgr/aguafricketubo13/SinglesDigitizer/Singles/setInputCollection Singles/insert energyResolution
/gate/digitizerMgr/aguafricketubo13/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/fwhm 0.001
/gate/digitizerMgr/aguafricketubo13/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1173.228 keV
/gate/digitizerMgr/aguafricketubo13/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1332.492 keV

/gate/digitizerMgr/aguafricketubo14/SinglesDigitizer/Singles/setInputCollection Singles/insert energyResolution
/gate/digitizerMgr/aguafricketubo14/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/fwhm 0.001
/gate/digitizerMgr/aguafricketubo14/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1173.228 keV
/gate/digitizerMgr/aguafricketubo14/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1332.492 keV

/gate/digitizerMgr/aguafricketubo15/SinglesDigitizer/Singles/setInputCollection Singles/insert energyResolution
/gate/digitizerMgr/aguafricketubo15/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/fwhm 0.001
/gate/digitizerMgr/aguafricketubo15/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1173.228 keV
/gate/digitizerMgr/aguafricketubo15/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1332.492 keV

/gate/digitizerMgr/aguafricketubo16/SinglesDigitizer/Singles/setInputCollection Singles/insert energyResolution
/gate/digitizerMgr/aguafricketubo16/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/fwhm 0.001
/gate/digitizerMgr/aguafricketubo16/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1173.228 keV
/gate/digitizerMgr/aguafricketubo16/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1332.492 keV

/gate/digitizerMgr/aguafricketubo17/SinglesDigitizer/Singles/setInputCollection Singles/insert energyResolution
/gate/digitizerMgr/aguafricketubo17/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/fwhm 0.001
/gate/digitizerMgr/aguafricketubo17/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1173.228 keV
/gate/digitizerMgr/aguafricketubo17/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1332.492 keV

/gate/digitizerMgr/aguafricketubo18/SinglesDigitizer/Singles/setInputCollection Singles/insert energyResolution
/gate/digitizerMgr/aguafricketubo18/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/fwhm 0.001
/gate/digitizerMgr/aguafricketubo18/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1173.228 keV
/gate/digitizerMgr/aguafricketubo18/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1332.492 keV

/gate/digitizerMgr/aguafricketuboreferencia/SinglesDigitizer/Singles/setInputCollection Singles/insert energyResolution
/gate/digitizerMgr/aguafricketuboreferencia/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/fwhm 0.001
/gate/digitizerMgr/aguafricketuboreferencia/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1173.228 keV
/gate/digitizerMgr/aguafricketuboreferencia/SinglesDigitizer/Singles/setInputCollection Singles/energyResolution/energyOfReference 1332.492 keV


#====================
#ENERGY WINDOW #VGATE 9.1
#====================
#/gate/digitizer/Singles/insert thresholder
#/gate/digitizer/Singles/thresholder/setThreshold 0. keV
#/gate/digitizer/Singles/insert upholder
#/gate/digitizer/Singles/upholder/setUphold 2000. keV

#====================
#ENERGY FRAMING #VGATE 9.3 (Previously Thresholder and Upholder)
#====================
/gate/digitizerMgr/aguafricketubo1/SinglesDigitizer/Singles/setInputCollection Singles/insert energyFraming
/gate/digitizerMgr/aguafricketubo1/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMin 0. keV
/gate/digitizerMgr/aguafricketubo1/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMax 2000. keV

/gate/digitizerMgr/aguafricketubo2/SinglesDigitizer/Singles/setInputCollection Singles/insert energyFraming
/gate/digitizerMgr/aguafricketubo2/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMin 0. keV
/gate/digitizerMgr/aguafricketubo2/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMax 2000. keV

/gate/digitizerMgr/aguafricketubo3/SinglesDigitizer/Singles/setInputCollection Singles/insert energyFraming
/gate/digitizerMgr/aguafricketubo3/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMin 0. keV
/gate/digitizerMgr/aguafricketubo3/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMax 2000. keV

/gate/digitizerMgr/aguafricketubo4/SinglesDigitizer/Singles/setInputCollection Singles/insert energyFraming
/gate/digitizerMgr/aguafricketubo4/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMin 0. keV
/gate/digitizerMgr/aguafricketubo4/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMax 2000. keV

/gate/digitizerMgr/aguafricketubo5/SinglesDigitizer/Singles/setInputCollection Singles/insert energyFraming
/gate/digitizerMgr/aguafricketubo5/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMin 0. keV
/gate/digitizerMgr/aguafricketubo5/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMax 2000. keV

/gate/digitizerMgr/aguafricketubo6/SinglesDigitizer/Singles/setInputCollection Singles/insert energyFraming
/gate/digitizerMgr/aguafricketubo6/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMin 0. keV
/gate/digitizerMgr/aguafricketubo6/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMax 2000. keV

/gate/digitizerMgr/aguafricketubo7/SinglesDigitizer/Singles/setInputCollection Singles/insert energyFraming
/gate/digitizerMgr/aguafricketubo7/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMin 0. keV
/gate/digitizerMgr/aguafricketubo7/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMax 2000. keV

/gate/digitizerMgr/aguafricketubo8/SinglesDigitizer/Singles/setInputCollection Singles/insert energyFraming
/gate/digitizerMgr/aguafricketubo8/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMin 0. keV
/gate/digitizerMgr/aguafricketubo8/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMax 2000. keV

/gate/digitizerMgr/aguafricketubo9/SinglesDigitizer/Singles/setInputCollection Singles/insert energyFraming
/gate/digitizerMgr/aguafricketubo9/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMin 0. keV
/gate/digitizerMgr/aguafricketubo9/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMax 2000. keV

/gate/digitizerMgr/aguafricketubo10/SinglesDigitizer/Singles/setInputCollection Singles/insert energyFraming
/gate/digitizerMgr/aguafricketubo10/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMin 0. keV
/gate/digitizerMgr/aguafricketubo10/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMax 2000. keV

/gate/digitizerMgr/aguafricketubo11/SinglesDigitizer/Singles/setInputCollection Singles/insert energyFraming
/gate/digitizerMgr/aguafricketubo11/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMin 0. keV
/gate/digitizerMgr/aguafricketubo11/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMax 2000. keV

/gate/digitizerMgr/aguafricketubo12/SinglesDigitizer/Singles/setInputCollection Singles/insert energyFraming
/gate/digitizerMgr/aguafricketubo12/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMin 0. keV
/gate/digitizerMgr/aguafricketubo12/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMax 2000. keV

/gate/digitizerMgr/aguafricketubo13/SinglesDigitizer/Singles/setInputCollection Singles/insert energyFraming
/gate/digitizerMgr/aguafricketubo13/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMin 0. keV
/gate/digitizerMgr/aguafricketubo13/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMax 2000. keV

/gate/digitizerMgr/aguafricketubo14/SinglesDigitizer/Singles/setInputCollection Singles/insert energyFraming
/gate/digitizerMgr/aguafricketubo14/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMin 0. keV
/gate/digitizerMgr/aguafricketubo14/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMax 2000. keV

/gate/digitizerMgr/aguafricketubo15/SinglesDigitizer/Singles/setInputCollection Singles/insert energyFraming
/gate/digitizerMgr/aguafricketubo15/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMin 0. keV
/gate/digitizerMgr/aguafricketubo15/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMax 2000. keV

/gate/digitizerMgr/aguafricketubo16/SinglesDigitizer/Singles/setInputCollection Singles/insert energyFraming
/gate/digitizerMgr/aguafricketubo16/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMin 0. keV
/gate/digitizerMgr/aguafricketubo16/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMax 2000. keV

/gate/digitizerMgr/aguafricketubo17/SinglesDigitizer/Singles/setInputCollection Singles/insert energyFraming
/gate/digitizerMgr/aguafricketubo17/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMin 0. keV
/gate/digitizerMgr/aguafricketubo17/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMax 2000. keV

/gate/digitizerMgr/aguafricketubo18/SinglesDigitizer/Singles/setInputCollection Singles/insert energyFraming
/gate/digitizerMgr/aguafricketubo18/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMin 0. keV
/gate/digitizerMgr/aguafricketubo18/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMax 2000. keV

/gate/digitizerMgr/aguafricketuboreferencia/SinglesDigitizer/Singles/setInputCollection Singles/insert energyFraming
/gate/digitizerMgr/aguafricketuboreferencia/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMin 0. keV
/gate/digitizerMgr/aguafricketuboreferencia/SinglesDigitizer/Singles/setInputCollection Singles/energyFraming/setMax 2000. keV


#====================
#Actividades totales de fuente 07/03/2023=119.2 Ci, para 10/04/2023=117.788 Ci y para 12/04/2023=117.704 Ci, obteniendo un valor promedio de actividad de 118.23 Ci, como son 16 lapices la actividad por cada lapiz = 7.38837634 Ci
#====================

#====================
#SOURCE 1 1173.228 keV 
#====================
/gate/source/addSource SourceCo6011 gps
/gate/source/SourceCo6011/setActivity 3.6946875 Ci
/gate/source/SourceCo6011/setType backtoback

#====================
#POSITION 
#====================
/gate/source/SourceCo6011/gps/centre 80.5 0. 0. mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo6011/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo6011/gps/type Volume
/gate/source/SourceCo6011/gps/shape Cylinder
/gate/source/SourceCo6011/gps/radius 4.985 mm
/gate/source/SourceCo6011/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo6011/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo6011/gps/mintheta 0. deg
/gate/source/SourceCo6011/gps/maxtheta 180. deg
/gate/source/SourceCo6011/gps/minphi 0. deg
/gate/source/SourceCo6011/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo6011/gps/ene/type Mono
/gate/source/SourceCo6011/gps/ene/mono 1173.228 keV

#====================
#VISUALIZATION SOURCE 
#====================
#/gate/source/SourceCo6011/visualize 10000 green 20


#====================
#SOURCE 1 1332.492 keV (4.8e+06 es el limite que me quede antes de killed)
#====================
/gate/source/addSource SourceCo6012 gps
/gate/source/SourceCo6012/setActivity 3.6946875 Ci
/gate/source/SourceCo6012/setType backtoback

#====================
#POSITION 
#====================
/gate/source/SourceCo6012/gps/centre 80.5 0. 0. mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo6012/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo6012/gps/type Volume
/gate/source/SourceCo6012/gps/shape Cylinder
/gate/source/SourceCo6012/gps/radius 4.985 mm
/gate/source/SourceCo6012/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo6012/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo6012/gps/mintheta 0. deg
/gate/source/SourceCo6012/gps/maxtheta 180. deg
/gate/source/SourceCo6012/gps/minphi 0. deg
/gate/source/SourceCo6012/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo6012/gps/ene/type Mono
/gate/source/SourceCo6012/gps/ene/mono 1332.492 keV

#====================
#VISUALIZATION SOURCE 
#====================
#/gate/source/SourceCo6012/visualize 10000 green 20

#====================
#REPEAT SOURCE 16 TIMES EN CADA LAPIZ
#====================
#====================
#SOURCE 2 1173.228 keV
#====================
/gate/source/addSource SourceCo6021 gps
/gate/source/SourceCo6021/setActivity 3.6946875 Ci
/gate/source/SourceCo6021/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo6021/gps/centre 74.4 0. 30.8 mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo6021/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo6021/gps/type Volume
/gate/source/SourceCo6021/gps/shape Cylinder
/gate/source/SourceCo6021/gps/radius 4.985 mm
/gate/source/SourceCo6021/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo6021/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo6021/gps/mintheta 0. deg
/gate/source/SourceCo6021/gps/maxtheta 180. deg
/gate/source/SourceCo6021/gps/minphi 0. deg
/gate/source/SourceCo6021/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo6021/gps/ene/type Mono
/gate/source/SourceCo6021/gps/ene/mono 1173.228 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo6021/visualize 10000 green 20

#====================
#SOURCE 2 1332.492 keV
#====================
/gate/source/addSource SourceCo6022 gps
/gate/source/SourceCo6022/setActivity 3.6946875 Ci
/gate/source/SourceCo6022/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo6022/gps/centre 74.4 0. 30.8 mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo6022/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo6022/gps/type Volume
/gate/source/SourceCo6022/gps/shape Cylinder
/gate/source/SourceCo6022/gps/radius 4.985 mm
/gate/source/SourceCo6022/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo6022/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo6022/gps/mintheta 0. deg
/gate/source/SourceCo6022/gps/maxtheta 180. deg
/gate/source/SourceCo6022/gps/minphi 0. deg
/gate/source/SourceCo6022/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo6022/gps/ene/type Mono
/gate/source/SourceCo6022/gps/ene/mono 1332.492 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo6022/visualize 10000 green 20

#====================
#SOURCE 3 1173.228 keV
#====================
/gate/source/addSource SourceCo6031 gps
/gate/source/SourceCo6031/setActivity 3.6946875 Ci
/gate/source/SourceCo6031/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo6031/gps/centre 56.9 0. 56.9 mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo6031/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo6031/gps/type Volume
/gate/source/SourceCo6031/gps/shape Cylinder
/gate/source/SourceCo6031/gps/radius 4.985 mm
/gate/source/SourceCo6031/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo6031/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo6031/gps/mintheta 0. deg
/gate/source/SourceCo6031/gps/maxtheta 180. deg
/gate/source/SourceCo6031/gps/minphi 0. deg
/gate/source/SourceCo6031/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo6031/gps/ene/type Mono
/gate/source/SourceCo6031/gps/ene/mono 1173.228 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo6031/visualize 10000 green 20

#====================
#SOURCE 3 1332.492 keV
#====================
/gate/source/addSource SourceCo6032 gps
/gate/source/SourceCo6032/setActivity 3.6946875 Ci
/gate/source/SourceCo6032/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo6032/gps/centre 56.9 0. 56.9 mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo6032/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo6032/gps/type Volume
/gate/source/SourceCo6032/gps/shape Cylinder
/gate/source/SourceCo6032/gps/radius 4.985 mm
/gate/source/SourceCo6032/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo6032/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo6032/gps/mintheta 0. deg
/gate/source/SourceCo6032/gps/maxtheta 180. deg
/gate/source/SourceCo6032/gps/minphi 0. deg
/gate/source/SourceCo6032/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo6032/gps/ene/type Mono
/gate/source/SourceCo6032/gps/ene/mono 1332.492 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo6032/visualize 10000 green 20

#====================
#SOURCE 4 1173.228 keV
#====================
/gate/source/addSource SourceCo6041 gps
/gate/source/SourceCo6041/setActivity 3.6946875 Ci
/gate/source/SourceCo6041/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo6041/gps/centre 30.8 0. 74.4 mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo6041/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo6041/gps/type Volume
/gate/source/SourceCo6041/gps/shape Cylinder
/gate/source/SourceCo6041/gps/radius 4.985 mm
/gate/source/SourceCo6041/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo6041/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo6041/gps/mintheta 0. deg
/gate/source/SourceCo6041/gps/maxtheta 180. deg
/gate/source/SourceCo6041/gps/minphi 0. deg
/gate/source/SourceCo6041/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo6041/gps/ene/type Mono
/gate/source/SourceCo6041/gps/ene/mono 1173.228 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo6041/visualize 10000 green 20

#====================
#SOURCE 4 1332.492 keV
#====================
/gate/source/addSource SourceCo6042 gps
/gate/source/SourceCo6042/setActivity 3.6946875 Ci
/gate/source/SourceCo6042/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo6042/gps/centre 30.8 0. 74.4 mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo6042/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo6042/gps/type Volume
/gate/source/SourceCo6042/gps/shape Cylinder
/gate/source/SourceCo6042/gps/radius 4.985 mm
/gate/source/SourceCo6042/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo6042/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo6042/gps/mintheta 0. deg
/gate/source/SourceCo6042/gps/maxtheta 180. deg
/gate/source/SourceCo6042/gps/minphi 0. deg
/gate/source/SourceCo6042/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo6042/gps/ene/type Mono
/gate/source/SourceCo6042/gps/ene/mono 1332.492 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo6042/visualize 10000 green 20

#====================
#SOURCE 5 1173.228 keV
#====================
/gate/source/addSource SourceCo6051 gps
/gate/source/SourceCo6051/setActivity 3.6946875 Ci
/gate/source/SourceCo6051/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo6051/gps/centre 0. 0. 80.5 mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo6051/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo6051/gps/type Volume
/gate/source/SourceCo6051/gps/shape Cylinder
/gate/source/SourceCo6051/gps/radius 4.985 mm
/gate/source/SourceCo6051/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo6051/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo6051/gps/mintheta 0. deg
/gate/source/SourceCo6051/gps/maxtheta 180. deg
/gate/source/SourceCo6051/gps/minphi 0. deg
/gate/source/SourceCo6051/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo6051/gps/ene/type Mono
/gate/source/SourceCo6051/gps/ene/mono 1173.228 keV

#====================
#VISUALIZATION SOURCE
#==================== 
/gate/source/SourceCo6051/visualize 10000 green 20

#====================
#SOURCE 5 1332.492 keV
#====================
/gate/source/addSource SourceCo6052 gps
/gate/source/SourceCo6052/setActivity 3.6946875 Ci
/gate/source/SourceCo6052/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo6052/gps/centre 0. 0. 80.5 mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo6052/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo6052/gps/type Volume
/gate/source/SourceCo6052/gps/shape Cylinder
/gate/source/SourceCo6052/gps/radius 4.985 mm
/gate/source/SourceCo6052/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo6052/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo6052/gps/mintheta 0. deg
/gate/source/SourceCo6052/gps/maxtheta 180. deg
/gate/source/SourceCo6052/gps/minphi 0. deg
/gate/source/SourceCo6052/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo6052/gps/ene/type Mono
/gate/source/SourceCo6052/gps/ene/mono 1332.492 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo6052/visualize 10000 green 20

#====================
#SOURCE 6 1173.228 keV
#====================
/gate/source/addSource SourceCo6061 gps
/gate/source/SourceCo6061/setActivity 3.6946875 Ci
/gate/source/SourceCo6061/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo6061/gps/centre -30.8 0. 74.4 mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo6061/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo6061/gps/type Volume
/gate/source/SourceCo6061/gps/shape Cylinder
/gate/source/SourceCo6061/gps/radius 4.985 mm
/gate/source/SourceCo6061/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo6061/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo6061/gps/mintheta 0. deg
/gate/source/SourceCo6061/gps/maxtheta 180. deg
/gate/source/SourceCo6061/gps/minphi 0. deg
/gate/source/SourceCo6061/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo6061/gps/ene/type Mono
/gate/source/SourceCo6061/gps/ene/mono 1173.228 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo6061/visualize 10000 green 20

#====================
#SOURCE 6 1332.492 keV
#====================
/gate/source/addSource SourceCo6062 gps
/gate/source/SourceCo6062/setActivity 3.6946875 Ci
/gate/source/SourceCo6062/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo6062/gps/centre -30.8 0. 74.4 mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo6062/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo6062/gps/type Volume
/gate/source/SourceCo6062/gps/shape Cylinder
/gate/source/SourceCo6062/gps/radius 4.985 mm
/gate/source/SourceCo6062/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo6062/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo6062/gps/mintheta 0. deg
/gate/source/SourceCo6062/gps/maxtheta 180. deg
/gate/source/SourceCo6062/gps/minphi 0. deg
/gate/source/SourceCo6062/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo6062/gps/ene/type Mono
/gate/source/SourceCo6062/gps/ene/mono 1332.492 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo6062/visualize 10000 green 20

#====================
#SOURCE 7 1173.228 keV
#====================
/gate/source/addSource SourceCo6071 gps
/gate/source/SourceCo6071/setActivity 3.6946875 Ci
/gate/source/SourceCo6071/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo6071/gps/centre -56.9 0. 56.9 mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo6071/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo6071/gps/type Volume
/gate/source/SourceCo6071/gps/shape Cylinder
/gate/source/SourceCo6071/gps/radius 4.985 mm
/gate/source/SourceCo6071/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo6071/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo6071/gps/mintheta 0. deg
/gate/source/SourceCo6071/gps/maxtheta 180. deg
/gate/source/SourceCo6071/gps/minphi 0. deg
/gate/source/SourceCo6071/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo6071/gps/ene/type Mono
/gate/source/SourceCo6071/gps/ene/mono 1173.228 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo6071/visualize 10000 green 20

#====================
#SOURCE 7 1332.492 keV
#====================
/gate/source/addSource SourceCo6072 gps
/gate/source/SourceCo6072/setActivity 3.6946875 Ci
/gate/source/SourceCo6072/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo6072/gps/centre -56.9 0. 56.9 mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo6072/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo6072/gps/type Volume
/gate/source/SourceCo6072/gps/shape Cylinder
/gate/source/SourceCo6072/gps/radius 4.985 mm
/gate/source/SourceCo6072/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo6072/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo6072/gps/mintheta 0. deg
/gate/source/SourceCo6072/gps/maxtheta 180. deg
/gate/source/SourceCo6072/gps/minphi 0. deg
/gate/source/SourceCo6072/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo6072/gps/ene/type Mono
/gate/source/SourceCo6072/gps/ene/mono 1332.492 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo6072/visualize 10000 green 20

#====================
#SOURCE 8 1173.228 keV
#====================
/gate/source/addSource SourceCo6081 gps
/gate/source/SourceCo6081/setActivity 3.6946875 Ci
/gate/source/SourceCo6081/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo6081/gps/centre -74.4 0. 30.8 mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo6081/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo6081/gps/type Volume
/gate/source/SourceCo6081/gps/shape Cylinder
/gate/source/SourceCo6081/gps/radius 4.985 mm
/gate/source/SourceCo6081/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo6081/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo6081/gps/mintheta 0. deg
/gate/source/SourceCo6081/gps/maxtheta 180. deg
/gate/source/SourceCo6081/gps/minphi 0. deg
/gate/source/SourceCo6081/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo6081/gps/ene/type Mono
/gate/source/SourceCo6081/gps/ene/mono 1173.228 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo6081/visualize 10000 green 20

#====================
#SOURCE 8 1332.492 keV
#====================
/gate/source/addSource SourceCo6082 gps
/gate/source/SourceCo6082/setActivity 3.6946875 Ci
/gate/source/SourceCo6082/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo6082/gps/centre -74.4 0. 30.8 mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo6082/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo6082/gps/type Volume
/gate/source/SourceCo6082/gps/shape Cylinder
/gate/source/SourceCo6082/gps/radius 4.985 mm
/gate/source/SourceCo6082/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo6082/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo6082/gps/mintheta 0. deg
/gate/source/SourceCo6082/gps/maxtheta 180. deg
/gate/source/SourceCo6082/gps/minphi 0. deg
/gate/source/SourceCo6082/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo6082/gps/ene/type Mono
/gate/source/SourceCo6082/gps/ene/mono 1332.492 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo6082/visualize 10000 green 20

#====================
#SOURCE 9 1173.228 keV
#====================
/gate/source/addSource SourceCo6091 gps
/gate/source/SourceCo6091/setActivity 3.6946875 Ci
/gate/source/SourceCo6091/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo6091/gps/centre -80.5 0. 0. mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo6091/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo6091/gps/type Volume
/gate/source/SourceCo6091/gps/shape Cylinder
/gate/source/SourceCo6091/gps/radius 4.985 mm
/gate/source/SourceCo6091/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo6091/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo6091/gps/mintheta 0. deg
/gate/source/SourceCo6091/gps/maxtheta 180. deg
/gate/source/SourceCo6091/gps/minphi 0. deg
/gate/source/SourceCo6091/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo6091/gps/ene/type Mono
/gate/source/SourceCo6091/gps/ene/mono 1173.228 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo6091/visualize 10000 green 20

#====================
#SOURCE 9 1332.492 keV
#====================
/gate/source/addSource SourceCo6092 gps
/gate/source/SourceCo6092/setActivity 3.6946875 Ci
/gate/source/SourceCo6092/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo6092/gps/centre -80.5 0. 0. mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo6092/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo6092/gps/type Volume
/gate/source/SourceCo6092/gps/shape Cylinder
/gate/source/SourceCo6092/gps/radius 4.985 mm
/gate/source/SourceCo6092/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo6092/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo6092/gps/mintheta 0. deg
/gate/source/SourceCo6092/gps/maxtheta 180. deg
/gate/source/SourceCo6092/gps/minphi 0. deg
/gate/source/SourceCo6092/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo6092/gps/ene/type Mono
/gate/source/SourceCo6092/gps/ene/mono 1332.492 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo6092/visualize 10000 green 20

#====================
#SOURCE 10 1173.228 keV
#====================
/gate/source/addSource SourceCo60101 gps
/gate/source/SourceCo60101/setActivity 3.6946875 Ci
/gate/source/SourceCo60101/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo60101/gps/centre -74.4 0. -30.8 mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo60101/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo60101/gps/type Volume
/gate/source/SourceCo60101/gps/shape Cylinder
/gate/source/SourceCo60101/gps/radius 4.985 mm
/gate/source/SourceCo60101/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo60101/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo60101/gps/mintheta 0. deg
/gate/source/SourceCo60101/gps/maxtheta 180. deg
/gate/source/SourceCo60101/gps/minphi 0. deg
/gate/source/SourceCo60101/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo60101/gps/ene/type Mono
/gate/source/SourceCo60101/gps/ene/mono 1173.228 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo60101/visualize 10000 green 20

#====================
#SOURCE 10 1332.492 keV
#====================
/gate/source/addSource SourceCo60102 gps
/gate/source/SourceCo60102/setActivity 3.6946875 Ci
/gate/source/SourceCo60102/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo60102/gps/centre -74.4 0. -30.8 mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo60102/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo60102/gps/type Volume
/gate/source/SourceCo60102/gps/shape Cylinder
/gate/source/SourceCo60102/gps/radius 4.985 mm
/gate/source/SourceCo60102/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo60102/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo60102/gps/mintheta 0. deg
/gate/source/SourceCo60102/gps/maxtheta 180. deg
/gate/source/SourceCo60102/gps/minphi 0. deg
/gate/source/SourceCo60102/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo60102/gps/ene/type Mono
/gate/source/SourceCo60102/gps/ene/mono 1332.492 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo60102/visualize 10000 green 20

#====================
#SOURCE 11 1173.228 keV
#====================
/gate/source/addSource SourceCo60111 gps
/gate/source/SourceCo60111/setActivity 3.6946875 Ci
/gate/source/SourceCo60111/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo60111/gps/centre -56.9 0. -56.9 mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo60111/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo60111/gps/type Volume
/gate/source/SourceCo60111/gps/shape Cylinder
/gate/source/SourceCo60111/gps/radius 4.985 mm
/gate/source/SourceCo60111/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo60111/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo60111/gps/mintheta 0. deg
/gate/source/SourceCo60111/gps/maxtheta 180. deg
/gate/source/SourceCo60111/gps/minphi 0. deg
/gate/source/SourceCo60111/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo60111/gps/ene/type Mono
/gate/source/SourceCo60111/gps/ene/mono 1173.228 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo60111/visualize 10000 green 20

#====================
#SOURCE 11 1332.492 keV
#====================
/gate/source/addSource SourceCo60112 gps
/gate/source/SourceCo60112/setActivity 3.6946875 Ci
/gate/source/SourceCo60112/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo60112/gps/centre -56.9 0. -56.9 mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo60112/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo60112/gps/type Volume
/gate/source/SourceCo60112/gps/shape Cylinder
/gate/source/SourceCo60112/gps/radius 4.985 mm
/gate/source/SourceCo60112/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo60112/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo60112/gps/mintheta 0. deg
/gate/source/SourceCo60112/gps/maxtheta 180. deg
/gate/source/SourceCo60112/gps/minphi 0. deg
/gate/source/SourceCo60112/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo60112/gps/ene/type Mono
/gate/source/SourceCo60112/gps/ene/mono 1332.492 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo60112/visualize 10000 green 20

#====================
#SOURCE 12 1173.228 keV
#====================
/gate/source/addSource SourceCo60121 gps
/gate/source/SourceCo60121/setActivity 3.6946875 Ci
/gate/source/SourceCo60121/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo60121/gps/centre -30.8 0. -74.4 mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo60121/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo60121/gps/type Volume
/gate/source/SourceCo60121/gps/shape Cylinder
/gate/source/SourceCo60121/gps/radius 4.985 mm
/gate/source/SourceCo60121/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo60121/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo60121/gps/mintheta 0. deg
/gate/source/SourceCo60121/gps/maxtheta 180. deg
/gate/source/SourceCo60121/gps/minphi 0. deg
/gate/source/SourceCo60121/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo60121/gps/ene/type Mono
/gate/source/SourceCo60121/gps/ene/mono 1173.228 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo60121/visualize 10000 green 20

#====================
#SOURCE 12 1332.492 keV
#====================
/gate/source/addSource SourceCo60122 gps
/gate/source/SourceCo60122/setActivity 3.6946875 Ci
/gate/source/SourceCo60122/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo60122/gps/centre -30.8 0. -74.4 mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo60122/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo60122/gps/type Volume
/gate/source/SourceCo60122/gps/shape Cylinder
/gate/source/SourceCo60122/gps/radius 4.985 mm
/gate/source/SourceCo60122/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo60122/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo60122/gps/mintheta 0. deg
/gate/source/SourceCo60122/gps/maxtheta 180. deg
/gate/source/SourceCo60122/gps/minphi 0. deg
/gate/source/SourceCo60122/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo60122/gps/ene/type Mono
/gate/source/SourceCo60122/gps/ene/mono 1332.492 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo60122/visualize 10000 green 20

#====================
#SOURCE 13 1173.228 keV
#====================
/gate/source/addSource SourceCo60131 gps
/gate/source/SourceCo60131/setActivity 3.6946875 Ci
/gate/source/SourceCo60131/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo60131/gps/centre 0. 0. -80.5 mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo60131/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo60131/gps/type Volume
/gate/source/SourceCo60131/gps/shape Cylinder
/gate/source/SourceCo60131/gps/radius 4.985 mm
/gate/source/SourceCo60131/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo60131/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo60131/gps/mintheta 0. deg
/gate/source/SourceCo60131/gps/maxtheta 180. deg
/gate/source/SourceCo60131/gps/minphi 0. deg
/gate/source/SourceCo60131/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo60131/gps/ene/type Mono
/gate/source/SourceCo60131/gps/ene/mono 1173.228 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo60131/visualize 10000 green 20

#====================
#SOURCE 13 1332.492 keV
#====================
/gate/source/addSource SourceCo60132 gps
/gate/source/SourceCo60132/setActivity 3.6946875 Ci
/gate/source/SourceCo60132/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo60132/gps/centre 0. 0. -80.5 mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo60132/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo60132/gps/type Volume
/gate/source/SourceCo60132/gps/shape Cylinder
/gate/source/SourceCo60132/gps/radius 4.985 mm
/gate/source/SourceCo60132/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo60132/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo60132/gps/mintheta 0. deg
/gate/source/SourceCo60132/gps/maxtheta 180. deg
/gate/source/SourceCo60132/gps/minphi 0. deg
/gate/source/SourceCo60132/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo60132/gps/ene/type Mono
/gate/source/SourceCo60132/gps/ene/mono 1332.492 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo60132/visualize 10000 green 20

#====================
#SOURCE 14 1173.228 keV
#====================
/gate/source/addSource SourceCo60141 gps
/gate/source/SourceCo60141/setActivity 3.6946875 Ci
/gate/source/SourceCo60141/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo60141/gps/centre 30.8 0. -74.4 mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo60141/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo60141/gps/type Volume
/gate/source/SourceCo60141/gps/shape Cylinder
/gate/source/SourceCo60141/gps/radius 4.985 mm
/gate/source/SourceCo60141/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo60141/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo60141/gps/mintheta 0. deg
/gate/source/SourceCo60141/gps/maxtheta 180. deg
/gate/source/SourceCo60141/gps/minphi 0. deg
/gate/source/SourceCo60141/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo60141/gps/ene/type Mono
/gate/source/SourceCo60141/gps/ene/mono 1173.228 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo60141/visualize 10000 green 20

#====================
#SOURCE 14 1332.492 keV
#====================
/gate/source/addSource SourceCo60142 gps
/gate/source/SourceCo60142/setActivity 3.6946875 Ci
/gate/source/SourceCo60142/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo60142/gps/centre 30.8 0. -74.4 mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo60142/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo60142/gps/type Volume
/gate/source/SourceCo60142/gps/shape Cylinder
/gate/source/SourceCo60142/gps/radius 4.985 mm
/gate/source/SourceCo60142/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo60142/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo60142/gps/mintheta 0. deg
/gate/source/SourceCo60142/gps/maxtheta 180. deg
/gate/source/SourceCo60142/gps/minphi 0. deg
/gate/source/SourceCo60142/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo60142/gps/ene/type Mono
/gate/source/SourceCo60142/gps/ene/mono 1332.492 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo60142/visualize 10000 green 20

#====================
#SOURCE 15 1173.228 keV
#====================
/gate/source/addSource SourceCo60151 gps
/gate/source/SourceCo60151/setActivity 3.6946875 Ci
/gate/source/SourceCo60151/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo60151/gps/centre 56.9 0. -56.9 mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo60151/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo60151/gps/type Volume
/gate/source/SourceCo60151/gps/shape Cylinder
/gate/source/SourceCo60151/gps/radius 4.985 mm
/gate/source/SourceCo60151/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo60151/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo60151/gps/mintheta 0. deg
/gate/source/SourceCo60151/gps/maxtheta 180. deg
/gate/source/SourceCo60151/gps/minphi 0. deg
/gate/source/SourceCo60151/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo60151/gps/ene/type Mono
/gate/source/SourceCo60151/gps/ene/mono 1173.228 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo60151/visualize 10000 green 20

#====================
#SOURCE 15 1332.492 keV
#====================
/gate/source/addSource SourceCo60152 gps
/gate/source/SourceCo60152/setActivity 3.6946875 Ci
/gate/source/SourceCo60152/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo60152/gps/centre 56.9 0. -56.9 mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo60152/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo60152/gps/type Volume
/gate/source/SourceCo60152/gps/shape Cylinder
/gate/source/SourceCo60152/gps/radius 4.985 mm
/gate/source/SourceCo60152/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo60152/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo60152/gps/mintheta 0. deg
/gate/source/SourceCo60152/gps/maxtheta 180. deg
/gate/source/SourceCo60152/gps/minphi 0. deg
/gate/source/SourceCo60152/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo60152/gps/ene/type Mono
/gate/source/SourceCo60152/gps/ene/mono 1332.492 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo60152/visualize 10000 green 20

#====================
#SOURCE 16 1173.228 keV
#====================
/gate/source/addSource SourceCo60161 gps
/gate/source/SourceCo60161/setActivity 3.6946875 Ci
/gate/source/SourceCo60161/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo60161/gps/centre 74.4 0. -30.8 mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo60161/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo60161/gps/type Volume
/gate/source/SourceCo60161/gps/shape Cylinder
/gate/source/SourceCo60161/gps/radius 4.985 mm
/gate/source/SourceCo60161/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo60161/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo60161/gps/mintheta 0. deg
/gate/source/SourceCo60161/gps/maxtheta 180. deg
/gate/source/SourceCo60161/gps/minphi 0. deg
/gate/source/SourceCo60161/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo60161/gps/ene/type Mono
/gate/source/SourceCo60161/gps/ene/mono 1173.228 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo60161/visualize 10000 green 20

#====================
#SOURCE 16 1332.492 keV
#====================
/gate/source/addSource SourceCo60162 gps
/gate/source/SourceCo60162/setActivity 3.6946875 Ci
/gate/source/SourceCo60162/setType backtoback

#====================
#POSITION
#====================
/gate/source/SourceCo60162/gps/centre 74.4 0. -30.8 mm

#====================
#PARTICLE
#====================
/gate/source/SourceCo60162/gps/particle gamma

#====================
#TYPE
#====================
/gate/source/SourceCo60162/gps/type Volume
/gate/source/SourceCo60162/gps/shape Cylinder
/gate/source/SourceCo60162/gps/radius 4.985 mm
/gate/source/SourceCo60162/gps/halfy 100. mm

#====================
#SET ANGULAR DISTRIBUITION
#====================
/gate/source/SourceCo60162/gps/angtype iso

#====================
#SET MIN AND MAX EMISSION ANGLES
#==================== 
/gate/source/SourceCo60162/gps/mintheta 0. deg
/gate/source/SourceCo60162/gps/maxtheta 180. deg
/gate/source/SourceCo60162/gps/minphi 0. deg
/gate/source/SourceCo60162/gps/maxphi 360. deg
/gate/source/list

#====================
#SET ENERGY DISTRIBUTION
#====================
/gate/source/SourceCo60162/gps/ene/type Mono
/gate/source/SourceCo60162/gps/ene/mono 1332.492 keV

#====================
#VISUALIZATION SOURCE
#==================== 
#/gate/source/SourceCo60162/visualize 10000 green 20

#====================
#ASCII OUTPUT FORMAT
#====================

/gate/output/ascii/enable 
/gate/output/ascii/setFileName detector1
/gate/output/ascii/setOutFileSingles_aguafricketubo1Flag 1 
/gate/output/ascii/setOutFileHitsFlag 1

/gate/output/ascii/enable 
/gate/output/ascii/setFileName detector2
/gate/output/ascii/setOutFileSingles_aguafricketubo2Flag 1
/gate/output/ascii/setOutFileHitsFlag 1

/gate/output/ascii/enable 
/gate/output/ascii/setFileName detector3
/gate/output/ascii/setOutFileSingles_aguafricketubo3Flag 1
/gate/output/ascii/setOutFileHitsFlag 1

/gate/output/ascii/enable 
/gate/output/ascii/setFileName detector4
/gate/output/ascii/setOutFileSingles_aguafricketubo4Flag 1
/gate/output/ascii/setOutFileHitsFlag 1

/gate/output/ascii/enable
/gate/output/ascii/setFileName detector5
/gate/output/ascii/setOutFileSingles_aguafricketubo5Flag 1
/gate/output/ascii/setOutFileHitsFlag 1

/gate/output/ascii/enable
/gate/output/ascii/setFileName detector6
/gate/output/ascii/setOutFileSingles_aguafricketubo6Flag 1
/gate/output/ascii/setOutFileHitsFlag 1

/gate/output/ascii/enable
/gate/output/ascii/setFileName detector7
/gate/output/ascii/setOutFileSingles_aguafricketubo7Flag 1
/gate/output/ascii/setOutFileHitsFlag 1

/gate/output/ascii/enable
/gate/output/ascii/setFileName detector8
/gate/output/ascii/setOutFileSingles_aguafricketubo8Flag 1
/gate/output/ascii/setOutFileHitsFlag 1

/gate/output/ascii/enable
/gate/output/ascii/setFileName detector9
/gate/output/ascii/setOutFileSingles_aguafricketubo9Flag 1
/gate/output/ascii/setOutFileHitsFlag 1

/gate/output/ascii/enable
/gate/output/ascii/setFileName detector10
/gate/output/ascii/setOutFileSingles_aguafricketubo10Flag 1
/gate/output/ascii/setOutFileHitsFlag 1

/gate/output/ascii/enable
/gate/output/ascii/setFileName detector11
/gate/output/ascii/setOutFileSingles_aguafricketubo11Flag 1
/gate/output/ascii/setOutFileHitsFlag 1

/gate/output/ascii/enable
/gate/output/ascii/setFileName detector12
/gate/output/ascii/setOutFileSingles_aguafricketubo12Flag 1
/gate/output/ascii/setOutFileHitsFlag 1

/gate/output/ascii/enable
/gate/output/ascii/setFileName detector13
/gate/output/ascii/setOutFileSingles_aguafricketubo13Flag 1
/gate/output/ascii/setOutFileHitsFlag 1

/gate/output/ascii/enable
/gate/output/ascii/setFileName detector14
/gate/output/ascii/setOutFileSingles_aguafricketubo14Flag 1
/gate/output/ascii/setOutFileHitsFlag 1

/gate/output/ascii/enable
/gate/output/ascii/setFileName detector15
/gate/output/ascii/setOutFileSingles_aguafricketubo15Flag 1
/gate/output/ascii/setOutFileHitsFlag 1

/gate/output/ascii/enable
/gate/output/ascii/setFileName detector16
/gate/output/ascii/setOutFileSingles_aguafricketubo16Flag 1
/gate/output/ascii/setOutFileHitsFlag 1

/gate/output/ascii/enable
/gate/output/ascii/setFileName detector17
/gate/output/ascii/setOutFileSingles_aguafricketubo17Flag 1
/gate/output/ascii/setOutFileHitsFlag 1

/gate/output/ascii/enable
/gate/output/ascii/setFileName detector18
/gate/output/ascii/setOutFileSingles_aguafricketubo18Flag 1
/gate/output/ascii/setOutFileHitsFlag 1

/gate/output/ascii/enable
/gate/output/ascii/setFileName detectorreferencia
/gate/output/ascii/setOutFileSingles_aguafricketuboreferenciaFlag 1
/gate/output/ascii/setOutFileHitsFlag 1


#====================
#ROOT OUTPUT FORMAT
#====================

/gate/output/root/enable 
/gate/output/root/setFileName detector1.root
/gate/output/root/setRootSingles_aguafricketubo1Flag 1

/gate/output/root/enable 
/gate/output/root/setFileName detector2.root
/gate/output/root/setRootSingles_aguafricketubo2Flag 1

/gate/output/root/enable 
/gate/output/root/setFileName detector3.root
/gate/output/root/setRootSingles_aguafricketubo3Flag 1

/gate/output/root/enable 
/gate/output/root/setFileName detector4.root
/gate/output/root/setRootSingles_aguafricketubo4Flag 1

/gate/output/root/enable
/gate/output/root/setFileName detector5.root
/gate/output/root/setRootSingles_aguafricketubo5Flag 1

/gate/output/root/enable
/gate/output/root/setFileName detector6.root
/gate/output/root/setRootSingles_aguafricketubo6Flag 1

/gate/output/root/enable
/gate/output/root/setFileName detector7.root
/gate/output/root/setRootSingles_aguafricketubo7Flag 1

/gate/output/root/enable
/gate/output/root/setFileName detector8.root
/gate/output/root/setRootSingles_aguafricketubo8Flag 1

/gate/output/root/enable
/gate/output/root/setFileName detector9.root
/gate/output/root/setRootSingles_aguafricketubo9Flag 1

/gate/output/root/enable
/gate/output/root/setFileName detector10.root
/gate/output/root/setRootSingles_aguafricketubo10Flag 1

/gate/output/root/enable
/gate/output/root/setFileName detector11.root
/gate/output/root/setRootSingles_aguafricketubo11Flag 1

/gate/output/root/enable
/gate/output/root/setFileName detector12.root
/gate/output/root/setRootSingles_aguafricketubo12Flag 1

/gate/output/root/enable
/gate/output/root/setFileName detector13.root
/gate/output/root/setRootSingles_aguafricketubo13Flag 1

/gate/output/root/enable
/gate/output/root/setFileName detector14.root
/gate/output/root/setRootSingles_aguafricketubo14Flag 1

/gate/output/root/enable
/gate/output/root/setFileName detector15.root
/gate/output/root/setRootSingles_aguafricketubo15Flag 1

/gate/output/root/enable
/gate/output/root/setFileName detector16.root
/gate/output/root/setRootSingles_aguafricketubo16Flag 1

/gate/output/root/enable
/gate/output/root/setFileName detector17.root
/gate/output/root/setRootSingles_aguafricketubo17Flag 1

/gate/output/root/enable
/gate/output/root/setFileName detector18.root
/gate/output/root/setRootSingles_aguafricketubo18Flag 1

/gate/output/root/enable
/gate/output/root/setFileName detectorreferencia.root
/gate/output/root/setRootSingles_aguafricketuboreferenciaFlag 1

#====================
#TIME SLICE
#====================
/gate/application/setTimeSlice     1.  s
/gate/application/setTimeStart     0.  s
/gate/application/setTimeStop      60.  s

#====================
#SEED 
#====================
/gate/random/setEngineName MersenneTwister
/gate/random/setEngineSeed default
/gate/random/verbose 0

#====================
#START ACQUISITION
#====================
/gate/application/startDAQ


