#====================
#VISUALIZATION
#====================
#/vis/open OGLIQt
#/vis/viewer/reset
#/vis/viewer/set/viewpointThetaPhi 60 30
#/vis/viewer/zoom 3
#/vis/viewer/set/style surface
#/vis/drawVolume
#/vis/scene/add/axes
#/vis/scene/endOfEventAction accumulate -4


#====================
# DESHABILITAR VISUALIZACION
#====================
/vis/disable

#====================
# LOGS
#====================
/gate/output/verbose 1
/gate/application/verbose 1
/gate/random/verbose 1

#====================
#SET MATERIALS
#====================
/gate/geometry/setMaterialDatabase /fuente3/mdetectores/GateMaterials.db

#====================
# WORLD
#====================
/gate/world/geometry/setXLength 200. mm
/gate/world/geometry/setYLength 250. mm
/gate/world/geometry/setZLength 200. mm

#========================
# PORTAMUESTRA optimizado (cuerpo + tapa incluidos)
#========================
/gate/world/daughters/name portamuestra
/gate/world/daughters/insert cylinder
/gate/portamuestra/setMaterial Aluminium
/gate/portamuestra/geometry/setRmax 74. mm
/gate/portamuestra/geometry/setRmin 73.5 mm  # pared m s gruesa
/gate/portamuestra/geometry/setHeight 200. mm  # incluye la tapa
/gate/portamuestra/placement/setRotationAxis 1 0 0
/gate/portamuestra/placement/setRotationAngle 90 deg
/gate/portamuestra/vis/setColor white
/gate/portamuestra/vis/forceWireframe


#====================
# CONTENEDOR DE MUESTRA 
#====================
/gate/world/daughters/name contenedormuestra
/gate/world/daughters/insert cylinder
/gate/contenedormuestra/setMaterial PVC
/gate/contenedormuestra/geometry/setRmax 50.97 mm
/gate/contenedormuestra/geometry/setRmin 50.47 mm
/gate/contenedormuestra/geometry/setHeight 129.5 mm 
/gate/contenedormuestra/placement/setRotationAxis 1 0 0
/gate/contenedormuestra/placement/setRotationAngle 90 deg
/gate/contenedormuestra/placement/setTranslation 0. 0. 0. mm
/gate/contenedormuestra/vis/setColor cyan
/gate/contenedormuestra/vis/forceWireframe

#====================
# TAPA CONTENEDORMUESTRA (Parte superior) 
#====================
/gate/world/daughters/name tapa_sup_contenedor
/gate/world/daughters/insert cylinder
/gate/tapa_sup_contenedor/setMaterial PVC
/gate/tapa_sup_contenedor/geometry/setRmax 50.97 mm
/gate/tapa_sup_contenedor/geometry/setRmin 0. mm
/gate/tapa_sup_contenedor/geometry/setHeight 2. mm
/gate/tapa_sup_contenedor/placement/setRotationAxis 1 0 0
/gate/tapa_sup_contenedor/placement/setRotationAngle 90 deg
/gate/tapa_sup_contenedor/placement/setTranslation 0. 65.75 0. mm 
/gate/tapa_sup_contenedor/vis/setColor cyan
/gate/tapa_sup_contenedor/vis/forceWireframe


#====================
# TAPA CONTENEDORMUESTRA (Parte inferior)
#====================
/gate/world/daughters/name tapa_inf_contenedor
/gate/world/daughters/insert cylinder
/gate/tapa_inf_contenedor/setMaterial PVC
/gate/tapa_inf_contenedor/geometry/setRmax 50.97 mm
/gate/tapa_inf_contenedor/geometry/setRmin 0. mm
/gate/tapa_inf_contenedor/geometry/setHeight 2. mm
/gate/tapa_inf_contenedor/placement/setRotationAxis 1 0 0
/gate/tapa_inf_contenedor/placement/setRotationAngle 90 deg
/gate/tapa_inf_contenedor/placement/setTranslation 0. -65.75 0. mm #ajusta si el contenedor tiene 129.5 mm de alto
/gate/tapa_inf_contenedor/vis/setColor cyan
/gate/tapa_inf_contenedor/vis/forceWireframe


#====================
# SOPORTE PRINCIPAL CON AGUJEROS (versión optimizada)
#====================
# Soporte principal (usando subtractive geometry para los agujeros)
#/gate/world/daughters/name soportetubos
#/gate/world/daughters/insert cylinder
#/gate/soportetubos/setMaterial Polypropilene
#/gate/soportetubos/geometry/setRmax 50.465 mm
#/gate/soportetubos/geometry/setRmin 0. mm
#/gate/soportetubos/geometry/setHeight 25. mm
#/gate/soportetubos/placement/setRotationAxis 1 0 0
#/gate/soportetubos/placement/setRotationAngle 90 deg
#/gate/soportetubos/placement/setTranslation 0. 0. 0. mm #  nica posici n definida
#/gate/soportetubos/vis/setColor red
#/gate/soportetubos/vis/forceWireframe

# 2. Agujero central (coordenadas relativas AL SOPORTE ROTADO)
#/gate/soportetubos/daughters/name agujero_central
#/gate/soportetubos/daughters/insert cylinder
#/gate/agujero_central/setMaterial Air
#/gate/agujero_central/geometry/setRmax 9.5 mm
#/gate/agujero_central/geometry/setRmin 0 mm
#/gate/agujero_central/geometry/setHeight 25.1 mm
#/gate/agujero_central/placement/setTranslation 0. 0. 0. mm  # Z=12.5 para centrar verticalmente
#/gate/agujero_central/vis/setColor white
#/gate/agujero_central/vis/forceWireframe

# 3. Anillo interno (6 agujeros)
#/gate/soportetubos/daughters/name agujero_interno
#/gate/soportetubos/daughters/insert cylinder
#/gate/agujero_interno/setMaterial Air
#/gate/agujero_interno/geometry/setRmax 9.5 mm
#/gate/agujero_interno/geometry/setRmin 0 mm
#/gate/agujero_interno/geometry/setHeight 25.1 mm
#/gate/agujero_interno/placement/setTranslation 0. 18.5 0. mm  # Y=18.5
#/gate/agujero_interno/vis/setColor white
#/gate/agujero_interno/vis/forceWireframe

#/gate/agujero_interno/repeaters/insert ring
#/gate/agujero_interno/ring/setRepeatNumber 6
#/gate/agujero_interno/ring/setFirstAngle 0 deg
#/gate/agujero_interno/ring/setAngularSpan 360 deg
#/gate/agujero_interno/ring/setPoint1 0. 0. 1. mm  # Eje de rotaci n Z
#/gate/agujero_interno/ring/setPoint2 0. 0. 0. mm
#/gate/agujero_interno/ring/disableAutoRotation


# 4. Anillo externo (12 agujeros)
#/gate/soportetubos/daughters/name agujero_externo
#/gate/soportetubos/daughters/insert cylinder
#/gate/agujero_externo/setMaterial Air
#/gate/agujero_externo/geometry/setRmax 9.5 mm
#/gate/agujero_externo/geometry/setRmin 0 mm
#/gate/agujero_externo/geometry/setHeight 25.1 mm
#/gate/agujero_externo/placement/setTranslation 0. 39. 0. mm  # Y=39
#/gate/agujero_externo/vis/setColor white
#/gate/agujero_externo/vis/forceWireframe

#/gate/agujero_externo/repeaters/insert ring
#/gate/agujero_externo/ring/setRepeatNumber 12
#/gate/agujero_externo/ring/setFirstAngle 15 deg
#/gate/agujero_externo/ring/setAngularSpan 360 deg
#/gate/agujero_externo/ring/setPoint1 0. 0. 1. mm  # Eje de rotaci n Z
#/gate/agujero_externo/ring/setPoint2 0. 0. 0. mm
#/gate/agujero_externo/ring/disableAutoRotation


#===============================
# SOPORTES DE MADERA (alternativa simple)
#===============================
# Soporte cil ndrico 1
/gate/world/daughters/name soportemadera1
/gate/world/daughters/insert cylinder
/gate/soportemadera1/setMaterial Wood
/gate/soportemadera1/geometry/setRmax 59.97 mm
/gate/soportemadera1/geometry/setRmin 0. mm
/gate/soportemadera1/geometry/setHeight 9. mm
/gate/soportemadera1/placement/setRotationAxis 1 0 0
/gate/soportemadera1/placement/setRotationAngle 90 deg
/gate/soportemadera1/placement/setTranslation 0. -72.25 0. mm
/gate/soportemadera1/vis/setColor yellow
/gate/soportemadera1/vis/forceWireframe

# Soporte cil ndrico 3 (usando repetici n lineal)
/gate/soportemadera1/repeaters/insert linear
/gate/soportemadera1/linear/setRepeatNumber 2
/gate/soportemadera1/linear/setRepeatVector 0. -20.5 0.  mm

# Soporte central en forma de caja (se mantiene igual)
/gate/world/daughters/name soportemadera2
/gate/world/daughters/insert box
/gate/soportemadera2/setMaterial Wood
/gate/soportemadera2/geometry/setXLength 50. mm
/gate/soportemadera2/geometry/setYLength 50. mm
/gate/soportemadera2/geometry/setZLength 9.5 mm
/gate/soportemadera2/placement/setRotationAxis 1 0 0
/gate/soportemadera2/placement/setRotationAngle 90 deg
/gate/soportemadera2/placement/setTranslation 0. -82.5 0. mm
/gate/soportemadera2/vis/setColor yellow
/gate/soportemadera2/vis/forceWireframe


#===============================
# RACK PARA FUENTES Co60 (OPTIMIZADO)
#===============================
# TAPA INFERIOR DEL RACK
/gate/world/daughters/name tapa_inferior
/gate/world/daughters/insert cylinder
/gate/tapa_inferior/setMaterial StainlessSteel
/gate/tapa_inferior/geometry/setRmax 85.5 mm
/gate/tapa_inferior/geometry/setRmin 75.5 mm
/gate/tapa_inferior/geometry/setHeight 1. mm
/gate/tapa_inferior/placement/setRotationAxis 1 0 0
/gate/tapa_inferior/placement/setRotationAngle 90 deg
/gate/tapa_inferior/placement/setTranslation 0 -100.5 0  mm
/gate/tapa_inferior/vis/setColor gray
/gate/tapa_inferior/vis/forceWireframe

# TAPA SUPERIOR DEL RACK
/gate/world/daughters/name tapa_superior
/gate/world/daughters/insert cylinder
/gate/tapa_superior/setMaterial StainlessSteel
/gate/tapa_superior/geometry/setRmax 85.5 mm
/gate/tapa_superior/geometry/setRmin 75.5 mm
/gate/tapa_superior/geometry/setHeight 1. mm
/gate/tapa_superior/placement/setRotationAxis 1 0 0
/gate/tapa_superior/placement/setRotationAngle 90 deg
/gate/tapa_superior/placement/setTranslation 0 100.5 0  mm
/gate/tapa_superior/vis/setColor gray
/gate/tapa_superior/vis/forceWireframe

# 4. Lápices como volúmenes independientes (solo si son necesarios para simulación)
/gate/world/daughters/name lapiz_co60
/gate/world/daughters/insert cylinder
/gate/lapiz_co60/setMaterial StainlessSteel
/gate/lapiz_co60/geometry/setRmax 5.0 mm
/gate/lapiz_co60/geometry/setRmin 4.99 mm
/gate/lapiz_co60/geometry/setHeight 200. mm
/gate/lapiz_co60/placement/setRotationAxis 1 0 0
/gate/lapiz_co60/placement/setRotationAngle 90 deg
/gate/lapiz_co60/placement/setTranslation 80.5 0. 0.  mm
/gate/lapiz_co60/vis/setColor gray
/gate/lapiz_co60/vis/forceSolid

# Repetición de lápices
/gate/lapiz_co60/repeaters/insert ring
/gate/lapiz_co60/ring/setRepeatNumber 16
/gate/lapiz_co60/ring/setFirstAngle 0 deg
/gate/lapiz_co60/ring/setAngularSpan 360 deg
/gate/lapiz_co60/ring/setPoint1 0. 0. 0. mm
/gate/lapiz_co60/ring/setPoint2 0. 1. 0. mm
/gate/lapiz_co60/ring/disableAutoRotation


#====================
#TUBOS EN ANILLO EXTERNO (12 tubos, aguafricke1 a aguafricke12)
#====================
#=======================
#Tubo externo 1 (?=15)
#=======================
/gate/world/daughters/name tapa_externo_1 
/gate/world/daughters/insert cylinder 
/gate/tapa_externo_1/setMaterial Polypropilene 
/gate/tapa_externo_1/geometry/setRmax 9.5 mm 
/gate/tapa_externo_1/geometry/setRmin 0. mm 
/gate/tapa_externo_1/geometry/setHeight 15.5 mm 
/gate/tapa_externo_1/placement/setTranslation 10.077 42.75 37.586 mm  # X=39sin(15) Y=42.75, Z=39cos(15) 
/gate/tapa_externo_1/placement/setRotationAxis 1 0 0 
/gate/tapa_externo_1/placement/setRotationAngle 90 deg 
/gate/tapa_externo_1/vis/setColor white 
/gate/tapa_externo_1/vis/forceWireframe

/gate/world/daughters/name tubo_externo_1 
/gate/world/daughters/insert cylinder 
/gate/tubo_externo_1/setMaterial Glass 
/gate/tubo_externo_1/geometry/setRmax 8.5 mm 
/gate/tubo_externo_1/geometry/setRmin 6.52 mm 
/gate/tubo_externo_1/geometry/setHeight 87. mm 
/gate/tubo_externo_1/placement/setTranslation 10.077 -9. 37.586 mm  # X=39sin(15 ) Y=-9, Z=39cos(15 ) 
/gate/tubo_externo_1/placement/setRotationAxis 1 0 0 
/gate/tubo_externo_1/placement/setRotationAngle 90 deg 
/gate/tubo_externo_1/vis/setColor gray 
/gate/tubo_externo_1/vis/forceWireframe

/gate/tubo_externo_1/daughters/name aguafricke1 
/gate/tubo_externo_1/daughters/insert cylinder 
/gate/aguafricke1/setMaterial FrickeSolution 
/gate/aguafricke1/geometry/setRmax 6.52 mm 
/gate/aguafricke1/geometry/setRmin 0. mm 
/gate/aguafricke1/geometry/setHeight 75. mm 
/gate/aguafricke1/placement/setTranslation 0. 0. 6. mm 
/gate/aguafricke1/vis/setColor blue 
/gate/aguafricke1/vis/forceWireframe

#========================
#Tubo externo 2 (?=45)
#========================
/gate/world/daughters/name tapa_externo_2 
/gate/world/daughters/insert cylinder 
/gate/tapa_externo_2/setMaterial Polypropilene 
/gate/tapa_externo_2/geometry/setRmax 9.5 mm 
/gate/tapa_externo_2/geometry/setRmin 0. mm 
/gate/tapa_externo_2/geometry/setHeight 15.5 mm 
/gate/tapa_externo_2/placement/setTranslation 27.577 42.75 27.577 mm # X=39sin(45), Y=42.75, Z=39cos(45) 
/gate/tapa_externo_2/placement/setRotationAxis 1 0 0 
/gate/tapa_externo_2/placement/setRotationAngle 90 deg 
/gate/tapa_externo_2/vis/setColor white 
/gate/tapa_externo_2/vis/forceWireframe

/gate/world/daughters/name tubo_externo_2 
/gate/world/daughters/insert cylinder 
/gate/tubo_externo_2/setMaterial Glass 
/gate/tubo_externo_2/geometry/setRmax 8.5 mm 
/gate/tubo_externo_2/geometry/setRmin 6.52 mm 
/gate/tubo_externo_2/geometry/setHeight 87. mm 
/gate/tubo_externo_2/placement/setTranslation 27.577 -9. 27.577 mm # X=39sin(45), Y=-9, Z=39cos(45)  
/gate/tubo_externo_2/placement/setRotationAxis 1 0 0 
/gate/tubo_externo_2/placement/setRotationAngle 90 deg 
/gate/tubo_externo_2/vis/setColor gray 
/gate/tubo_externo_2/vis/forceWireframe

/gate/tubo_externo_2/daughters/name aguafricke2
/gate/tubo_externo_2/daughters/insert cylinder 
/gate/aguafricke2/setMaterial FrickeSolution 
/gate/aguafricke2/geometry/setRmax 6.52 mm 
/gate/aguafricke2/geometry/setRmin 0. mm 
/gate/aguafricke2/geometry/setHeight 75. mm 
/gate/aguafricke2/placement/setTranslation 0. 0. 6. mm 
/gate/aguafricke2/vis/setColor blue 
/gate/aguafricke2/vis/forceWireframe

#=======================
#Tubo externo 3 (?=75)
#=======================
/gate/world/daughters/name tapa_externo_3 
/gate/world/daughters/insert cylinder 
/gate/tapa_externo_3/setMaterial Polypropilene 
/gate/tapa_externo_3/geometry/setRmax 9.5 mm 
/gate/tapa_externo_3/geometry/setRmin 0. mm 
/gate/tapa_externo_3/geometry/setHeight 15.5 mm 
/gate/tapa_externo_3/placement/setTranslation 37.586 42.75 10.077 mm # X=39sin(75), Y=42.75, Z=39cos(75) 
/gate/tapa_externo_3/placement/setRotationAxis 1 0 0 
/gate/tapa_externo_3/placement/setRotationAngle 90 deg 
/gate/tapa_externo_3/vis/setColor white 
/gate/tapa_externo_3/vis/forceWireframe

/gate/world/daughters/name tubo_externo_3 
/gate/world/daughters/insert cylinder 
/gate/tubo_externo_3/setMaterial Glass 
/gate/tubo_externo_3/geometry/setRmax 8.5 mm 
/gate/tubo_externo_3/geometry/setRmin 6.52 mm 
/gate/tubo_externo_3/geometry/setHeight 87. mm 
/gate/tubo_externo_3/placement/setTranslation 37.586 -9. 10.077 mm # X=39sin(75), Y=-9, Z=39cos(75) 
/gate/tubo_externo_3/placement/setRotationAxis 1 0 0 
/gate/tubo_externo_3/placement/setRotationAngle 90 deg 
/gate/tubo_externo_3/vis/setColor gray 
/gate/tubo_externo_3/vis/forceWireframe

/gate/tubo_externo_3/daughters/name aguafricke3
/gate/tubo_externo_3/daughters/insert cylinder 
/gate/aguafricke3/setMaterial FrickeSolution 
/gate/aguafricke3/geometry/setRmax 6.52 mm 
/gate/aguafricke3/geometry/setRmin 0. mm 
/gate/aguafricke3/geometry/setHeight 75. mm 
/gate/aguafricke3/placement/setTranslation 0. 0. 6. mm 
/gate/aguafricke3/vis/setColor blue 
/gate/aguafricke3/vis/forceWireframe

#========================
#Tubo externo 4 (?=105)
#========================
/gate/world/daughters/name tapa_externo_4 
/gate/world/daughters/insert cylinder 
/gate/tapa_externo_4/setMaterial Polypropilene 
/gate/tapa_externo_4/geometry/setRmax 9.5 mm 
/gate/tapa_externo_4/geometry/setRmin 0. mm 
/gate/tapa_externo_4/geometry/setHeight 15.5 mm 
/gate/tapa_externo_4/placement/setTranslation 37.586 42.75 -10.077  mm # X=39sin(105), Y=42.75, Z=39cos(105) 
/gate/tapa_externo_4/placement/setRotationAxis 1 0 0 
/gate/tapa_externo_4/placement/setRotationAngle 90 deg 
/gate/tapa_externo_4/vis/setColor white 
/gate/tapa_externo_4/vis/forceWireframe

/gate/world/daughters/name tubo_externo_4 
/gate/world/daughters/insert cylinder 
/gate/tubo_externo_4/setMaterial Glass 
/gate/tubo_externo_4/geometry/setRmax 8.5 mm 
/gate/tubo_externo_4/geometry/setRmin 6.52 mm 
/gate/tubo_externo_4/geometry/setHeight 87. mm 
/gate/tubo_externo_4/placement/setTranslation 37.586 -9 -10.077  mm # X=39sin(105), Y=-9, Z=39cos(105) 
/gate/tubo_externo_4/placement/setRotationAxis 1 0 0 
/gate/tubo_externo_4/placement/setRotationAngle 90 deg 
/gate/tubo_externo_4/vis/setColor gray 
/gate/tubo_externo_4/vis/forceWireframe

/gate/tubo_externo_4/daughters/name aguafricke4 
/gate/tubo_externo_4/daughters/insert cylinder
/gate/aguafricke4/setMaterial FrickeSolution 
/gate/aguafricke4/geometry/setRmax 6.52 mm 
/gate/aguafricke4/geometry/setRmin 0. mm 
/gate/aguafricke4/geometry/setHeight 75. mm 
/gate/aguafricke4/placement/setTranslation 0. 0. 6. mm 
/gate/aguafricke4/vis/setColor blue 
/gate/aguafricke4/vis/forceWireframe

#=======================
#Tubo externo 5 (?=135)
#=======================
/gate/world/daughters/name tapa_externo_5 
/gate/world/daughters/insert cylinder 
/gate/tapa_externo_5/setMaterial Polypropilene 
/gate/tapa_externo_5/geometry/setRmax 9.5 mm 
/gate/tapa_externo_5/geometry/setRmin 0. mm 
/gate/tapa_externo_5/geometry/setHeight 15.5 mm 
/gate/tapa_externo_5/placement/setTranslation 27.577 42.75 -27.577 mm # X=39sin(135), Y=42.75, Z=39cos(135) 
/gate/tapa_externo_5/placement/setRotationAxis 1 0 0 
/gate/tapa_externo_5/placement/setRotationAngle 90 deg 
/gate/tapa_externo_5/vis/setColor white 
/gate/tapa_externo_5/vis/forceWireframe

/gate/world/daughters/name tubo_externo_5 
/gate/world/daughters/insert cylinder 
/gate/tubo_externo_5/setMaterial Glass 
/gate/tubo_externo_5/geometry/setRmax 8.5 mm 
/gate/tubo_externo_5/geometry/setRmin 6.52 mm 
/gate/tubo_externo_5/geometry/setHeight 87. mm 
/gate/tubo_externo_5/placement/setTranslation 27.577 -9. -27.577  mm # X=39sin(135 ), Y=-9, Z=39cos(135 )
/gate/tubo_externo_5/placement/setRotationAxis 1 0 0 
/gate/tubo_externo_5/placement/setRotationAngle 90 deg 
/gate/tubo_externo_5/vis/setColor gray 
/gate/tubo_externo_5/vis/forceWireframe

/gate/tubo_externo_5/daughters/name aguafricke5 
/gate/tubo_externo_5/daughters/insert cylinder
/gate/aguafricke5/setMaterial FrickeSolution 
/gate/aguafricke5/geometry/setRmax 6.52 mm 
/gate/aguafricke5/geometry/setRmin 0. mm 
/gate/aguafricke5/geometry/setHeight 75. mm 
/gate/aguafricke5/placement/setTranslation 0. 0. 6. mm 
/gate/aguafricke5/vis/setColor blue 
/gate/aguafricke5/vis/forceWireframe

#=======================
#Tubo externo 6 (?=165)
#=======================
/gate/world/daughters/name tapa_externo_6 
/gate/world/daughters/insert cylinder 
/gate/tapa_externo_6/setMaterial Polypropilene 
/gate/tapa_externo_6/geometry/setRmax 9.5 mm 
/gate/tapa_externo_6/geometry/setRmin 0. mm 
/gate/tapa_externo_6/geometry/setHeight 15.5 mm 
/gate/tapa_externo_6/placement/setTranslation 10.077 42.75 -37.586 mm # X=39sin(165), Y=42.75, Z=39cos(165) 
/gate/tapa_externo_6/placement/setRotationAxis 1 0 0 
/gate/tapa_externo_6/placement/setRotationAngle 90 deg 
/gate/tapa_externo_6/vis/setColor white 
/gate/tapa_externo_6/vis/forceWireframe

/gate/world/daughters/name tubo_externo_6 
/gate/world/daughters/insert cylinder 
/gate/tubo_externo_6/setMaterial Glass 
/gate/tubo_externo_6/geometry/setRmax 8.5 mm 
/gate/tubo_externo_6/geometry/setRmin 6.52 mm 
/gate/tubo_externo_6/geometry/setHeight 87. mm 
/gate/tubo_externo_6/placement/setTranslation 10.077 -9. -37.586  mm # X=39sin(165), Y=-9, Z=39cos(165) 
/gate/tubo_externo_6/placement/setRotationAxis 1 0 0 
/gate/tubo_externo_6/placement/setRotationAngle 90 deg 
/gate/tubo_externo_6/vis/setColor gray 
/gate/tubo_externo_6/vis/forceWireframe

/gate/tubo_externo_6/daughters/name aguafricke6 
/gate/tubo_externo_6/daughters/insert cylinder
/gate/aguafricke6/setMaterial FrickeSolution 
/gate/aguafricke6/geometry/setRmax 6.52 mm 
/gate/aguafricke6/geometry/setRmin 0. mm 
/gate/aguafricke6/geometry/setHeight 75. mm 
/gate/aguafricke6/placement/setTranslation 0. 0. 6. mm 
/gate/aguafricke6/vis/setColor blue 
/gate/aguafricke6/vis/forceWireframe

#========================
#Tubo externo 7 (?=195)
#========================
/gate/world/daughters/name tapa_externo_7 
/gate/world/daughters/insert cylinder 
/gate/tapa_externo_7/setMaterial Polypropilene 
/gate/tapa_externo_7/geometry/setRmax 9.5 mm 
/gate/tapa_externo_7/geometry/setRmin 0. mm 
/gate/tapa_externo_7/geometry/setHeight 15.5 mm 
/gate/tapa_externo_7/placement/setTranslation -10.077 42.75 -37.586 mm # X=39sin(195), Y=42.75, Z=39cos(195) 
/gate/tapa_externo_7/placement/setRotationAxis 1 0 0 
/gate/tapa_externo_7/placement/setRotationAngle 90 deg 
/gate/tapa_externo_7/vis/setColor white 
/gate/tapa_externo_7/vis/forceWireframe

/gate/world/daughters/name tubo_externo_7 
/gate/world/daughters/insert cylinder 
/gate/tubo_externo_7/setMaterial Glass 
/gate/tubo_externo_7/geometry/setRmax 8.5 mm 
/gate/tubo_externo_7/geometry/setRmin 6.52 mm 
/gate/tubo_externo_7/geometry/setHeight 87. mm 
/gate/tubo_externo_7/placement/setTranslation -10.077 -9. -37.586 mm # X=39sin(195), Y=-9, Z=39cos(195) 
/gate/tubo_externo_7/placement/setRotationAxis 1 0 0 
/gate/tubo_externo_7/placement/setRotationAngle 90 deg 
/gate/tubo_externo_7/vis/setColor gray 
/gate/tubo_externo_7/vis/forceWireframe

/gate/tubo_externo_7/daughters/name aguafricke7 
/gate/tubo_externo_7/daughters/insert cylinder
/gate/aguafricke7/setMaterial FrickeSolution 
/gate/aguafricke7/geometry/setRmax 6.52 mm 
/gate/aguafricke7/geometry/setRmin 0. mm 
/gate/aguafricke7/geometry/setHeight 75. mm 
/gate/aguafricke7/placement/setTranslation 0. 0. 6. mm 
/gate/aguafricke7/vis/setColor blue 
/gate/aguafricke7/vis/forceWireframe

#========================
#Tubo externo 8 (?=225)
#========================
/gate/world/daughters/name tapa_externo_8 
/gate/world/daughters/insert cylinder 
/gate/tapa_externo_8/setMaterial Polypropilene 
/gate/tapa_externo_8/geometry/setRmax 9.5 mm 
/gate/tapa_externo_8/geometry/setRmin 0. mm 
/gate/tapa_externo_8/geometry/setHeight 15.5 mm 
/gate/tapa_externo_8/placement/setTranslation -27.577 42.75 -27.577 mm # X=39sin(225), Y=42.75, Z=39cos(225) 
/gate/tapa_externo_8/placement/setRotationAxis 1 0 0 
/gate/tapa_externo_8/placement/setRotationAngle 90 deg 
/gate/tapa_externo_8/vis/setColor white 
/gate/tapa_externo_8/vis/forceWireframe

/gate/world/daughters/name tubo_externo_8 
/gate/world/daughters/insert cylinder 
/gate/tubo_externo_8/setMaterial Glass 
/gate/tubo_externo_8/geometry/setRmax 8.5 mm 
/gate/tubo_externo_8/geometry/setRmin 6.52 mm 
/gate/tubo_externo_8/geometry/setHeight 87. mm 
/gate/tubo_externo_8/placement/setTranslation -27.577 -9. -27.577 mm # X=39sin(225), Y=-9, Z=39cos(225) 
/gate/tubo_externo_8/placement/setRotationAxis 1 0 0 
/gate/tubo_externo_8/placement/setRotationAngle 90 deg 
/gate/tubo_externo_8/vis/setColor gray 
/gate/tubo_externo_8/vis/forceWireframe

/gate/tubo_externo_8/daughters/name aguafricke8 
/gate/tubo_externo_8/daughters/insert cylinder
/gate/aguafricke8/setMaterial FrickeSolution 
/gate/aguafricke8/geometry/setRmax 6.52 mm 
/gate/aguafricke8/geometry/setRmin 0. mm 
/gate/aguafricke8/geometry/setHeight 75. mm 
/gate/aguafricke8/placement/setTranslation 0. 0. 6. mm 
/gate/aguafricke8/vis/setColor blue 
/gate/aguafricke8/vis/forceWireframe

#========================
#Tubo externo 9 (?=255)
#========================
/gate/world/daughters/name tapa_externo_9 
/gate/world/daughters/insert cylinder 
/gate/tapa_externo_9/setMaterial Polypropilene 
/gate/tapa_externo_9/geometry/setRmax 9.5 mm 
/gate/tapa_externo_9/geometry/setRmin 0. mm 
/gate/tapa_externo_9/geometry/setHeight 15.5 mm 
/gate/tapa_externo_9/placement/setTranslation -37.586 42.75 -10.077 mm # X=39sin(255), Y=42.75, Z=39cos(255) 
/gate/tapa_externo_9/placement/setRotationAxis 1 0 0 
/gate/tapa_externo_9/placement/setRotationAngle 90 deg 
/gate/tapa_externo_9/vis/setColor white 
/gate/tapa_externo_9/vis/forceWireframe

/gate/world/daughters/name tubo_externo_9 
/gate/world/daughters/insert cylinder 
/gate/tubo_externo_9/setMaterial Glass 
/gate/tubo_externo_9/geometry/setRmax 8.5 mm 
/gate/tubo_externo_9/geometry/setRmin 6.52 mm 
/gate/tubo_externo_9/geometry/setHeight 87. mm 
/gate/tubo_externo_9/placement/setTranslation -37.586 -9. -10.077 mm # X=39sin(255), Y=-9, Z=39cos(255) 
/gate/tubo_externo_9/placement/setRotationAxis 1 0 0 
/gate/tubo_externo_9/placement/setRotationAngle 90 deg 
/gate/tubo_externo_9/vis/setColor gray 
/gate/tubo_externo_9/vis/forceWireframe

/gate/tubo_externo_9/daughters/name aguafricke9 
/gate/tubo_externo_9/daughters/insert cylinder
/gate/aguafricke9/setMaterial FrickeSolution 
/gate/aguafricke9/geometry/setRmax 6.52 mm 
/gate/aguafricke9/geometry/setRmin 0. mm 
/gate/aguafricke9/geometry/setHeight 75. mm 
/gate/aguafricke9/placement/setTranslation 0. 0. 6. mm 
/gate/aguafricke9/vis/setColor blue 
/gate/aguafricke9/vis/forceWireframe

#=========================
#Tubo externo 10 (?=285)
#=========================
/gate/world/daughters/name tapa_externo_10 
/gate/world/daughters/insert cylinder 
/gate/tapa_externo_10/setMaterial Polypropilene 
/gate/tapa_externo_10/geometry/setRmax 9.5 mm 
/gate/tapa_externo_10/geometry/setRmin 0. mm 
/gate/tapa_externo_10/geometry/setHeight 15.5 mm 
/gate/tapa_externo_10/placement/setTranslation -37.586 42.75 10.077 mm # X=39sin(285), Y=42.75, Z=39cos(285) 
/gate/tapa_externo_10/placement/setRotationAxis 1 0 0 
/gate/tapa_externo_10/placement/setRotationAngle 90 deg 
/gate/tapa_externo_10/vis/setColor white 
/gate/tapa_externo_10/vis/forceWireframe

/gate/world/daughters/name tubo_externo_10 
/gate/world/daughters/insert cylinder 
/gate/tubo_externo_10/setMaterial Glass 
/gate/tubo_externo_10/geometry/setRmax 8.5 mm 
/gate/tubo_externo_10/geometry/setRmin 6.52 mm 
/gate/tubo_externo_10/geometry/setHeight 87. mm 
/gate/tubo_externo_10/placement/setTranslation -37.586 -9. 10.077 mm # X=39sin(285), Y=-9, Z=39cos(285) 
/gate/tubo_externo_10/placement/setRotationAxis 1 0 0 
/gate/tubo_externo_10/placement/setRotationAngle 90 deg 
/gate/tubo_externo_10/vis/setColor gray 
/gate/tubo_externo_10/vis/forceWireframe

/gate/tubo_externo_10/daughters/name aguafricke10
/gate/tubo_externo_10/daughters/insert cylinder
/gate/aguafricke10/setMaterial FrickeSolution 
/gate/aguafricke10/geometry/setRmax 6.52 mm 
/gate/aguafricke10/geometry/setRmin 0. mm 
/gate/aguafricke10/geometry/setHeight 75. mm 
/gate/aguafricke10/placement/setTranslation 0. 0. 6. mm 
/gate/aguafricke10/vis/setColor blue 
/gate/aguafricke10/vis/forceWireframe

#=========================
#Tubo externo 11 (?=315)
#=========================
/gate/world/daughters/name tapa_externo_11 
/gate/world/daughters/insert cylinder 
/gate/tapa_externo_11/setMaterial Polypropilene 
/gate/tapa_externo_11/geometry/setRmax 9.5 mm 
/gate/tapa_externo_11/geometry/setRmin 0. mm 
/gate/tapa_externo_11/geometry/setHeight 15.5 mm 
/gate/tapa_externo_11/placement/setTranslation -27.577 42.75 27.577 mm # X=39sin(315), Y=42.75, Z=39cos(315) 
/gate/tapa_externo_11/placement/setRotationAxis 1 0 0 
/gate/tapa_externo_11/placement/setRotationAngle 90 deg 
/gate/tapa_externo_11/vis/setColor white 
/gate/tapa_externo_11/vis/forceWireframe

/gate/world/daughters/name tubo_externo_11 
/gate/world/daughters/insert cylinder 
/gate/tubo_externo_11/setMaterial Glass 
/gate/tubo_externo_11/geometry/setRmax 8.5 mm 
/gate/tubo_externo_11/geometry/setRmin 6.52 mm 
/gate/tubo_externo_11/geometry/setHeight 87. mm 
/gate/tubo_externo_11/placement/setTranslation -27.577 -9. 27.577 mm # X=39sin(315), Y=-9, Z=39cos(315) 
/gate/tubo_externo_11/placement/setRotationAxis 1 0 0 
/gate/tubo_externo_11/placement/setRotationAngle 90 deg 
/gate/tubo_externo_11/vis/setColor gray 
/gate/tubo_externo_11/vis/forceWireframe

/gate/tubo_externo_11/daughters/name aguafricke11 
/gate/tubo_externo_11/daughters/insert cylinder
/gate/aguafricke11/setMaterial FrickeSolution 
/gate/aguafricke11/geometry/setRmax 6.52 mm 
/gate/aguafricke11/geometry/setRmin 0. mm 
/gate/aguafricke11/geometry/setHeight 75. mm 
/gate/aguafricke11/placement/setTranslation 0. 0. 6. mm 
/gate/aguafricke11/vis/setColor blue 
/gate/aguafricke11/vis/forceWireframe

#=========================
#Tubo externo 12 (?=345)
#=========================
/gate/world/daughters/name tapa_externo_12 
/gate/world/daughters/insert cylinder 
/gate/tapa_externo_12/setMaterial Polypropilene 
/gate/tapa_externo_12/geometry/setRmax 9.5 mm 
/gate/tapa_externo_12/geometry/setRmin 0. mm 
/gate/tapa_externo_12/geometry/setHeight 15.5 mm 
/gate/tapa_externo_12/placement/setTranslation -10.077 42.75 37.586 mm # X=39sin(345), Y=42.75, Z=39cos(345) 
/gate/tapa_externo_12/placement/setRotationAxis 1 0 0 
/gate/tapa_externo_12/placement/setRotationAngle 90 deg 
/gate/tapa_externo_12/vis/setColor white 
/gate/tapa_externo_12/vis/forceWireframe

/gate/world/daughters/name tubo_externo_12 
/gate/world/daughters/insert cylinder 
/gate/tubo_externo_12/setMaterial Glass 
/gate/tubo_externo_12/geometry/setRmax 8.5 mm 
/gate/tubo_externo_12/geometry/setRmin 6.52 mm 
/gate/tubo_externo_12/geometry/setHeight 87. mm 
/gate/tubo_externo_12/placement/setTranslation -10.077 -9. 37.586 mm # X=39sin(345), Y=-9, Z=39cos(345) 
/gate/tubo_externo_12/placement/setRotationAxis 1 0 0 
/gate/tubo_externo_12/placement/setRotationAngle 90 deg 
/gate/tubo_externo_12/vis/setColor gray 
/gate/tubo_externo_12/vis/forceWireframe

/gate/tubo_externo_12/daughters/name aguafricke12 
/gate/tubo_externo_12/daughters/insert cylinder
/gate/aguafricke12/setMaterial FrickeSolution 
/gate/aguafricke12/geometry/setRmax 6.52 mm 
/gate/aguafricke12/geometry/setRmin 0. mm 
/gate/aguafricke12/geometry/setHeight 75. mm 
/gate/aguafricke12/placement/setTranslation 0. 0. 6. mm 
/gate/aguafricke12/vis/setColor blue 
/gate/aguafricke12/vis/forceWireframe


#====================
#TUBOS EN ANILLO INTERNO (6 tubos, aguafricke13 a aguafricke18)
#====================
#======================
#Tubo interno 1 (?=0)
#======================
/gate/world/daughters/name tapa_interno_1 
/gate/world/daughters/insert cylinder 
/gate/tapa_interno_1/setMaterial Polypropilene 
/gate/tapa_interno_1/geometry/setRmax 9.5 mm 
/gate/tapa_interno_1/geometry/setRmin 0. mm 
/gate/tapa_interno_1/geometry/setHeight 15.5 mm 
/gate/tapa_interno_1/placement/setTranslation 0. 42.75 20.5 mm # X=20.5sin(0), Y=42.75, Z=20.5cos(0) 
/gate/tapa_interno_1/placement/setRotationAxis 1 0 0 
/gate/tapa_interno_1/placement/setRotationAngle 90 deg 
/gate/tapa_interno_1/vis/setColor white 
/gate/tapa_interno_1/vis/forceWireframe

/gate/world/daughters/name tubo_interno_1 
/gate/world/daughters/insert cylinder 
/gate/tubo_interno_1/setMaterial Glass 
/gate/tubo_interno_1/geometry/setRmax 8.5 mm 
/gate/tubo_interno_1/geometry/setRmin 6.52 mm 
/gate/tubo_interno_1/geometry/setHeight 87. mm 
/gate/tubo_interno_1/placement/setTranslation 0. -9. 20.5 mm # X=20.5sin(0), Y=-9, Z=20.5cos(0) 
/gate/tubo_interno_1/placement/setRotationAxis 1 0 0 
/gate/tubo_interno_1/placement/setRotationAngle 90 deg 
/gate/tubo_interno_1/vis/setColor gray 
/gate/tubo_interno_1/vis/forceWireframe

/gate/tubo_interno_1/daughters/name aguafricke13 
/gate/tubo_interno_1/daughters/insert cylinder
/gate/aguafricke13/setMaterial FrickeSolution 
/gate/aguafricke13/geometry/setRmax 6.52 mm 
/gate/aguafricke13/geometry/setRmin 0. mm 
/gate/aguafricke13/geometry/setHeight 75. mm 
/gate/aguafricke13/placement/setTranslation 0. 0. 6. mm 
/gate/aguafricke13/vis/setColor blue 
/gate/aguafricke13/vis/forceWireframe

#======================
#Tubo interno 2 (?=60)
#======================
/gate/world/daughters/name tapa_interno_2 
/gate/world/daughters/insert cylinder 
/gate/tapa_interno_2/setMaterial Polypropilene 
/gate/tapa_interno_2/geometry/setRmax 9.5 mm 
/gate/tapa_interno_2/geometry/setRmin 0. mm 
/gate/tapa_interno_2/geometry/setHeight 15.5 mm 
/gate/tapa_interno_2/placement/setTranslation 17.753 42.75 10.25 mm # X=20.5sin(60), Y=42.75, Z=20.5cos(60) 
/gate/tapa_interno_2/placement/setRotationAxis 1 0 0 
/gate/tapa_interno_2/placement/setRotationAngle 90 deg 
/gate/tapa_interno_2/vis/setColor white 
/gate/tapa_interno_2/vis/forceWireframe

/gate/world/daughters/name tubo_interno_2 
/gate/world/daughters/insert cylinder 
/gate/tubo_interno_2/setMaterial Glass 
/gate/tubo_interno_2/geometry/setRmax 8.5 mm 
/gate/tubo_interno_2/geometry/setRmin 6.52 mm 
/gate/tubo_interno_2/geometry/setHeight 87. mm 
/gate/tubo_interno_2/placement/setTranslation 17.753 -9. 10.25 mm # X=20.5sin(60), Y=-9, Z=20.5cos(60) 
/gate/tubo_interno_2/placement/setRotationAxis 1 0 0 
/gate/tubo_interno_2/placement/setRotationAngle 90 deg 
/gate/tubo_interno_2/vis/setColor gray 
/gate/tubo_interno_2/vis/forceWireframe

/gate/tubo_interno_2/daughters/name aguafricke14 
/gate/tubo_interno_2/daughters/insert cylinder
/gate/aguafricke14/setMaterial FrickeSolution 
/gate/aguafricke14/geometry/setRmax 6.52 mm 
/gate/aguafricke14/geometry/setRmin 0. mm 
/gate/aguafricke14/geometry/setHeight 75. mm 
/gate/aguafricke14/placement/setTranslation 0. 0. 6. mm 
/gate/aguafricke14/vis/setColor blue 
/gate/aguafricke14/vis/forceWireframe

#========================
#Tubo interno 3 (?=120)
#========================
/gate/world/daughters/name tapa_interno_3 
/gate/world/daughters/insert cylinder 
/gate/tapa_interno_3/setMaterial Polypropilene 
/gate/tapa_interno_3/geometry/setRmax 9.5 mm 
/gate/tapa_interno_3/geometry/setRmin 0. mm 
/gate/tapa_interno_3/geometry/setHeight 15.5 mm 
/gate/tapa_interno_3/placement/setTranslation 17.753 42.75 -10.25 mm # X=20.5sin(120), Y=42.75, Z=20.5cos(120) 
/gate/tapa_interno_3/placement/setRotationAxis 1 0 0 
/gate/tapa_interno_3/placement/setRotationAngle 90 deg 
/gate/tapa_interno_3/vis/setColor white 
/gate/tapa_interno_3/vis/forceWireframe

/gate/world/daughters/name tubo_interno_3 
/gate/world/daughters/insert cylinder 
/gate/tubo_interno_3/setMaterial Glass 
/gate/tubo_interno_3/geometry/setRmax 8.5 mm 
/gate/tubo_interno_3/geometry/setRmin 6.52 mm 
/gate/tubo_interno_3/geometry/setHeight 87. mm 
/gate/tubo_interno_3/placement/setTranslation 17.753 -9. -10.25 mm # X=20.5sin(120), Y=-9, Z=20.5cos(120) 
/gate/tubo_interno_3/placement/setRotationAxis 1 0 0 
/gate/tubo_interno_3/placement/setRotationAngle 90 deg 
/gate/tubo_interno_3/vis/setColor gray 
/gate/tubo_interno_3/vis/forceWireframe

/gate/tubo_interno_3/daughters/name aguafricke15 
/gate/tubo_interno_3/daughters/insert cylinder
/gate/aguafricke15/setMaterial FrickeSolution 
/gate/aguafricke15/geometry/setRmax 6.52 mm 
/gate/aguafricke15/geometry/setRmin 0. mm 
/gate/aguafricke15/geometry/setHeight 75. mm 
/gate/aguafricke15/placement/setTranslation 0. 0. 6. mm 
/gate/aguafricke15/vis/setColor blue 
/gate/aguafricke15/vis/forceWireframe

#========================
#Tubo interno 4 (?=180)
#========================
/gate/world/daughters/name tapa_interno_4 
/gate/world/daughters/insert cylinder 
/gate/tapa_interno_4/setMaterial Polypropilene 
/gate/tapa_interno_4/geometry/setRmax 9.5 mm 
/gate/tapa_interno_4/geometry/setRmin 0. mm 
/gate/tapa_interno_4/geometry/setHeight 15.5 mm 
/gate/tapa_interno_4/placement/setTranslation 0. 42.75 -20.5 mm # X=20.5sin(180), Y=42.75, Z=20.5cos(180) 
/gate/tapa_interno_4/placement/setRotationAxis 1 0 0 
/gate/tapa_interno_4/placement/setRotationAngle 90 deg 
/gate/tapa_interno_4/vis/setColor white 
/gate/tapa_interno_4/vis/forceWireframe

/gate/world/daughters/name tubo_interno_4 
/gate/world/daughters/insert cylinder 
/gate/tubo_interno_4/setMaterial Glass 
/gate/tubo_interno_4/geometry/setRmax 8.5 mm 
/gate/tubo_interno_4/geometry/setRmin 6.52 mm 
/gate/tubo_interno_4/geometry/setHeight 87. mm 
/gate/tubo_interno_4/placement/setTranslation 0. -9. -20.5 mm # X=20.5sin(180), Y=-9, Z=20.5cos(180) 
/gate/tubo_interno_4/placement/setRotationAxis 1 0 0 
/gate/tubo_interno_4/placement/setRotationAngle 90 deg 
/gate/tubo_interno_4/vis/setColor gray 
/gate/tubo_interno_4/vis/forceWireframe

/gate/tubo_interno_4/daughters/name aguafricke16 
/gate/tubo_interno_4/daughters/insert cylinder
/gate/aguafricke16/setMaterial FrickeSolution 
/gate/aguafricke16/geometry/setRmax 6.52 mm 
/gate/aguafricke16/geometry/setRmin 0. mm 
/gate/aguafricke16/geometry/setHeight 75. mm 
/gate/aguafricke16/placement/setTranslation 0. 0. 6. mm 
/gate/aguafricke16/vis/setColor blue 
/gate/aguafricke16/vis/forceWireframe

#========================
#Tubo interno 5 (?=240)
#========================
/gate/world/daughters/name tapa_interno_5 
/gate/world/daughters/insert cylinder 
/gate/tapa_interno_5/setMaterial Polypropilene 
/gate/tapa_interno_5/geometry/setRmax 9.5 mm 
/gate/tapa_interno_5/geometry/setRmin 0. mm 
/gate/tapa_interno_5/geometry/setHeight 15.5 mm 
/gate/tapa_interno_5/placement/setTranslation -17.753 42.75 -10.25 mm # X=20.5sin(240), Y=42.75, Z=20.5cos(240) 
/gate/tapa_interno_5/placement/setRotationAxis 1 0 0 
/gate/tapa_interno_5/placement/setRotationAngle 90 deg 
/gate/tapa_interno_5/vis/setColor white 
/gate/tapa_interno_5/vis/forceWireframe

/gate/world/daughters/name tubo_interno_5 
/gate/world/daughters/insert cylinder 
/gate/tubo_interno_5/setMaterial Glass 
/gate/tubo_interno_5/geometry/setRmax 8.5 mm 
/gate/tubo_interno_5/geometry/setRmin 6.52 mm 
/gate/tubo_interno_5/geometry/setHeight 87. mm 
/gate/tubo_interno_5/placement/setTranslation -17.753 -9. -10.25 mm # X=20.5sin(240), Y=-9, Z=20.5cos(240) 
/gate/tubo_interno_5/placement/setRotationAxis 1 0 0 
/gate/tubo_interno_5/placement/setRotationAngle 90 deg 
/gate/tubo_interno_5/vis/setColor gray 
/gate/tubo_interno_5/vis/forceWireframe

/gate/tubo_interno_5/daughters/name aguafricke17 
/gate/tubo_interno_5/daughters/insert cylinder
/gate/aguafricke17/setMaterial FrickeSolution 
/gate/aguafricke17/geometry/setRmax 6.52 mm 
/gate/aguafricke17/geometry/setRmin 0. mm 
/gate/aguafricke17/geometry/setHeight 75. mm 
/gate/aguafricke17/placement/setTranslation 0. 0. 6. mm 
/gate/aguafricke17/vis/setColor blue 
/gate/aguafricke17/vis/forceWireframe

#========================
#Tubo interno 6 (?=300)
#========================
/gate/world/daughters/name tapa_interno_6 
/gate/world/daughters/insert cylinder 
/gate/tapa_interno_6/setMaterial Polypropilene 
/gate/tapa_interno_6/geometry/setRmax 9.5 mm 
/gate/tapa_interno_6/geometry/setRmin 0. mm 
/gate/tapa_interno_6/geometry/setHeight 15.5 mm 
/gate/tapa_interno_6/placement/setTranslation -17.753 42.75 10.25 mm # X=18.5sin(300), Y=42.75, Z=20.5cos(300) 
/gate/tapa_interno_6/placement/setRotationAxis 1 0 0 
/gate/tapa_interno_6/placement/setRotationAngle 90 deg 
/gate/tapa_interno_6/vis/setColor white 
/gate/tapa_interno_6/vis/forceWireframe

/gate/world/daughters/name tubo_interno_6 
/gate/world/daughters/insert cylinder 
/gate/tubo_interno_6/setMaterial Glass 
/gate/tubo_interno_6/geometry/setRmax 8.5 mm 
/gate/tubo_interno_6/geometry/setRmin 6.52 mm 
/gate/tubo_interno_6/geometry/setHeight 87. mm 
/gate/tubo_interno_6/placement/setTranslation -17.753 -9. 10.25 mm # X=20.5sin(300), Y=-9, Z=20.5cos(300) 
/gate/tubo_interno_6/placement/setRotationAxis 1 0 0 
/gate/tubo_interno_6/placement/setRotationAngle 90 deg 
/gate/tubo_interno_6/vis/setColor gray 
/gate/tubo_interno_6/vis/forceWireframe

/gate/tubo_interno_6/daughters/name aguafricke18
/gate/tubo_interno_6/daughters/insert cylinder
/gate/aguafricke18/setMaterial FrickeSolution 
/gate/aguafricke18/geometry/setRmax 6.52 mm 
/gate/aguafricke18/geometry/setRmin 0. mm 
/gate/aguafricke18/geometry/setHeight 75. mm 
/gate/aguafricke18/placement/setTranslation 0. 0. 6. mm 
/gate/aguafricke18/vis/setColor blue 
/gate/aguafricke18/vis/forceWireframe


#====================
#TUBO CENTRAL (aguafricke19)
#====================
#Tapa del tubo central
/gate/world/daughters/name tapa 
/gate/world/daughters/insert cylinder 
/gate/tapa/setMaterial Polypropilene 
/gate/tapa/placement/setTranslation 0. 42.75 0. mm 
/gate/tapa/geometry/setRmax 9.5 mm 
/gate/tapa/geometry/setRmin 0. mm 
/gate/tapa/geometry/setHeight 15.5 mm 
/gate/tapa/placement/setRotationAxis 1 0 0 
/gate/tapa/placement/setRotationAngle 90 deg 
/gate/tapa/vis/setColor white 
/gate/tapa/vis/forceWireframe

#Tubo central (ya definido, ajustado como hija del mundo)
/gate/world/daughters/name tubo 
/gate/world/daughters/insert cylinder 
/gate/tubo/setMaterial Glass 
/gate/tubo/placement/setTranslation 0. -9. 0. mm # Centro del soporte 
/gate/tubo/geometry/setRmax 8.5 mm 
/gate/tubo/geometry/setRmin 6.52 mm 
/gate/tubo/geometry/setHeight 87. mm 
/gate/tubo/placement/setRotationAxis 1 0 0 
/gate/tubo/placement/setRotationAngle 90 deg 
/gate/tubo/vis/setColor gray 
/gate/tubo/vis/forceWireframe

#Soluci n Fricke en el tubo central (aguafricke19)(detector) (la altura 75.00 mm es acorde a volumen colocado en la experimentaci n)
/gate/tubo/daughters/name aguafricke19 
/gate/tubo/daughters/insert cylinder
/gate/aguafricke19/setMaterial FrickeSolution 
/gate/aguafricke19/geometry/setRmax 6.52 mm 
/gate/aguafricke19/geometry/setRmin 0. mm 
/gate/aguafricke19/geometry/setHeight 75. mm 
/gate/aguafricke19/placement/setTranslation 0. 0. 6. mm 
/gate/aguafricke19/vis/setColor blue 
/gate/aguafricke19/vis/forceWireframe


/gate/geometry/rebuild


#====================
#PHYSICS PROCESSES
#====================
/gate/physics/addPhysicsList emstandard_opt3
/gate/physics/setEMin 1 keV
/gate/physics/setEMax 3 GeV
/gate/physics/processList Enabled
/gate/physics/processList Initialized


#====================
#Actividad total de fuente 07/03/2023=119.20 Ci, como son 16 lapices la actividad por cada lapiz = 7.45 Ci
#====================
#====================================================
# FUENTES DE Co-60 (16 lápices)
#====================================================
/control/alias ACTIVIDAD 7.45 Ci  # (para prueba actividad total = 119.2 Ci)
/control/alias RADIO_FUENTE 4.8 mm
/control/alias ALTURA_FUENTE 101 mm

# Fuente 1: Ángulo 0
/gate/source/addSource co60_lapiz0 gps
/gate/source/co60_lapiz0/setActivity {ACTIVIDAD}
/gate/source/co60_lapiz0/setForcedUnstableFlag false
/gate/source/co60_lapiz0/gps/particle gamma
/gate/source/co60_lapiz0/gps/centre 80.5 0 0 mm
/gate/source/co60_lapiz0/gps/type Volume
/gate/source/co60_lapiz0/gps/shape Cylinder
/gate/source/co60_lapiz0/gps/radius {RADIO_FUENTE}
/gate/source/co60_lapiz0/gps/halfy {ALTURA_FUENTE}
/gate/source/co60_lapiz0/gps/energytype UserSpectrum
/gate/source/co60_lapiz0/gps/setSpectrumFile /fuente3/mdetectores/DiscreteSpectrumCo60.txt
/gate/source/co60_lapiz0/gps/angtype iso
/gate/source/co60_lapiz0/visualize 10000 green 20

# Fuente 2: Ángulo 22.5
/gate/source/addSource co60_lapiz22.5 gps
/gate/source/co60_lapiz22.5/setActivity {ACTIVIDAD}
/gate/source/co60_lapiz22.5/setForcedUnstableFlag false
/gate/source/co60_lapiz22.5/gps/particle gamma
/gate/source/co60_lapiz22.5/gps/centre 74.662 0 30.828 mm
/gate/source/co60_lapiz22.5/gps/type Volume
/gate/source/co60_lapiz22.5/gps/shape Cylinder
/gate/source/co60_lapiz22.5/gps/radius {RADIO_FUENTE}
/gate/source/co60_lapiz22.5/gps/halfy {ALTURA_FUENTE}
/gate/source/co60_lapiz22.5/gps/energytype UserSpectrum
/gate/source/co60_lapiz22.5/gps/setSpectrumFile /fuente3/mdetectores/DiscreteSpectrumCo60.txt
/gate/source/co60_lapiz22.5/gps/angtype iso
/gate/source/co60_lapiz22.5/visualize 10000 green 20

# Fuente 3: Ángulo 45
/gate/source/addSource co60_lapiz45 gps
/gate/source/co60_lapiz45/setActivity {ACTIVIDAD}
/gate/source/co60_lapiz45/setForcedUnstableFlag false
/gate/source/co60_lapiz45/gps/particle gamma
/gate/source/co60_lapiz45/gps/centre 56.923 0 56.923 mm
/gate/source/co60_lapiz45/gps/type Volume
/gate/source/co60_lapiz45/gps/shape Cylinder
/gate/source/co60_lapiz45/gps/radius {RADIO_FUENTE}
/gate/source/co60_lapiz45/gps/halfy {ALTURA_FUENTE}
/gate/source/co60_lapiz45/gps/energytype UserSpectrum
/gate/source/co60_lapiz45/gps/setSpectrumFile /fuente3/mdetectores/DiscreteSpectrumCo60.txt
/gate/source/co60_lapiz45/gps/angtype iso
/gate/source/co60_lapiz45/visualize 10000 green 20

# Fuente 4: Ángulo 67.5
/gate/source/addSource co60_lapiz67.5 gps
/gate/source/co60_lapiz67.5/setActivity {ACTIVIDAD}
/gate/source/co60_lapiz67.5/setForcedUnstableFlag false
/gate/source/co60_lapiz67.5/gps/particle gamma
/gate/source/co60_lapiz67.5/gps/centre 30.828 0 74.662 mm
/gate/source/co60_lapiz67.5/gps/type Volume
/gate/source/co60_lapiz67.5/gps/shape Cylinder
/gate/source/co60_lapiz67.5/gps/radius {RADIO_FUENTE}
/gate/source/co60_lapiz67.5/gps/halfy {ALTURA_FUENTE}
/gate/source/co60_lapiz67.5/gps/energytype UserSpectrum
/gate/source/co60_lapiz67.5/gps/setSpectrumFile /fuente3/mdetectores/DiscreteSpectrumCo60.txt
/gate/source/co60_lapiz67.5/gps/angtype iso
/gate/source/co60_lapiz67.5/visualize 10000 green 20

# Fuente 5: Ángulo 90
/gate/source/addSource co60_lapiz90 gps
/gate/source/co60_lapiz90/setActivity {ACTIVIDAD}
/gate/source/co60_lapiz90/setForcedUnstableFlag false
/gate/source/co60_lapiz90/gps/particle gamma
/gate/source/co60_lapiz90/gps/centre 0 0 80.5 mm
/gate/source/co60_lapiz90/gps/type Volume
/gate/source/co60_lapiz90/gps/shape Cylinder
/gate/source/co60_lapiz90/gps/radius {RADIO_FUENTE}
/gate/source/co60_lapiz90/gps/halfy {ALTURA_FUENTE}
/gate/source/co60_lapiz90/gps/energytype UserSpectrum
/gate/source/co60_lapiz90/gps/setSpectrumFile /fuente3/mdetectores/DiscreteSpectrumCo60.txt
/gate/source/co60_lapiz90/gps/angtype iso
/gate/source/co60_lapiz90/visualize 10000 green 20

# Fuente 6: Ángulo 112.5
/gate/source/addSource co60_lapiz112.5 gps
/gate/source/co60_lapiz112.5/setActivity {ACTIVIDAD}
/gate/source/co60_lapiz112.5/setForcedUnstableFlag false
/gate/source/co60_lapiz112.5/gps/particle gamma
/gate/source/co60_lapiz112.5/gps/centre -30.828 0 74.662 mm
/gate/source/co60_lapiz112.5/gps/type Volume
/gate/source/co60_lapiz112.5/gps/shape Cylinder
/gate/source/co60_lapiz112.5/gps/radius {RADIO_FUENTE}
/gate/source/co60_lapiz112.5/gps/halfy {ALTURA_FUENTE}
/gate/source/co60_lapiz112.5/gps/energytype UserSpectrum
/gate/source/co60_lapiz112.5/gps/setSpectrumFile /fuente3/mdetectores/DiscreteSpectrumCo60.txt
/gate/source/co60_lapiz112.5/gps/angtype iso
/gate/source/co60_lapiz112.5/visualize 10000 green 20

# Fuente 7: Ángulo 135
/gate/source/addSource co60_lapiz135 gps
/gate/source/co60_lapiz135/setActivity {ACTIVIDAD}
/gate/source/co60_lapiz135/setForcedUnstableFlag false
/gate/source/co60_lapiz135/gps/particle gamma
/gate/source/co60_lapiz135/gps/centre -56.923 0 56.923 mm
/gate/source/co60_lapiz135/gps/type Volume
/gate/source/co60_lapiz135/gps/shape Cylinder
/gate/source/co60_lapiz135/gps/radius {RADIO_FUENTE}
/gate/source/co60_lapiz135/gps/halfy {ALTURA_FUENTE}
/gate/source/co60_lapiz135/gps/energytype UserSpectrum
/gate/source/co60_lapiz135/gps/setSpectrumFile /fuente3/mdetectores/DiscreteSpectrumCo60.txt
/gate/source/co60_lapiz135/gps/angtype iso
/gate/source/co60_lapiz135/visualize 10000 green 20

# Fuente 8: Ángulo 157.5
/gate/source/addSource co60_lapiz157.5 gps
/gate/source/co60_lapiz157.5/setActivity {ACTIVIDAD}
/gate/source/co60_lapiz157.5/setForcedUnstableFlag false
/gate/source/co60_lapiz157.5/gps/particle gamma
/gate/source/co60_lapiz157.5/gps/centre -74.662 0 30.828 mm
/gate/source/co60_lapiz157.5/gps/type Volume
/gate/source/co60_lapiz157.5/gps/shape Cylinder
/gate/source/co60_lapiz157.5/gps/radius {RADIO_FUENTE}
/gate/source/co60_lapiz157.5/gps/halfy {ALTURA_FUENTE}
/gate/source/co60_lapiz157.5/gps/energytype UserSpectrum
/gate/source/co60_lapiz157.5/gps/setSpectrumFile /fuente3/mdetectores/DiscreteSpectrumCo60.txt
/gate/source/co60_lapiz157.5/gps/angtype iso
/gate/source/co60_lapiz157.5/visualize 10000 green 20

# Fuente 9: Ángulo 180
/gate/source/addSource co60_lapiz180 gps
/gate/source/co60_lapiz180/setActivity {ACTIVIDAD}
/gate/source/co60_lapiz180/setForcedUnstableFlag false
/gate/source/co60_lapiz180/gps/particle gamma
/gate/source/co60_lapiz180/gps/centre -80.5 0 0 mm
/gate/source/co60_lapiz180/gps/type Volume
/gate/source/co60_lapiz180/gps/shape Cylinder
/gate/source/co60_lapiz180/gps/radius {RADIO_FUENTE}
/gate/source/co60_lapiz180/gps/halfy {ALTURA_FUENTE}
/gate/source/co60_lapiz180/gps/energytype UserSpectrum
/gate/source/co60_lapiz180/gps/setSpectrumFile /fuente3/mdetectores/DiscreteSpectrumCo60.txt
/gate/source/co60_lapiz180/gps/angtype iso
/gate/source/co60_lapiz180/visualize 10000 green 20

# Fuente 10: Ángulo 202.5
/gate/source/addSource co60_lapiz202.5 gps
/gate/source/co60_lapiz202.5/setActivity {ACTIVIDAD}
/gate/source/co60_lapiz202.5/setForcedUnstableFlag false
/gate/source/co60_lapiz202.5/gps/particle gamma
/gate/source/co60_lapiz202.5/gps/centre -74.662 0 -30.828 mm
/gate/source/co60_lapiz202.5/gps/type Volume
/gate/source/co60_lapiz202.5/gps/shape Cylinder
/gate/source/co60_lapiz202.5/gps/radius {RADIO_FUENTE}
/gate/source/co60_lapiz202.5/gps/halfy {ALTURA_FUENTE}
/gate/source/co60_lapiz202.5/gps/energytype UserSpectrum
/gate/source/co60_lapiz202.5/gps/setSpectrumFile /fuente3/mdetectores/DiscreteSpectrumCo60.txt
/gate/source/co60_lapiz202.5/gps/angtype iso
/gate/source/co60_lapiz202.5/visualize 10000 green 20

# Fuente 11: Ángulo 225
/gate/source/addSource co60_lapiz225 gps
/gate/source/co60_lapiz225/setActivity {ACTIVIDAD}
/gate/source/co60_lapiz225/setForcedUnstableFlag false
/gate/source/co60_lapiz225/gps/particle gamma
/gate/source/co60_lapiz225/gps/centre -56.923 0 -56.923 mm
/gate/source/co60_lapiz225/gps/type Volume
/gate/source/co60_lapiz225/gps/shape Cylinder
/gate/source/co60_lapiz225/gps/radius {RADIO_FUENTE}
/gate/source/co60_lapiz225/gps/halfy {ALTURA_FUENTE}
/gate/source/co60_lapiz225/gps/energytype UserSpectrum
/gate/source/co60_lapiz225/gps/setSpectrumFile /fuente3/mdetectores/DiscreteSpectrumCo60.txt
/gate/source/co60_lapiz225/gps/angtype iso
/gate/source/co60_lapiz225/visualize 10000 green 20

# Fuente 12: Ángulo 247.5
/gate/source/addSource co60_lapiz247.5 gps
/gate/source/co60_lapiz247.5/setActivity {ACTIVIDAD}
/gate/source/co60_lapiz247.5/setForcedUnstableFlag false
/gate/source/co60_lapiz247.5/gps/particle gamma
/gate/source/co60_lapiz247.5/gps/centre -30.828 0 -74.662 mm
/gate/source/co60_lapiz247.5/gps/type Volume
/gate/source/co60_lapiz247.5/gps/shape Cylinder
/gate/source/co60_lapiz247.5/gps/radius {RADIO_FUENTE}
/gate/source/co60_lapiz247.5/gps/halfy {ALTURA_FUENTE}
/gate/source/co60_lapiz247.5/gps/energytype UserSpectrum
/gate/source/co60_lapiz247.5/gps/setSpectrumFile /fuente3/mdetectores/DiscreteSpectrumCo60.txt
/gate/source/co60_lapiz247.5/gps/angtype iso
/gate/source/co60_lapiz247.5/visualize 10000 green 20

# Fuente 13: Ángulo 270
/gate/source/addSource co60_lapiz270 gps
/gate/source/co60_lapiz270/setActivity {ACTIVIDAD}
/gate/source/co60_lapiz270/setForcedUnstableFlag false
/gate/source/co60_lapiz270/gps/particle gamma
/gate/source/co60_lapiz270/gps/centre 0 0 -80.5 mm
/gate/source/co60_lapiz270/gps/type Volume
/gate/source/co60_lapiz270/gps/shape Cylinder
/gate/source/co60_lapiz270/gps/radius {RADIO_FUENTE}
/gate/source/co60_lapiz270/gps/halfy {ALTURA_FUENTE}
/gate/source/co60_lapiz270/gps/energytype UserSpectrum
/gate/source/co60_lapiz270/gps/setSpectrumFile /fuente3/mdetectores/DiscreteSpectrumCo60.txt
/gate/source/co60_lapiz270/gps/angtype iso
/gate/source/co60_lapiz270/visualize 10000 green 20

# Fuente 14: Ángulo 292.5
/gate/source/addSource co60_lapiz292.5 gps
/gate/source/co60_lapiz292.5/setActivity {ACTIVIDAD}
/gate/source/co60_lapiz292.5/setForcedUnstableFlag false
/gate/source/co60_lapiz292.5/gps/particle gamma
/gate/source/co60_lapiz292.5/gps/centre 30.828 0 -74.662 mm
/gate/source/co60_lapiz292.5/gps/type Volume
/gate/source/co60_lapiz292.5/gps/shape Cylinder
/gate/source/co60_lapiz292.5/gps/radius {RADIO_FUENTE}
/gate/source/co60_lapiz292.5/gps/halfy {ALTURA_FUENTE}
/gate/source/co60_lapiz292.5/gps/energytype UserSpectrum
/gate/source/co60_lapiz292.5/gps/setSpectrumFile /fuente3/mdetectores/DiscreteSpectrumCo60.txt
/gate/source/co60_lapiz292.5/gps/angtype iso
/gate/source/co60_lapiz292.5/visualize 10000 green 20

# Fuente 15: Ángulo 315
/gate/source/addSource co60_lapiz315 gps
/gate/source/co60_lapiz315/setActivity {ACTIVIDAD}
/gate/source/co60_lapiz315/setForcedUnstableFlag false
/gate/source/co60_lapiz315/gps/particle gamma
/gate/source/co60_lapiz315/gps/centre 56.923 0 -56.923 mm
/gate/source/co60_lapiz315/gps/type Volume
/gate/source/co60_lapiz315/gps/shape Cylinder
/gate/source/co60_lapiz315/gps/radius {RADIO_FUENTE}
/gate/source/co60_lapiz315/gps/halfy {ALTURA_FUENTE}
/gate/source/co60_lapiz315/gps/energytype UserSpectrum
/gate/source/co60_lapiz315/gps/setSpectrumFile /fuente3/mdetectores/DiscreteSpectrumCo60.txt
/gate/source/co60_lapiz315/gps/angtype iso
/gate/source/co60_lapiz315/visualize 10000 green 20

# Fuente 16: Ángulo 337.5
/gate/source/addSource co60_lapiz337.5 gps
/gate/source/co60_lapiz337.5/setActivity {ACTIVIDAD}
/gate/source/co60_lapiz337.5/setForcedUnstableFlag false
/gate/source/co60_lapiz337.5/gps/particle gamma
/gate/source/co60_lapiz337.5/gps/centre 74.662 0 -30.828 mm
/gate/source/co60_lapiz337.5/gps/type Volume
/gate/source/co60_lapiz337.5/gps/shape Cylinder
/gate/source/co60_lapiz337.5/gps/radius {RADIO_FUENTE}
/gate/source/co60_lapiz337.5/gps/halfy {ALTURA_FUENTE}
/gate/source/co60_lapiz337.5/gps/energytype UserSpectrum
/gate/source/co60_lapiz337.5/gps/setSpectrumFile /fuente3/mdetectores/DiscreteSpectrumCo60.txt
/gate/source/co60_lapiz337.5/gps/angtype iso
/gate/source/co60_lapiz337.5/visualize 10000 green 20


#====================
#DOSE ACTOR (para dosis y energ a total absorbida en aguafricke)
#====================
/gate/actor/addActor DoseActor dose_fricke1 
/gate/actor/dose_fricke1/attachTo aguafricke1 
/gate/actor/dose_fricke1/enableDose true 
/gate/actor/dose_fricke1/enableEdep true 
/gate/actor/dose_fricke1/enableUncertaintyDose true 
/gate/actor/dose_fricke1/enableUncertaintyEdep true 
/gate/actor/dose_fricke1/stepHitType random 
/gate/actor/dose_fricke1/setDoseAlgorithm VolumeWeighting 
/gate/actor/dose_fricke1/save /fuente3/mdetectores/output/detector1/dose_fricke1.txt

/gate/actor/addActor DoseActor dose_fricke2 
/gate/actor/dose_fricke2/attachTo aguafricke2 
/gate/actor/dose_fricke2/enableDose true 
/gate/actor/dose_fricke2/enableEdep true 
/gate/actor/dose_fricke2/enableUncertaintyDose true 
/gate/actor/dose_fricke2/enableUncertaintyEdep true 
/gate/actor/dose_fricke2/stepHitType random 
/gate/actor/dose_fricke2/setDoseAlgorithm VolumeWeighting 
/gate/actor/dose_fricke2/save /fuente3/mdetectores/output/detector2/dose_fricke2.txt

/gate/actor/addActor DoseActor dose_fricke3 
/gate/actor/dose_fricke3/attachTo aguafricke3 
/gate/actor/dose_fricke3/enableDose true 
/gate/actor/dose_fricke3/enableEdep true 
/gate/actor/dose_fricke3/enableUncertaintyDose true 
/gate/actor/dose_fricke3/enableUncertaintyEdep true 
/gate/actor/dose_fricke3/stepHitType random 
/gate/actor/dose_fricke3/setDoseAlgorithm VolumeWeighting 
/gate/actor/dose_fricke3/save /fuente3/mdetectores/output/detector3/dose_fricke3.txt

/gate/actor/addActor DoseActor dose_fricke4 
/gate/actor/dose_fricke4/attachTo aguafricke4 
/gate/actor/dose_fricke4/enableDose true 
/gate/actor/dose_fricke4/enableEdep true 
/gate/actor/dose_fricke4/enableUncertaintyDose true 
/gate/actor/dose_fricke4/enableUncertaintyEdep true 
/gate/actor/dose_fricke4/stepHitType random 
/gate/actor/dose_fricke4/setDoseAlgorithm VolumeWeighting 
/gate/actor/dose_fricke4/save /fuente3/mdetectores/output/detector4/dose_fricke4.txt

/gate/actor/addActor DoseActor dose_fricke5 
/gate/actor/dose_fricke5/attachTo aguafricke5 
/gate/actor/dose_fricke5/enableDose true 
/gate/actor/dose_fricke5/enableEdep true 
/gate/actor/dose_fricke5/enableUncertaintyDose true 
/gate/actor/dose_fricke5/enableUncertaintyEdep true 
/gate/actor/dose_fricke5/stepHitType random 
/gate/actor/dose_fricke5/setDoseAlgorithm VolumeWeighting 
/gate/actor/dose_fricke5/save /fuente3/mdetectores/output/detector5/dose_fricke5.txt

/gate/actor/addActor DoseActor dose_fricke6 
/gate/actor/dose_fricke6/attachTo aguafricke6 
/gate/actor/dose_fricke6/enableDose true 
/gate/actor/dose_fricke6/enableEdep true 
/gate/actor/dose_fricke6/enableUncertaintyDose true 
/gate/actor/dose_fricke6/enableUncertaintyEdep true 
/gate/actor/dose_fricke6/stepHitType random 
/gate/actor/dose_fricke6/setDoseAlgorithm VolumeWeighting 
/gate/actor/dose_fricke6/save /fuente3/mdetectores/output/detector6/dose_fricke6.txt

/gate/actor/addActor DoseActor dose_fricke7 
/gate/actor/dose_fricke7/attachTo aguafricke7 
/gate/actor/dose_fricke7/enableDose true 
/gate/actor/dose_fricke7/enableEdep true 
/gate/actor/dose_fricke7/enableUncertaintyDose true 
/gate/actor/dose_fricke7/enableUncertaintyEdep true 
/gate/actor/dose_fricke7/stepHitType random 
/gate/actor/dose_fricke7/setDoseAlgorithm VolumeWeighting 
/gate/actor/dose_fricke7/save /fuente3/mdetectores/output/detector7/dose_fricke7.txt

/gate/actor/addActor DoseActor dose_fricke8 
/gate/actor/dose_fricke8/attachTo aguafricke8 
/gate/actor/dose_fricke8/enableDose true 
/gate/actor/dose_fricke8/enableEdep true 
/gate/actor/dose_fricke8/enableUncertaintyDose true 
/gate/actor/dose_fricke8/enableUncertaintyEdep true 
/gate/actor/dose_fricke8/stepHitType random 
/gate/actor/dose_fricke8/setDoseAlgorithm VolumeWeighting 
/gate/actor/dose_fricke8/save /fuente3/mdetectores/output/detector8/dose_fricke8.txt

/gate/actor/addActor DoseActor dose_fricke9 
/gate/actor/dose_fricke9/attachTo aguafricke9 
/gate/actor/dose_fricke9/enableDose true 
/gate/actor/dose_fricke9/enableEdep true 
/gate/actor/dose_fricke9/enableUncertaintyDose true 
/gate/actor/dose_fricke9/enableUncertaintyEdep true 
/gate/actor/dose_fricke9/stepHitType random 
/gate/actor/dose_fricke9/setDoseAlgorithm VolumeWeighting 
/gate/actor/dose_fricke9/save /fuente3/mdetectores/output/detector9/dose_fricke9.txt

/gate/actor/addActor DoseActor dose_fricke10 
/gate/actor/dose_fricke10/attachTo aguafricke10 
/gate/actor/dose_fricke10/enableDose true 
/gate/actor/dose_fricke10/enableEdep true 
/gate/actor/dose_fricke10/enableUncertaintyDose true 
/gate/actor/dose_fricke10/enableUncertaintyEdep true 
/gate/actor/dose_fricke10/stepHitType random 
/gate/actor/dose_fricke10/setDoseAlgorithm VolumeWeighting 
/gate/actor/dose_fricke10/save /fuente3/mdetectores/output/detector10/dose_fricke10.txt

/gate/actor/addActor DoseActor dose_fricke11 
/gate/actor/dose_fricke11/attachTo aguafricke11 
/gate/actor/dose_fricke11/enableDose true 
/gate/actor/dose_fricke11/enableEdep true 
/gate/actor/dose_fricke11/enableUncertaintyDose true 
/gate/actor/dose_fricke11/enableUncertaintyEdep true 
/gate/actor/dose_fricke11/stepHitType random 
/gate/actor/dose_fricke11/setDoseAlgorithm VolumeWeighting 
/gate/actor/dose_fricke11/save /fuente3/mdetectores/output/detector11/dose_fricke11.txt

/gate/actor/addActor DoseActor dose_fricke12 
/gate/actor/dose_fricke12/attachTo aguafricke12 
/gate/actor/dose_fricke12/enableDose true 
/gate/actor/dose_fricke12/enableEdep true 
/gate/actor/dose_fricke12/enableUncertaintyDose true 
/gate/actor/dose_fricke12/enableUncertaintyEdep true 
/gate/actor/dose_fricke12/stepHitType random 
/gate/actor/dose_fricke12/setDoseAlgorithm VolumeWeighting 
/gate/actor/dose_fricke12/save /fuente3/mdetectores/output/detector12/dose_fricke12.txt

/gate/actor/addActor DoseActor dose_fricke13 
/gate/actor/dose_fricke13/attachTo aguafricke13 
/gate/actor/dose_fricke13/enableDose true 
/gate/actor/dose_fricke13/enableEdep true 
/gate/actor/dose_fricke13/enableUncertaintyDose true 
/gate/actor/dose_fricke13/enableUncertaintyEdep true 
/gate/actor/dose_fricke13/stepHitType random 
/gate/actor/dose_fricke13/setDoseAlgorithm VolumeWeighting 
/gate/actor/dose_fricke13/save /fuente3/mdetectores/output/detector13/dose_fricke13.txt

/gate/actor/addActor DoseActor dose_fricke14 
/gate/actor/dose_fricke14/attachTo aguafricke14 
/gate/actor/dose_fricke14/enableDose true 
/gate/actor/dose_fricke14/enableEdep true 
/gate/actor/dose_fricke14/enableUncertaintyDose true 
/gate/actor/dose_fricke14/enableUncertaintyEdep true 
/gate/actor/dose_fricke14/stepHitType random 
/gate/actor/dose_fricke14/setDoseAlgorithm VolumeWeighting 
/gate/actor/dose_fricke14/save /fuente3/mdetectores/output/detector14/dose_fricke14.txt

/gate/actor/addActor DoseActor dose_fricke15 
/gate/actor/dose_fricke15/attachTo aguafricke15 
/gate/actor/dose_fricke15/enableDose true 
/gate/actor/dose_fricke15/enableEdep true 
/gate/actor/dose_fricke15/enableUncertaintyDose true 
/gate/actor/dose_fricke15/enableUncertaintyEdep true 
/gate/actor/dose_fricke15/stepHitType random 
/gate/actor/dose_fricke15/setDoseAlgorithm VolumeWeighting 
/gate/actor/dose_fricke15/save /fuente3/mdetectores/output/detector15/dose_fricke15.txt

/gate/actor/addActor DoseActor dose_fricke16 
/gate/actor/dose_fricke16/attachTo aguafricke16 
/gate/actor/dose_fricke16/enableDose true 
/gate/actor/dose_fricke16/enableEdep true 
/gate/actor/dose_fricke16/enableUncertaintyDose true 
/gate/actor/dose_fricke16/enableUncertaintyEdep true 
/gate/actor/dose_fricke16/stepHitType random 
/gate/actor/dose_fricke16/setDoseAlgorithm VolumeWeighting 
/gate/actor/dose_fricke16/save /fuente3/mdetectores/output/detector16/dose_fricke16.txt

/gate/actor/addActor DoseActor dose_fricke17 
/gate/actor/dose_fricke17/attachTo aguafricke17 
/gate/actor/dose_fricke17/enableDose true 
/gate/actor/dose_fricke17/enableEdep true 
/gate/actor/dose_fricke17/enableUncertaintyDose true 
/gate/actor/dose_fricke17/enableUncertaintyEdep true 
/gate/actor/dose_fricke17/stepHitType random 
/gate/actor/dose_fricke17/setDoseAlgorithm VolumeWeighting 
/gate/actor/dose_fricke17/save /fuente3/mdetectores/output/detector17/dose_fricke17.txt

/gate/actor/addActor DoseActor dose_fricke18 
/gate/actor/dose_fricke18/attachTo aguafricke18 
/gate/actor/dose_fricke18/enableDose true 
/gate/actor/dose_fricke18/enableEdep true 
/gate/actor/dose_fricke18/enableUncertaintyDose true 
/gate/actor/dose_fricke18/enableUncertaintyEdep true 
/gate/actor/dose_fricke18/stepHitType random 
/gate/actor/dose_fricke18/setDoseAlgorithm VolumeWeighting 
/gate/actor/dose_fricke18/save /fuente3/mdetectores/output/detector18/dose_fricke18.txt

/gate/actor/addActor DoseActor dose_fricke19 
/gate/actor/dose_fricke19/attachTo aguafricke19 
/gate/actor/dose_fricke19/enableDose true 
/gate/actor/dose_fricke19/enableEdep true 
/gate/actor/dose_fricke19/enableUncertaintyDose true 
/gate/actor/dose_fricke19/enableUncertaintyEdep true 
/gate/actor/dose_fricke19/stepHitType random 
/gate/actor/dose_fricke19/setDoseAlgorithm VolumeWeighting 
/gate/actor/dose_fricke19/save /fuente3/mdetectores/output/detector19/dose_fricke19.txt

#====================
# ACTOR 2 (actor para contar part culas)
#====================
/gate/actor/addActor SimulationStatisticActor stat
/gate/actor/stat/save /fuente3/undetector/output/stat.txt

#=================================================================
# PRODUCTION AND STOPPING ACTOR (para trayectorias en aguafricke)
#=================================================================
/gate/actor/addActor ProductionAndStoppingActor traj1 
/gate/actor/traj1/attachTo aguafricke1 
/gate/actor/traj1/save /fuente3/mdetectores/output/detector1/traj1.txt

/gate/actor/addActor ProductionAndStoppingActor traj2 
/gate/actor/traj2/attachTo aguafricke2 
/gate/actor/traj2/save /fuente3/mdetectores/output/detector2/traj2.txt

/gate/actor/addActor ProductionAndStoppingActor traj3 
/gate/actor/traj3/attachTo aguafricke3 
/gate/actor/traj3/save /fuente3/mdetectores/output/detector3/traj3.txt

/gate/actor/addActor ProductionAndStoppingActor traj4 
/gate/actor/traj4/attachTo aguafricke4 
/gate/actor/traj4/save /fuente3/mdetectores/output/detector4/traj4.txt

/gate/actor/addActor ProductionAndStoppingActor traj5 
/gate/actor/traj5/attachTo aguafricke5 
/gate/actor/traj5/save /fuente3/mdetectores/output/detector5/traj5.txt

/gate/actor/addActor ProductionAndStoppingActor traj6 
/gate/actor/traj6/attachTo aguafricke6 
/gate/actor/traj6/save /fuente3/mdetectores/output/detector6/traj6.txt

/gate/actor/addActor ProductionAndStoppingActor traj7 
/gate/actor/traj7/attachTo aguafricke7 
/gate/actor/traj7/save /fuente3/mdetectores/output/detector7/traj7.txt

/gate/actor/addActor ProductionAndStoppingActor traj8 
/gate/actor/traj8/attachTo aguafricke8 
/gate/actor/traj8/save /fuente3/mdetectores/output/detector8/traj8.txt

/gate/actor/addActor ProductionAndStoppingActor traj9 
/gate/actor/traj9/attachTo aguafricke9 
/gate/actor/traj9/save /fuente3/mdetectores/output/detector9/traj9.txt

/gate/actor/addActor ProductionAndStoppingActor traj10 
/gate/actor/traj10/attachTo aguafricke10 
/gate/actor/traj10/save /fuente3/mdetectores/output/detector10/traj10.txt

/gate/actor/addActor ProductionAndStoppingActor traj11 
/gate/actor/traj11/attachTo aguafricke11 
/gate/actor/traj11/save /fuente3/mdetectores/output/detector11/traj11.txt

/gate/actor/addActor ProductionAndStoppingActor traj12 
/gate/actor/traj12/attachTo aguafricke12 
/gate/actor/traj12/save /fuente3/mdetectores/output/detector12/traj12.txt

/gate/actor/addActor ProductionAndStoppingActor traj13 
/gate/actor/traj13/attachTo aguafricke13 
/gate/actor/traj13/save /fuente3/mdetectores/output/detector13/traj13.txt

/gate/actor/addActor ProductionAndStoppingActor traj14 
/gate/actor/traj14/attachTo aguafricke14 
/gate/actor/traj14/save /fuente3/mdetectores/output/detector14/traj14.txt

/gate/actor/addActor ProductionAndStoppingActor traj15 
/gate/actor/traj15/attachTo aguafricke15 
/gate/actor/traj15/save /fuente3/mdetectores/output/detector15/traj15.txt

/gate/actor/addActor ProductionAndStoppingActor traj16 
/gate/actor/traj16/attachTo aguafricke16 
/gate/actor/traj16/save /fuente3/mdetectores/output/detector16/traj16.txt

/gate/actor/addActor ProductionAndStoppingActor traj17 
/gate/actor/traj17/attachTo aguafricke17 
/gate/actor/traj17/save /fuente3/mdetectores/output/detector17/traj17.txt

/gate/actor/addActor ProductionAndStoppingActor traj18 
/gate/actor/traj18/attachTo aguafricke18 
/gate/actor/traj18/save /fuente3/mdetectores/output/detector18/traj18.txt

/gate/actor/addActor ProductionAndStoppingActor traj19 
/gate/actor/traj19/attachTo aguafricke19 
/gate/actor/traj19/save /fuente3/mdetectores/output/detector19/traj19.txt


#====================
#INITIALIZE
#====================
/gate/run/initialize


#====================
#TIME SLICE
#====================
/gate/application/setTimeSlice     0.00042 s
/gate/application/setTimeStart     0.  s
/gate/application/setTimeStop      0.00042 s


#====================
#SEED 
#====================
/gate/random/setEngineName MersenneTwister
/gate/random/setEngineSeed auto
/gate/random/verbose 0


#====================
#START ACQUISITION
#====================
/gate/application/start





